20190502_231002 Admin
Admin
--{ RES }--
V;200
--{ CFG }--
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1,0;Tube 13*100mm 16 Pos;Labware57
2,0;Tube 13*100mm 16 Pos;Labware46
3,0;Tube 13*100mm 16 Pos;Labware47
4,0;Tube 13*100mm 16 Pos;Labware48
5,0;Tube 13*100mm 16 Pos;Labware49
6,0;Tube 13*100mm 16 Pos;Labware50
17,6;Washstation 2Grid DiTi Waste
19,0;Wash Station Cleaner shallow
19,1;Wash Station Waste
19,2;Wash Station Cleaner deep
42,0;T8 DiTi 500ul Filter MCA96;Labware60
42,1;T8 96 DeepWell;XY Controls
50,2;Adapter 96 DiTi 4to1 MCA384;Labware44
64,0;Wash Block MCA384;Park
1;System
13;Symbol954
59;ADX
41;T8 Hotel 3Pos - 2
36;T8 Hotel 3Pos - 1
25;T8 Hotel 3Pos Varied - 1
31;T8 Hotel 2Pos - 1
21;T8 Hotel 1Pos - 1
46;T8 Hotel 3Pos - 3
51;T8 Hotel 3Pos - 4
56;T8 Hotel 3Pos - 5
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--{ RPG }--
Subroutine("C:\ProgramData\Tecan\EVOware\database\Scripts\_MCA_return_to_center_without_tips.esc",0);
MCA384GetAdapterPlate("Adapter 96 DiTi 4to1 MCA384",50,2,0,0.000000);
MCA384GetTips(42,0,0.000000,"Adapter 96 DiTi 4to1 MCA384",1,-1,0,0,0,0,"T8 DiTi 500ul Filter MCA96",0);
MCA384Mix(96,"CFE_Controls_Mix",350.0,42,1,"0C08¯¯¯¯¯¯¯¯¯¯¯¯¯O",20,0,0,0,0,0);
MCA384DropTips(42,0,1,"Adapter 96 DiTi 4to1 MCA384",1,0,0, 0,0,"T8 DiTi 500ul Filter MCA96",0);
MCA384DropAdapterPlate(1,"Adapter 96 DiTi 4to1 MCA384",50,2,0,-1,0,0.000000,"");
MoveLiha(255,1,0,1,"0110¯10",0,4,0,10,0,0);
ROMA(2,80,75,0,-200,0,150,1,0);
Subroutine("C:\ProgramData\Tecan\EVOware\database\Scripts\_MCA_move_to_corner_without_tips.esc",0);
