20200127_141805 Admin
Admin
--{ RES }--
V;200
--{ CFG }--
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1,0;Tube 13*100mm 16 Pos;Labware57
2,0;Tube 13*100mm 16 Pos;Labware46
3,0;Tube 13*100mm 16 Pos;Labware47
4,0;Tube 13*100mm 16 Pos;Labware48
5,0;Tube 13*100mm 16 Pos;Labware49
6,0;Tube 13*100mm 16 Pos;Labware50
7,0;T8 DiTi 1000ul Filter LiHa;Labware60
17,6;Washstation 2Grid DiTi Waste
19,0;Wash Station Cleaner shallow
19,1;Wash Station Waste
19,2;Wash Station Cleaner deep
20,3;T8 96 DeepWell;Labware58
34,1;T8 96 DeepWell;Labware59
52,2;Adapter 96 DiTi 4to1 MCA384;Labware44
64,0;Wash Block MCA384;Park
1;System
13;Symbol954
59;ADX
41;T8 Hotel 3Pos - 2
36;T8 Hotel 3Pos - 1
25;T8 Hotel 3Pos Varied - 1
31;T8 Hotel 2Pos - 1
21;T8 Hotel 1Pos - 1
46;T8 Hotel 3Pos - 3
51;T8 Hotel 3Pos - 4
56;T8 Hotel 3Pos - 5 1
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--{ RPG }--
PMP_FilterTest(255,0);
Variable(NUM_LOOPS,"1",1,"Number of loops to run",0,1.000000,11.000000,0,2,1,0);
Variable(LEGNTH_TIMER,"1",1,"Legnth of timer",1,1.000000,600.000000,0,2,1,0);
BeginLoop("NUM_LOOPS","dispense leak test");
GetDITI2(255,"T8 DiTi 1000ul Filter LiHa",0,0,0,70);
Aspirate(255,"CFE_Transfer_Plasma_450uL","450","450","450","450","450","450","450","450",0,0,0,0,20,3,1,"0C080000000000¬700",1,"dispense leak test",0,1,0);
MoveLiha(255,34,1,1,"0C08¯1000000000000",0,0,0,10,1,"dispense leak test",0,1,0);
StartTimer("1");
WaitTimer("1","10");
Dispense(85,"CFE_Transfer_Plasma_450uL","450",0,"450",0,"450",0,"450",0,0,0,0,0,34,1,1,"0C0800„20000000000",1,"dispense leak test",0,1,0);
Dispense(170,"CFE_Transfer_Plasma_450uL",0,"450",0,"450",0,"450",0,"450",0,0,0,0,34,1,1,"0C0800X50000000000",1,"dispense leak test",0,1,0);
Comment("loopy");
MoveLiha(255,34,1,1,"0C08¯1000000000000",0,4,0,10,1,"dispense leak test",0,1,0);
StartTimer("1");
WaitTimer("1","LEGNTH_TIMER");
DropDITI(255,17,6,10,70,0);
EndLoop();
EndScript(0);
BeginLoop("40","loopy");
MoveLiha(255,34,1,1,"0C08000000000000 O",0,0,0,10,0,0);
MoveLiha(255,34,1,1,"0C08000000000000 O",0,1,0,10,0,0);
EndLoop();
