20190417_163132 Admin
Admin
--{ RES }--
V;200
--{ CFG }--
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1,0;DiTi 200ul LiHa;Labware70
8,0;Trough 25ml Max. Recovery;Labware71
17,6;Washstation 2Grid DiTi Waste
19,0;Wash Station Cleaner shallow
19,1;Wash Station Waste
19,2;Wash Station Cleaner deep
20,0;T8 96 DeepWell;Labware65
20,3;T8 96 DeepWell;Labware64
34,0;96 Well Microplate;Labware67
42,0;DiTi 200ul MCA96 Tecab;Labware72
42,1;Trough 300ml MCA;Labware69
42,2;T8 Waste Hole;Labware62
50,2;Adapter 96 DiTi 4to1 MCA384;Labware44
64,0;Wash Block MCA384;Park
1;System
13;Symbol954
59;ADX
41;T8 Hotel 3Pos - 2
36;T8 Hotel 3Pos - 1
25;T8 Hotel 3Pos Varied - 1
31;T8 Hotel 2Pos - 1
21;T8 Hotel 1Pos - 1
46;T8 Hotel 3Pos - 3
51;T8 Hotel 3Pos - 4
56;T8 Hotel 3Pos - 5
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--{ RPG }--
MCA384GetAdapterPlate("Adapter 96 DiTi 4to1 MCA384",50,2,0,0.000000);
MCA384GetTips(42,0,0.000000,"Adapter 96 DiTi 4to1 MCA384",1,-1,0,0,0,0,"DiTi 200ul MCA96 Tecab",0);
BeginLoop("2","1");
MCA384Aspirate(96,"Water free dispense",90,42,1,"1810…Z10€ZE00Z…20P…Z00„Z50pZ…00X…:00…Z10€ZE00Z…20P…Z00„Z500",0,0,0,0,0);
MCA384Dispense(96,"Water free dispense",90,34,0,"0C08¯¯¯¯¯¯¯¯¯¯¯¯¯O",0,0,0,0,0);
EndLoop();
MCA384Aspirate(96,"Water free dispense",10,42,1,"1810…Z10€ZE00Z…20P…Z00„Z50pZ…00X…:00…Z10€ZE00Z…20P…Z00„Z500",0,0,0,0,0);
MCA384Dispense(96,"Water free dispense",10,34,0,"0C08¯¯¯¯¯¯¯¯¯¯¯¯¯O",0,0,0,0,0);
MCA384DropTips(42,0,0,"Adapter 96 DiTi 4to1 MCA384",1,0,0, 0,0,"DiTi 200ul MCA96 Tecab",0);
MCA384DropAdapterPlate(0,"",50,2,0,-1,0,0.000000,"");
BeginLoop("12","2");
GetDITI2(255,"DiTi 200ul LiHa",0,0,0,70);
Aspirate(255,"Water free dispense","10","10","10","10","10","10","10","10",0,0,0,0,8,0,1,"0108¯1",0,0);
Dispense(255,"Water free dispense","10","10","10","10","10","10","10","10",0,0,0,0,34,0,1,"0C08¯1000000000000",1,"2",0,1,0);
DropDITI(255,17,6,10,70,0);
EndLoop();
