20191203_150552 Admin
Administrator
--{ RES }--
V;200
--{ CFG }--
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1,0;Tube 16*100mm 96 Pos;Tubes
17,6;Washstation 2Grid DiTi Waste
19,0;Wash Station Cleaner shallow
19,1;Wash Station Waste
19,2;Wash Station Cleaner deep
26,0;T8 96 DeepWell;Serum1
26,1;T8 96 DeepWell;Serum2
26,2;T8 96 DeepWell;Serum3
26,3;T8 96 DeepWell;Serum4
34,0;T8 96 DeepWell;Plasma1
34,1;T8 96 DeepWell;Plasma2
34,2;T8 96 DeepWell;Plasma3
34,3;T8 96 DeepWell;Plasma4
42,0;T8 DiTi 500ul Filter MCA96;Labware45
50,2;Adapter 96 DiTi 4to1 MCA384;Labware44
64,0;Wash Block MCA384;Park
1;System
14;Symbol954
59;ADX
21;T8 Hotel 1Pos - 1
25;T8 Hotel 3Pos Varied - 1
31;T8 Hotel 2Pos - 1
36;T8 Hotel 3Pos - 1
41;T8 Hotel 3Pos - 2
46;T8 Hotel 3Pos - 3
51;T8 Hotel 3Pos - 4
56;T8 Hotel 3Pos - 5
13;Scanner
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--{ RPG }--
Subroutine("C:\ProgramData\Tecan\EVOware\database\Scripts\_MCA_return_to_center_without_tips.esc",0);
MCA384GetAdapterPlate("Adapter 96 DiTi 4to1 MCA384",50,2,0,0.000000);
MCA384GetTips(42,0,0.000000,"Adapter 96 DiTi 4to1 MCA384",1,-1,0,0,0,0,"T8A DiTi 500ul Filter MCA96",0);
BeginLoop("4","Serum to Plasma");
MCA384Aspirate(96,"PS_Plasma_Aspiration_450","225",26,0,"0C08¯¯¯¯¯¯¯¯¯¯¯¯¯O",1,"Serum to Plasma",3,1,0,0,0,0);
MCA384Dispense(96,"PS_Plasma_Dispense_450","225",34,0,"0C08¯¯¯¯¯¯¯¯¯¯¯¯¯O",1,"Serum to Plasma",3,1,0,0,0,0);
MCA384Aspirate(96,"PS_Plasma_Low_Aspiration_450","225",26,0,"0C08¯¯¯¯¯¯¯¯¯¯¯¯¯O",1,"Serum to Plasma",3,1,0,0,0,0);
MCA384Dispense(96,"PS_Plasma_Dispense_450","225",34,0,"0C08¯¯¯¯¯¯¯¯¯¯¯¯¯O",1,"Serum to Plasma",3,1,0,0,0,0);
EndLoop();
MCA384DropTips(42,0,1,"Adapter 96 DiTi 4to1 MCA384",1,0,0, 0,0,"T8A DiTi 500ul Filter MCA96",0);
MCA384DropAdapterPlate(1,"Adapter 96 DiTi 4to1 MCA384",50,2,0,-1,0,0.000000,"");
Subroutine("C:\ProgramData\Tecan\EVOware\database\Scripts\_MCA_move_to_corner_without_tips.esc",0);
