20191203_150611 Admin
Administrator
--{ RES }--
V;200
--{ CFG }--
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1,0;Tube 16*100mm 96 Pos;Tubes
7,0;T8 DiTi 1000ul Filter LiHa;Labware47
7,1;T8 96 DeepWell;Serum2
7,2;T8 96 DeepWell;Serum1
17,6;Washstation 2Grid DiTi Waste
19,0;Wash Station Cleaner shallow
19,1;Wash Station Waste
19,2;Wash Station Cleaner deep
50,2;Adapter 96 DiTi 4to1 MCA384;Labware44
64,0;Wash Block MCA384;Labware15
1;System
14;Symbol954
59;ADX
21;T8 Hotel 1Pos - 1
25;T8 Hotel 3Pos Varied - 1
31;T8 Hotel 2Pos - 1
36;T8 Hotel 3Pos - 1
41;T8 Hotel 3Pos - 2
46;T8 Hotel 3Pos - 3
51;T8 Hotel 3Pos - 4
56;T8 Hotel 3Pos - 5
13;Scanner
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--{ RPG }--
Variable(run_uuid,"todays date",0,"Number of tubes",0,1.000000,96.000000,1,2,0,0);
Variable(tubecount,"-1",0,"Number of tubes",0,1.000000,96.000000,0,2,0,0);
Variable(rackpos,"1",0,"",0,1.000000,2.000000,0,2,0,0);
Variable(tubeindex,"1",0,"",0,1.000000,2.000000,0,2,0,0);
Set_DITI_Counter2("T8 DiTi 1000ul Filter LiHa","7","1","1",0);
BeginLoop("(((tubecount-1)/8)-0.5) + 1","serum transfer");
GetDITI2(255,"T8 DiTi 1000ul Filter LiHa",1,0,0,70);
Aspirate(255,"PS_Serum_Aspiration_530","530","530","530","530","530","530","530","530",0,0,0,0,1,0,1,"0610¯1000000000000",1,"serum transfer",2,8,0);
Dispense(255,"PS_Serum_Dispense_530","530","530","530","530","530","530","530","530",0,0,0,0,7,2,1,"0C08¯1000000000000",1,"serum transfer",0,1,0);
MoveLiha(255,7,2,1,"0C08¯1000000000000",4,3,-11,30,1,"serum transfer",0,1,0);
MoveLiha(255,7,2,1,"0C08¯1000000000000",4,4,0,20,1,"serum transfer",0,1,0);
Aspirate(255,"PS_Serum_Aspiration_530","530","530","530","530","530","530","530","530",0,0,0,0,1,0,1,"0610¯1000000000000",1,"serum transfer",2,8,0);
Dispense(255,"PS_Serum_Dispense_530","530","530","530","530","530","530","530","530",0,0,0,0,7,1,1,"0C08¯1000000000000",1,"serum transfer",0,1,0);
MoveLiha(255,7,1,1,"0C08¯1000000000000",4,3,-11,30,1,"serum transfer",0,1,0);
MoveLiha(255,7,1,1,"0C08¯1000000000000",4,4,0,20,1,"serum transfer",0,1,0);
DropDITI(255,17,6,10,70,0);
EndLoop();
