20200429_164225 Admin
Administrator
--{ RES }--
V;200
--{ CFG }--
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1,0;Tube 13*100mm 16 Pos;Labware45
2,0;Tube 13*100mm 16 Pos;Labware46
3,0;Tube 13*100mm 16 Pos;Labware47
4,0;Tube 13*100mm 16 Pos;Labware48
5,0;Tube 13*100mm 16 Pos;Labware49
6,0;Tube 13*100mm 16 Pos;Labware50
7,0;T8 DiTi 1000ul Filter LiHa;Labware51
7,2;T8 96 DeepWell;Labware52
17,6;Washstation 2Grid DiTi Waste
19,0;Wash Station Cleaner shallow
19,1;Wash Station Waste
19,2;Wash Station Cleaner deep
50,2;Adapter 96 DiTi 4to1 MCA384;Labware44
64,0;Wash Block MCA384;Park
1;System
59;ADX
21;T8 Hotel 1Pos - 1
25;T8 Hotel 3Pos Varied - 1
31;T8 Hotel 2Pos - 1
36;T8 Hotel 3Pos - 1
41;T8 Hotel 3Pos - 2
46;T8 Hotel 3Pos - 3
51;T8 Hotel 3Pos - 4
56;T8 Hotel 3Pos - 5
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--{ RPG }--
Set_DITI_Counter2("T8 DiTi 1000ul Filter LiHa","7","1","1",0);
GetDITI2(255,"T8 DiTi 1000ul Filter LiHa",1,0,0,70);
Aspirate(255,"CFE_Test_Liha_Aspirate","530","530","530","530","530","530","530","530",0,0,0,0,7,2,1,"0C08¯1000000000000",0,0);
MoveLiha(255,7,2,1,"0C08¯1000000000000",0,0,0,10,0,0);
WaitTimer("1","30");
Dispense(255,"PS_Serum_Dispense_530","530","530","530","530","530","530","530","530",0,0,0,0,7,2,1,"0C08¯1000000000000",0,0);
DropDITI(255,17,6,10,70,0);
