20170928_101137 Admin
Import with ExportImport
EVOware ExportImport Tool
--{ RES }--
V;200
--{ CFG }--
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1,0;Counsyl DiTi Waste Chute;Labware2
1,1;Wash Station Waste
1,2;Wash Station Cleaner deep;Labware3
10,0;96BeckmanDeepPlate;Labware4
17,0;LIHA ONLY 96BeckmanDeepPlate;Pulldown Plate
17,1;96BeckmanDeepPlate;Destination
17,2;DiTi 50ul Filter LiHa;50uL DiTi
24,1;96 Well UV Star Half Area;Cleanup
31,1;Adapter 96 DiTi MCA384;Adaptor96
31,2;Adapter 96 DiTi 4to1 MCA384;Large96
1;System
22;1D Reader
2;Multiflo
32;T5 Hotel 1 - 2Pos
36;T5 Hotel 2 - 4Pos
41;T5 Hotel 3 - 3Pos
33;T5 Hotel 1 - 1Pos
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--{ RPG }--
MCA384Move(1,17,0,1,"0C08¯¯¯¯¯¯¯¯¯¯¯¯¯O",0,4,0,10,0,0,384,0);
MCA384DockCGM(0);
Wash(255,1,1,1,2,"50",500,"4.0",500,10,70,30,1,0,1000,0);
Variable(worklist,"C:\cygwin\home\counsyl\automation\gwl_files\nop.gwl",0,"",0,1.000000,10.000000,1,2,0,0);
Set_DITI_Counter2("DiTi 50ul Filter LiHa","17","3","1",0);
Worklist(0,~worklist~,255,"t5b DTS Consolidation 192",0,0);GetDITI2(255,"DiTi 50ul Filter LiHa",1,0,10,70);DropDITI(1,1,0,10,70,0);
Worklist(1,,0,"",0,0);GetDITI2(1,"DiTi 50ul Filter LiHa",1,0,10,70);DropDITI(1,1,0,10,70,0);
MoveLiha(255,1,0,1,"0108¯1",0,4,0,10,0,0);
MCA384Move(1,24,1,1,"0C08¯¯¯¯¯¯¯¯¯¯¯¯¯O",0,4,0,10,0,0,384,0);
MCA384UndockCGM(0,2700,"",,);
