20170928_101137 Admin
Import with ExportImport
EVOware ExportImport Tool
--{ RES }--
V;200
--{ CFG }--
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1,0;Counsyl DiTi Waste Chute;Labware2
1,1;Wash Station Waste
1,2;Wash Station Cleaner deep;Labware3
17,0;96 Well UV Star Half Area;Labware13
17,1;96BeckmanDeepPlate;Labware8
17,2;DiTi 50ul Filter LiHa;Labware14
24,1;Eppendorf 384 Well PCR Plate;Labware4
31,1;Adapter 96 DiTi MCA384;Adaptor96
31,2;Adapter 96 DiTi 4to1 MCA384;Large96
38,0;DiTi 125ul Filter MCA384;Labware6
38,1;DiTi 125ul Filter MCA384;Labware5
44,0;DiTi 500ul Filter SBS MCA96;FullTipBox
44,1;Fake Trough Tip Box Waste;Labware9
1;System
22;1D Reader
41;T5 Hotel 3Pos 1
36;T5 Hotel 3Pos 2
26;T5 Hotel 4Pos 1
32;T5 Hotel 2Pos 1
2;Multiflo
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--{ RPG }--
Wash(255,1,1,1,2,"30",500,"4.0",500,10,70,30,1,0,1000,0);
Set_DITI_Counter2("DiTi 50ul Filter LiHa","17","3","1",0);
BeginLoop("12","loop");
Wash(255,1,1,1,2,"10",500,"4.0",500,10,70,30,1,0,1000,0);
GetDITI2(255,"DiTi 50ul Filter LiHa",0,0,10,70);
Aspirate(255,"DiTi DNA Consolidation","2","2","2","2","2","2","2","2",0,0,0,0,17,0,1,"0C08¯1000000000000",0,0);
Dispense(255,"DiTi DNA Consolidation","2","2","2","2","2","2","2","2",0,0,0,0,17,1,1,"0C08¯1000000000000",1,"loop",0,1,0);
DropDITI(255,1,0,10,70,0);
EndLoop();
MCA384GetAdapterPlate("Adapter 96 DiTi MCA384",31,1,0,0.000000);
MCA384GetTips(38,1,0.000000,"Adapter 96 DiTi MCA384",1,-1,0,0,0,0,"DiTi 125ul Filter MCA384",0);
MCA384Aspirate(96,"Water wet contact MCA384 DiTi 125",100,17,1,"0C08¯¯¯¯¯¯¯¯¯¯¯¯¯O",0,0,0,0,0);
MCA384Move(1,17,1,1,"0C08¯¯¯¯¯¯¯¯¯¯¯¯¯O",0,4,0,10,0,0,96,0);
StartTimer("1");
WaitTimer("1","60");
MCA384Dispense(96,"Water wet contact MCA384 DiTi 125",100,17,1,"0C08¯¯¯¯¯¯¯¯¯¯¯¯¯O",0,0,0,0,0);
Command("O1SLO4,1,10,40",1,1,,,2,2,0);
MCA384DropTips(44,0,0,"Adapter 96 DiTi 4to1 MCA384",1,0,0, 0,0,"DiTi 500ul Filter SBS MCA96",0);
Command("O1SLO4,0",1,1,,,2,2,0);
MCA384DropAdapterPlate(0,"",31,2,0,-1,0,0.000000,"");
