20180124_150306 Admin
Administrator
--{ RES }--
V;200
--{ CFG }--
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1,0;Counsyl DiTi Waste Chute;Labware2
1,1;Wash Station Waste
1,2;Wash Station Cleaner deep;Labware3
17,1;ARTEL-96 Well Microplate;Labware19
17,2;DiTi 50ul Filter LiHa;Labware17
24,0;Eppendorf 384 Well PCR Plate;Labware4
24,1;96 Well UV Star Half Area;Labware18
31,1;Adapter 96 DiTi MCA384;Adaptor96
31,2;Adapter 96 DiTi 4to1 MCA384;Large96
38,0;DiTi 125ul Filter MCA384;Labware6
38,1;DiTi 125ul Filter MCA384;Labware5
44,0;DiTi 500ul Filter SBS MCA96;FullTipBox
44,1;Fake Trough Tip Box Waste;Labware9
1;System
22;1D Reader
41;T5 Hotel 3Pos 1
36;T5 Hotel 3Pos 2
26;T5 Hotel 4Pos 1
32;T5 Hotel 2Pos 1
2;Multiflo
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--{ RPG }--
Wash(255,1,1,1,2,"30",500,"4.0",500,10,70,30,1,0,1000,0);
Set_DITI_Counter2("DiTi 50ul Filter LiHa","17","3","1",0);
Wash(255,1,1,1,2,"10",500,"4.0",500,10,70,30,1,0,1000,0);
BeginLoop("4","loop");
GetDITI2(255,"DiTi 50ul Filter LiHa",0,0,10,70);
Aspirate(255,"DiTi DNA Consolidation","5","5","5","5","5","5","5","5",0,0,0,0,24,1,1,"0C08¯1000000000000",1,"loop",0,1,0);
Dispense(255,"DiTi DNA Consolidation","5","5","5","5","5","5","5","5",0,0,0,0,17,1,1,"0C08¯1000000000000",1,"loop",0,1,0);
DropDITI(255,1,0,10,70,0);
EndLoop();
Wash(255,1,1,1,2,"10",500,"4.0",500,10,70,30,1,0,1000,0);
BeginLoop("4","loop");
GetDITI2(255,"DiTi 50ul Filter LiHa",0,0,10,70);
Aspirate(255,"DiTi DNA Consolidation","15","15","15","15","15","15","15","15",0,0,0,0,24,1,1,"0C080000 O00000000",1,"loop",0,1,0);
Dispense(255,"DiTi DNA Consolidation","15","15","15","15","15","15","15","15",0,0,0,0,17,1,1,"0C080000 O00000000",1,"loop",0,1,0);
DropDITI(255,1,0,10,70,0);
EndLoop();
Wash(255,1,1,1,2,"10",500,"4.0",500,10,70,30,1,0,1000,0);
BeginLoop("4","loop");
GetDITI2(255,"DiTi 50ul Filter LiHa",0,0,10,70);
Aspirate(255,"DiTi DNA Consolidation","30","30","30","30","30","30","30","30",0,0,0,0,24,1,1,"0C08000000000®3000",1,"loop",0,1,0);
Dispense(255,"DiTi DNA Consolidation","30","30","30","30","30","30","30","30",0,0,0,0,17,1,1,"0C08000000000®3000",1,"loop",0,1,0);
DropDITI(255,1,0,10,70,0);
EndLoop();
