20200728_225404 Admin
Administrator
--{ RES }--
V;200
--{ CFG }--
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1,0;Counsyl DiTi Waste Chute;Labware2
1,1;Wash Station Waste
1,2;Wash Station Cleaner deep;Labware3
17,0;LIHA ONLY 96BeckmanDeepPlate;Labware13
17,1;DiTi 200ul Filter LiHa;Labware14
17,2;DiTi 200ul Filter LiHa;Labware12
24,1;ARTEL-96 Well Microplate;Corning plate
31,1;Adapter 96 DiTi MCA384;Adaptor96
31,2;Adapter 96 DiTi 4to1 MCA384;Large96
38,0;DiTi 125ul Filter MCA384;Labware6
38,1;DiTi 125ul Filter MCA384;Labware5
44,0;DiTi 500ul Filter SBS MCA96;FullTipBox
44,1;Fake Trough Tip Box Waste;Labware9
1;System
22;1D Reader
41;T5 Hotel 3Pos 1
36;T5 Hotel 3Pos 2
26;T5 Hotel 4Pos 1
32;T5 Hotel 2Pos 1
2;Multiflo
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--{ RPG }--
Wash(255,1,1,1,2,"30",500,"4.0",500,10,70,30,1,0,1000,0);
Set_DITI_Counter2("DiTi 200ul Filter LiHa","17","3","1",0);
Set_DITI_Counter2("DiTi 200ul Filter LiHa","17","2","1",0);
Variable(Artel_Test,"1",1,"1 for full range 2 of single volume",1,1.000000,2.000000,0,2,1,0);
If("Artel_Test",0,"1","Full range testing");
If("Artel_Test",0,"2","Single volume testing");
Comment("Full range testing");
Variable(low_volume,"5",1,"Set low_volume target volume",0,1.000000,10.990000,0,2,1,0);
Variable(mid_volume,"30",1,"Set mid_volume target volume",1,11.000000,99.990000,0,2,1,0);
Variable(high_volume,"100",1,"Set low_volume target volume",1,100.000000,200.000000,0,2,1,0);
Variable(Diluent,"200",1,"Set Diluent reagent  volume",1,150.000000,200.000000,0,2,1,0);
Comment("Dispensing Diluent to corning plate");
GetDITI2(255,"DiTi 200ul Filter LiHa",0,0,10,70);
Comment("Diluent for low_volume");
BeginLoop("4","low_volume");
Aspirate(255,"Artel_NIPS_Consol_LibraryTransfer_Asp","Diluent - low_volume","Diluent - low_volume","Diluent - low_volume","Diluent - low_volume","Diluent - low_volume","Diluent - low_volume","Diluent - low_volume","Diluent - low_volume",0,0,0,0,17,0,1,"0C080000000000¬700",0,0);
Dispense(255,"Artel_NIPS_Consol_LibraryTransfer_Asp","Diluent - low_volume","Diluent - low_volume","Diluent - low_volume","Diluent - low_volume","Diluent - low_volume","Diluent - low_volume","Diluent - low_volume","Diluent - low_volume",0,0,0,0,24,1,1,"0C08¯1000000000000",1,"low_volume",0,1,0);
EndLoop();
Comment("Diluent for mid_volume");
BeginLoop("4","mid_volume");
Aspirate(255,"Artel_NIPS_Consol_LibraryTransfer_Asp","Diluent - mid_volume","Diluent - mid_volume","Diluent - mid_volume","Diluent - mid_volume","Diluent - mid_volume","Diluent - mid_volume","Diluent - mid_volume","Diluent - mid_volume",0,0,0,0,17,0,1,"0C0800000000000¨?0",0,0);
Dispense(255,"Artel_NIPS_Consol_LibraryTransfer_Asp","Diluent - mid_volume","Diluent - mid_volume","Diluent - mid_volume","Diluent - mid_volume","Diluent - mid_volume","Diluent - mid_volume","Diluent - mid_volume","Diluent - mid_volume",0,0,0,0,24,1,1,"0C080000 O00000000",1,"mid_volume",0,1,0);
EndLoop();
Comment("Diluent for high_volume");
BeginLoop("4","high_volume");
Aspirate(255,"Artel_NIPS_Consol_LibraryTransfer_Asp","Diluent - high_volume","Diluent - high_volume","Diluent - high_volume","Diluent - high_volume","Diluent - high_volume","Diluent - high_volume","Diluent - high_volume","Diluent - high_volume",0,0,0,0,17,0,1,"0C08000000000000 O",0,0);
Dispense(255,"Artel_NIPS_Consol_LibraryTransfer_Asp","Diluent - high_volume","Diluent - high_volume","Diluent - high_volume","Diluent - high_volume","Diluent - high_volume","Diluent - high_volume","Diluent - high_volume","Diluent - high_volume",0,0,0,0,24,1,1,"0C08000000000®3000",1,"high_volume",0,1,0);
EndLoop();
DropDITI(255,1,0,10,70,0);
Comment("Dispense Target volume");
Comment("low_volume reagent");
BeginLoop("4","low_volume");
GetDITI2(255,"DiTi 200ul Filter LiHa",0,0,10,70);
Aspirate(255,"DiTi DNA Consolidation Elution","low_volume","low_volume","low_volume","low_volume","low_volume","low_volume","low_volume","low_volume",0,0,0,0,17,0,1,"0C08¯1000000000000",0,0);
Dispense(255,"DiTi DNA Consolidation Elution"," low_volume"," low_volume"," low_volume"," low_volume"," low_volume"," low_volume"," low_volume"," low_volume",0,0,0,0,24,1,1,"0C08¯1000000000000",1,"low_volume",0,1,0);
DropDITI(255,1,0,10,70,0);
EndLoop();
Comment("mid_volume reagent");
BeginLoop("4","mid_volume");
GetDITI2(255,"DiTi 200ul Filter LiHa",0,0,10,70);
Aspirate(255,"DiTi DNA Consolidation Elution","mid_volume","mid_volume","mid_volume","mid_volume","mid_volume","mid_volume","mid_volume","mid_volume",0,0,0,0,17,0,1,"0C080®300000000000",0,0);
Dispense(255,"DiTi DNA Consolidation Elution","mid_volume","mid_volume","mid_volume","mid_volume","mid_volume","mid_volume","mid_volume","mid_volume",0,0,0,0,24,1,1,"0C080000 O00000000",1,"mid_volume",0,1,0);
DropDITI(255,1,0,10,70,0);
EndLoop();
Comment("high_volume reagent");
BeginLoop("4","high_volume");
GetDITI2(255,"DiTi 200ul Filter LiHa",0,0,10,70);
Aspirate(255,"DiTi DNA Consolidation Elution","high_volume","high_volume","high_volume","high_volume","high_volume","high_volume","high_volume","high_volume",0,0,0,0,17,0,1,"0C0800¬70000000000",0,0);
Dispense(255,"DiTi DNA Consolidation Elution","high_volume","high_volume","high_volume","high_volume","high_volume","high_volume","high_volume","high_volume",0,0,0,0,24,1,1,"0C08000000000®3000",1,"high_volume",0,1,0);
DropDITI(255,1,0,10,70,0);
EndLoop();
EndScript(0);
Comment("Single volume testing");
Variable(target_volume,"5",1,"Set target volume",1,1.000000,199.000000,0,2,1,0);
Variable(Diluent,"200",1,"Set Diluent reagent  volume",1,150.000000,200.000000,0,2,1,0);
Comment("Diluent for target_volume");
GetDITI2(255,"DiTi 200ul Filter LiHa",0,0,10,70);
BeginLoop("4","target_volume");
Aspirate(255,"DiTi DNA Consolidation Elution","Diluent - target_volume","Diluent - target_volume","Diluent - target_volume","Diluent - target_volume","Diluent - target_volume","Diluent - target_volume","Diluent - target_volume","Diluent - target_volume",0,0,0,0,17,0,1,"0C080000000000¬700",0,0);
Dispense(255,"DiTi DNA Consolidation Elution","Diluent - target_volume","Diluent - target_volume","Diluent - target_volume","Diluent - target_volume","Diluent - target_volume","Diluent - target_volume","Diluent - target_volume","Diluent - target_volume",0,0,0,0,24,1,1,"0C08¯1000000000000",1,"target_volume",0,1,0);
EndLoop();
BeginLoop("4","target_volume");
Aspirate(255,"DiTi DNA Consolidation Elution","Diluent - target_volume","Diluent - target_volume","Diluent - target_volume","Diluent - target_volume","Diluent - target_volume","Diluent - target_volume","Diluent - target_volume","Diluent - target_volume",0,0,0,0,17,0,1,"0C0800000000000¨?0",0,0);
Dispense(255,"DiTi DNA Consolidation Elution","Diluent - target_volume","Diluent - target_volume","Diluent - target_volume","Diluent - target_volume","Diluent - target_volume","Diluent - target_volume","Diluent - target_volume","Diluent - target_volume",0,0,0,0,24,1,1,"0C080000 O00000000",1,"target_volume",0,1,0);
EndLoop();
BeginLoop("4","target_volume");
Aspirate(255,"DiTi DNA Consolidation Elution","Diluent - target_volume","Diluent - target_volume","Diluent - target_volume","Diluent - target_volume","Diluent - target_volume","Diluent - target_volume","Diluent - target_volume","Diluent - target_volume",0,0,0,0,17,0,1,"0C08000000000000 O",0,0);
Dispense(255,"DiTi DNA Consolidation Elution","Diluent - target_volume","Diluent - target_volume","Diluent - target_volume","Diluent - target_volume","Diluent - target_volume","Diluent - target_volume","Diluent - target_volume","Diluent - target_volume",0,0,0,0,24,1,1,"0C08000000000®3000",1,"target_volume",0,1,0);
EndLoop();
DropDITI(255,1,0,10,70,0);
Comment("target_volume reagent");
BeginLoop("12","target_volume_reagent");
GetDITI2(255,"DiTi 200ul Filter LiHa",0,0,10,70);
Aspirate(255,"DiTi DNA Consolidation Elution","30","30","30","30","30","30","30","30",0,0,0,0,17,0,1,"0C080®300000000000",0,0);
Dispense(255,"DiTi DNA Consolidation Elution","30","30","30","30","30","30","30","30",0,0,0,0,24,1,1,"0C08¯1000000000000",1,"target_volume_reagent",0,1,0);
DropDITI(255,1,0,10,70,0);
EndLoop();
EndScript(0);
