20200401_135712 Admin
Administrator
--{ RES }--
V;200
--{ CFG }--
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1,0;Counsyl DiTi Waste Chute;Labware2
1,1;Wash Station Waste
1,2;Wash Station Cleaner deep;Labware3
17,0;Eppendorf 96 Well Microplate;Library Plate
17,1;96BeckmanDeepPlate;Consolidation Plate
17,2;DiTi 200ul Filter LiHa;200uL Liha DiTis
31,1;Adapter 96 DiTi MCA384;Adaptor96
31,2;Adapter 96 DiTi 4to1 MCA384;Large96
44,0;DiTi 500ul Filter SBS MCA96;FullTipBox
1;System
22;1D Reader
2;Multiflo
32;T5 Hotel 1 - 2Pos
36;T5 Hotel 2 - 4Pos
41;T5 Hotel 3 - 3Pos
33;T5 Hotel 1 - 1Pos
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--{ RPG }--
MCA384Move(1,17,0,1,"0C08¯¯¯¯¯¯¯¯¯¯¯¯¯O",0,4,0,10,0,0,384,0);
MCA384DockCGM(0);
Set_DITI_Counter2("DiTi 200ul Filter LiHa","17","3","1",0);
BeginLoop("12","loop");
GetDITI2(255,"DiTi 200ul Filter LiHa",0,0,10,70);
DropDITI(255,1,0,10,70,0);
EndLoop();
MoveLiha(255,1,0,1,"0108¯1",0,4,0,10,0,0);
MCA384Move(1,17,0,1,"0C08¯¯¯¯¯¯¯¯¯¯¯¯¯O",0,4,0,10,0,0,384,0);
MCA384UndockCGM(0,2700,"",,);
