CAC301FC
20200813_153309 Admin           
Import with ExportImport                                                                                                        
EVOware ExportImport Tool                                                                                                       
--{ RES }--
V;200
--{ CFG }--
999;219;32;
14;-1;-1;-1;-1;-1;311;-1;-1;-1;-1;328;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-1;
998;0;
998;0;
998;0;
998;0;
998;0;
998;3;Wash Station Waste;Counsyl DiTi Waste Chute;Wash Station Cleaner deep;
998;Wash Station Waste;Counsyl DiTi Waste Chute;Wash Station Cleaner Deep;
998;0;
998;0;
998;0;
998;0;
998;1;;
998;;
998;0;
998;0;
998;0;
998;0;
998;0;
998;0;
998;3;Eppendorf 96 Well Microplate;96BeckmanDeepPlate;DiTi 50ul Filter LiHa;
998;Library Plate;Consolidation Plate;50uL Liha DiTis;
998;0;
998;0;
998;0;
998;0;
998;0;
998;0;
998;2;;;
998;;;
998;0;
998;0;
998;0;
998;0;
998;0;
998;0;
998;3;;Adapter 96 DiTi MCA384;Adapter 96 DiTi 4to1 MCA384;
998;;Adaptor96;Large96;
998;0;
998;0;
998;0;
998;0;
998;0;
998;0;
998;2;;;
998;;;
998;0;
998;0;
998;0;
998;0;
998;0;
998;2;DiTi 500ul Filter SBS MCA96;;
998;FullTipBox;;
998;0;
998;0;
998;0;
998;0;
998;0;
998;0;
998;0;
998;0;
998;0;
998;0;
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998;7;
998;4;0;System;
998;0;2;1D Reader;
998;0;0;Multiflo;
998;0;3;T5 Hotel 1 - 2Pos;
998;0;1;T5 Hotel 2 - 4Pos;
998;0;4;T5 Hotel 3 - 3Pos;
998;0;5;T5 Hotel 1 - 1Pos;
998;0;
998;1;
998;22;
998;2;
998;32;
998;36;
998;41;
998;33;
996;0;0;
--{ RPG }--
MCA384Move(1,17,0,1,"0C08¯¯¯¯¯¯¯¯¯¯¯¯¯O",0,4,0,10,0,0,384,0);
MCA384DockCGM(0);
Wash(255,5,0,5,2,"50",500,"4.0",500,10,70,30,1,0,1000,0);
Variable(worklist,"C:\cygwin\home\counsyl\automation\gwl_files\nop.gwl",0,"",0,1.000000,10.000000,1,2,0,0);
Worklist(0,~worklist~,255,"NIPS_Consol_LibraryTransfer_Asp",0,0);GetDITI2(255,"DiTi 50ul Filter LiHa",1,0,10,70);DropDITI(255,5,1,10,70,0);
Worklist(1,,0,"",0,0);GetDITI2(255,"DiTi 50ul Filter LiHa",1,0,10,70);DropDITI(255,5,1,10,70,0);
MoveLiha(255,5,1,1,"0108¯1",0,4,0,10,0,0);
MCA384Move(1,17,0,1,"0C08¯¯¯¯¯¯¯¯¯¯¯¯¯O",0,4,0,10,0,0,384,0);
MCA384UndockCGM(0,2700,"",,);
