20180821_143032 Admin
Administrator
--{ RES }--
V;200
--{ CFG }--
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1,0;Counsyl DiTi Waste Chute;Labware2
1,1;Wash Station Waste
1,2;Wash Station Cleaner deep;Labware3
17,1;96BeckmanDeepPlate;Labware19
17,2;Tecan Extraction Plate;Labware16
24,1;Eppendorf 384 Well PCR Plate;Labware4
31,1;Adapter 96 DiTi MCA384;Adaptor96
31,2;Adapter 96 DiTi 4to1 MCA384;Large96
38,1;DiTi 125ul Filter MCA384;Labware20
44,0;DiTi 500ul Filter SBS MCA96;FullTipBox
44,1;Fake Trough Tip Box Waste;Labware9
1;System
22;1D Reader
41;T5 Hotel 3Pos 1
36;T5 Hotel 3Pos 2
26;T5 Hotel 4Pos 1
32;T5 Hotel 2Pos 1
2;Multiflo
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--{ RPG }--
MCA384GetAdapterPlate("Adapter 96 DiTi MCA384",31,1,0,0.000000);
MCA384DockCGM(0);
Command("O1 SLO4,1,10,40",1,1,,,2,2,0);
MCA384GetTips(38,1,0.000000,"Adapter 96 DiTi MCA384",1,-1,1,0,0,0,"DiTi 125ul Filter MCA384",0);
MCA384Aspirate(96,"ARTEL wet contact MCA384 DiTi 125","2",17,1,"0C08¯¯¯¯¯¯¯¯¯¯¯¯¯O",0,0,0,0,0);
MCA384Dispense(96,"ARTEL wet contact MCA384 DiTi 125","2",17,2,"0C08¯¯¯¯¯¯¯¯¯¯¯¯¯O",0,0,0,0,0);
MCA384DropTips(38,1,1,"Adapter 96 DiTi MCA384",1,1,0, 0,0,"DiTi 125ul Filter MCA384",0);
Command("O1 SLO4,0",1,1,,,2,2,0);
