20200814_171652 Admin
Administrator
--{ RES }--
V;200
--{ CFG }--
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1,0;Counsyl DiTi Waste Chute;Labware2
1,1;Wash Station Waste
1,2;Wash Station Cleaner deep;Labware3
5,0;Wash Station Cleaner shallow;Labware28
5,1;Counsyl DiTi Waste Chute;Labware27
17,0;ARTEL-96 Well Microplate;Labware26
17,1;DiTi 200ul SBS LiHa;Labware25
17,2;Tecan Extraction Plate;Labware16
24,0;Trough 125ml MCA96;Labware24
24,1;Trough 125ml MCA96;Labware23
30,0;Trough 100ml;D
30,1;Trough 100ml;BC
31,1;Adapter 96 DiTi MCA384;Adaptor96
31,2;Adapter 96 DiTi 4to1 MCA384;Large96
38,1;DiTi 200ul Filter MCA96;Labware22
44,0;DiTi 500ul Filter SBS MCA96;FullTipBox
44,1;Fake Trough Tip Box Waste;Labware9
1;System
22;1D Reader
41;T5 Hotel 3Pos 1
36;T5 Hotel 3Pos 2
26;T5 Hotel 4Pos 1
32;T5 Hotel 2Pos 1
2;Multiflo
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--{ RPG }--
Wash(255,1,1,5,0,"3.0",500,"4.0",500,10,70,30,1,0,1000,0);
GetDITI2(255,"DiTi 200ul SBS LiHa",0,0,10,70);
BeginLoop("12","12");
Wash(255,1,1,5,0,"3.0",500,"4.0",500,10,70,30,1,0,1000,0);
Aspirate(255,"Water free dispense 1","10","10","10","10","10","10","10","10",0,0,0,0,24,1,1,"0C08¯1000000000000",0,0);
Dispense(255,"Water free dispense 1","10","10","10","10","10","10","10","10",0,0,0,0,17,0,1,"0C08¯1000000000000",1,"12",0,1,0);
EndLoop();
DropDITI(255,5,1,10,70,0);
