20181008_135610 Admin
Administrator
--{ RES }--
V;200
--{ CFG }--
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1,0;Counsyl DiTi Waste Chute;Labware2
1,1;Wash Station Waste
1,2;Wash Station Cleaner deep;Labware3
17,1;ARTEL-96 Well Microplate;Labware19
17,2;DiTi 50ul Filter LiHa;Labware17
24,0;96 Well UV Star Half Area;Labware18
24,1;Artel 96 PCR Plate;Labware21
31,1;Adapter 96 DiTi MCA384;Adaptor96
31,2;Adapter 96 DiTi 4to1 MCA384;Large96
38,0;DiTi 125ul Filter MCA384;Labware6
38,1;DiTi 125ul Filter MCA384;Labware5
44,0;DiTi 500ul Filter SBS MCA96;FullTipBox
44,1;Fake Trough Tip Box Waste;Labware9
1;System
22;1D Reader
36;T5 Hotel 3Pos 2
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--{ RPG }--
Wash(255,1,1,1,2,"30",500,"4.0",500,10,70,30,1,0,1000,0);
Set_DITI_Counter2("DiTi 50ul Filter LiHa","17","3","1",0);
Wash(255,1,1,1,2,"10",500,"4.0",500,10,70,30,1,0,1000,0);
BeginLoop("6","loop");
GetDITI2(255,"DiTi 50ul Filter LiHa",0,0,10,70);
Aspirate(255,"DiTi DNA Consolidation","1","1","1","1","1","1","1","1",0,0,0,0,24,1,1,"0C080®300000000000",0,0);
Dispense(255,"DiTi DNA Consolidation","1","1","1","1","1","1","1","1",0,0,0,0,17,1,1,"0C08¯1000000000000",1,"loop",0,1,0);
DropDITI(255,1,0,10,70,0);
EndLoop();
Wash(255,1,1,1,2,"10",500,"4.0",500,10,70,30,1,0,1000,0);
BeginLoop("6","loop");
GetDITI2(255,"DiTi 50ul Filter LiHa",0,0,10,70);
Aspirate(255,"DiTi DNA Consolidation","2","2","2","2","2","2","2","2",0,0,0,0,24,1,1,"0C0800¬70000000000",0,0);
Dispense(255,"DiTi DNA Consolidation","2","2","2","2","2","2","2","2",0,0,0,0,17,1,1,"0C08000000p¯000000",1,"loop",0,1,0);
DropDITI(255,1,0,10,70,0);
EndLoop();
Wash(255,1,1,1,2,"10",500,"4.0",500,10,70,30,1,0,1000,0);
