20170808_184609 Admin
Import with ExportImport
EVOware ExportImport Tool
--{ RES }--
V;200
--{ CFG }--
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1,0;Counsyl DiTi Waste Chute;Labware2
1,1;Wash Station Waste
1,2;Wash Station Cleaner deep;Labware3
17,0;Eppendorf 96 Well Microplate;Library Plate
17,1;96 Well UV Star Half Area;Labware6
17,2;DiTi 50ul Filter LiHa;50uL Liha DiTis
31,1;Adapter 96 DiTi MCA384;Adaptor96
31,2;Adapter 96 DiTi 4to1 MCA384;Large96
38,0;DiTi 500ul Filter SBS MCA96;Labware5
38,1;DiTi 125ul Filter MCA384;Labware4
44,0;DiTi 500ul Filter SBS MCA96;FullTipBox
1;System
22;1D Reader
2;Multiflo
32;T5 Hotel 1 - 2Pos
36;T5 Hotel 2 - 4Pos
41;T5 Hotel 3 - 3Pos
33;T5 Hotel 1 - 1Pos
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--{ RPG }--
MCA384TransferLabware("17","33",0,0,0,0,0,"","96 Well UV Star Half Area","Narrow","","","T5 MP 3Pos Fixed Flat 01","","T5 Hotel 1 - 1Pos","2","(Not defined)","1");
MCA384GetAdapterPlate("Adapter 96 DiTi MCA384",31,1,0,0.000000);
MCA384GetTips(38,1,0.000000,"Adapter 96 DiTi MCA384",1,-1,0,0,0,0,"DiTi 125ul Filter MCA384",0);
Command("O1 SLO4,1,10,40",1,1,,,2,2,0);
MCA384DropTips(38,1,0,"Adapter 96 DiTi MCA384",1,0,0, 0,0,"DiTi 125ul Filter MCA384",0);
Command("O1 SLO4,0",1,1,,,2,2,0);
MCA384DropAdapterPlate(0,"",31,1,0,-1,0,0.000000,"");
MCA384TransferLabware("38","33",0,0,0,0,0,"","DiTi 125ul Filter MCA384","Narrow","","","MCA384 DiTi Carrier","","T5 Hotel 1 - 1Pos","2","(Not defined)","2");
MCA384TransferLabware("38","33",0,0,0,0,0,"","DiTi 500ul Filter SBS MCA96","Narrow","","","MCA384 DiTi Carrier","","T5 Hotel 1 - 1Pos","1","(Not defined)","3");
UserPrompt("remove MCA 500uL tip box from Hotel 1 Site 3",0,-1);
MCA384TransferLabware("17","33",0,0,0,0,0,"","DiTi 50ul Filter LiHa","Narrow","","","T5 MP 3Pos Fixed Flat 01","","T5 Hotel 1 - 1Pos","3","(Not defined)","3");
MCA384MoveVector("T5 Hotel 1 - 1Pos_Narrow_CGM_1",33,1,0,1,0,1,0,0);
MCA384MoveVector("1D Reader_Narrow_CGM_1",22,1,0,0,2,2,0,0);
MCA384TransferLabware("36","17",0,0,0,0,0,"","Eppendorf 96 Well Microplate","Narrow","","","T5 Hotel 2 - 4Pos","","T5 MP 3Pos Fixed Flat 01","2","(Not defined)","3");
