20200814_170000 Admin
Administrator
--{ RES }--
V;200
--{ CFG }--
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1,0;Counsyl DiTi Waste Chute;Labware2
1,1;Wash Station Waste
1,2;Wash Station Cleaner deep;Labware3
10,0;96BeckmanDeepPlate;Labware4
17,0;ARTEL-96 Well Microplate;MCA 1
17,2;Trough 125ml MCA96;Labware10
24,1;Trough 125ml MCA96;Liquid
31,1;Adapter 96 DiTi MCA384;Adaptor96
31,2;Adapter 96 DiTi 4to1 MCA384;Large96
38,1;DiTi 200ul Filter MCA96;Labware8
44,0;DiTi 500ul Filter SBS MCA96;FullTipBox
1;System
22;1D Reader
2;Multiflo
32;T5 Hotel 1 - 2Pos
36;T5 Hotel 2 - 4Pos
41;T5 Hotel 3 - 3Pos
33;T5 Hotel 1 - 1Pos
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--{ RPG }--
MCA384GetAdapterPlate("Adapter 96 DiTi 4to1 MCA384",31,2,0,0.000000);
MCA384DockCGM(0);
MCA384GetTips(38,1,0.000000,"Adapter 96 DiTi 4to1 MCA384",1,-1,0,0,0,0,"DiTi 200ul Filter MCA96",0);
BeginLoop("3","QC Plate");
MCA384Aspirate(96,"Water free dispense","100",24,1,"0C08¯¯¯¯¯¯¯¯¯¯¯¯¯O",0,0,0,0,0);
MCA384Dispense(96,"Water free dispense","100",17,0,"0C08¯¯¯¯¯¯¯¯¯¯¯¯¯O",0,0,0,0,0);
MCA384Aspirate(96,"Water free dispense","90",24,1,"0C08¯¯¯¯¯¯¯¯¯¯¯¯¯O",0,0,0,0,0);
MCA384Dispense(96,"Water wet contact","90",17,0,"0C08¯¯¯¯¯¯¯¯¯¯¯¯¯O",0,0,0,0,0);
MCA384Aspirate(96,"Water free dispense","2",17,2,"0C08¯¯¯¯¯¯¯¯¯¯¯¯¯O",0,0,0,0,0);
EndLoop();
MCA384DropTips(38,1,0,"Adapter 96 DiTi 4to1 MCA384",1,0,0, 0,0,"DiTi 200ul Filter MCA96",0);
MCA384DropAdapterPlate(0,"",31,2,0,-1,0,0.000000,"");
