20201117_192159 Admin
Administrator
--{ RES }--
V;200
--{ CFG }--
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5,0;Wash Station Waste;Wash Station Waste
5,1;Counsyl DiTi Waste Chute;Counsyl DiTi Waste Chute
5,2;Wash Station Cleaner deep;Wash Station Cleaner Deep
10,0;96BeckmanDeepPlate;Labware4
17,0;96BeckmanDeepPlate;Labware5
17,1;96 Well UV Star Half Area;Labware7
17,2;96BeckmanDeepPlate50uL;Labware12
24,1;Eppendorf 384 Well PCR 50uL;Labware11
31,1;Adapter 96 DiTi MCA384;Adaptor96
31,2;Adapter 96 DiTi 4to1 MCA384;Large96
38,0;DiTi 50ul Filter MCA384;Labware10
38,1;DiTi 50ul Filter MCA384;Labware9
44,0;DiTi 500ul Filter SBS MCA96;FullTipBox
44,1;Fake Trough Tip Box Waste;Labware6
1;System
22;1D Reader
2;Multiflo
32;T5 Hotel 1 - 2Pos
36;T5 Hotel 2 - 4Pos
41;T5 Hotel 3 - 3Pos
33;T5 Hotel 1 - 1Pos
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--{ RPG }--
MCA384Move(1,17,0,1,"0C08¯¯¯¯¯¯¯¯¯¯¯¯¯O",0,4,0,10,0,0,384,0);
MCA384DockCGM(0);
MCA384GetAdapterPlate("Adapter 96 DiTi MCA384",31,1,0,0.000000);
MCA384GetTips(38,1,0.000000,"Adapter 96 DiTi MCA384",1,-1,0,0,0,0,"DiTi 50ul Filter MCA384",0);
Command("O1 SLO4,1,10,40",1,1,,,2,2,0);
MCA384Move(1,17,2,1,"0C08¯¯¯¯¯¯¯¯¯¯¯¯¯O",0,2,8,10,0,0,96,0);
MCA384Aspirate(96,"Eppendorf 384 mPCR to Corning 384 Bead CleanUp","30",24,1,"1810…Z10€ZE00Z…20P…Z00„Z50pZ…00X…:00…Z10€ZE00Z…20P…Z00„Z500",0,0,0,0,0);
MCA384Dispense(96,"Eppendorf 384 mPCR to Corning 384 Bead CleanUp","30",17,2,"0C08¯¯¯¯¯¯¯¯¯¯¯¯¯O",0,0,0,0,0);
MCA384Aspirate(96,"Eppendorf 384 mPCR to Corning 384 Bead CleanUp","30",24,1,"181000„Z50pZ…00X…:00…Z10€ZE00Z…20P…Z00„Z50pZ…00X…:00…Z10€ZE",0,0,0,1,0);
MCA384Dispense(96,"Eppendorf 384 mPCR to Corning 384 Bead CleanUp","30",17,2,"0C08¯¯¯¯¯¯¯¯¯¯¯¯¯O",0,0,0,0,0);
MCA384Aspirate(96,"Eppendorf 384 mPCR to Corning 384 Bead CleanUp","30",24,1,"1810Z…20P…Z00„Z50pZ…00X…:00…Z10€ZE00Z…20P…Z00„Z50pZ…00X…:00",0,0,0,0,1);
MCA384Dispense(96,"Eppendorf 384 mPCR to Corning 384 Bead CleanUp","30",17,2,"0C08¯¯¯¯¯¯¯¯¯¯¯¯¯O",0,0,0,0,0);
MCA384Aspirate(96,"Eppendorf 384 mPCR to Corning 384 Bead CleanUp","30",24,1,"181000X…:00…Z10€ZE00Z…20P…Z00„Z50pZ…00X…:00…Z10€ZE00Z…20P…Z",0,0,0,1,1);
MCA384Dispense(96,"Eppendorf 384 mPCR to Corning 384 Bead CleanUp","30",17,2,"0C08¯¯¯¯¯¯¯¯¯¯¯¯¯O",0,0,0,0,0);
MCA384DropTips(38,0,1,"Adapter 96 DiTi MCA384",1,0,0, 0,0,"DiTi 50ul Filter MCA384",0);
Command("O1 SLO4,0",1,1,,,2,2,0);
MCA384DropAdapterPlate(1,"Adapter 96 DiTi MCA384",31,1,0,-1,0,0.000000,"");
MCA384Move(1,24,1,1,"1810…Z10€ZE00Z…20P…Z00„Z50pZ…00X…:00…Z10€ZE00Z…20P…Z00„Z500",0,4,0,10,0,0,96,0);
MCA384UndockCGM(0,2700,"",,);
