20190423_141600 Admin
Administrator
--{ RES }--
V;200
--{ CFG }--
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1,0;Counsyl DiTi Waste Chute;Labware2
1,1;Wash Station Waste
1,2;Wash Station Cleaner deep;Labware3
18,0;96 Well Microplate-Tecan QC;Labware5
18,1;96 Well Microplate-Tecan QC;Labware6
18,2;96 Well Microplate-Tecan QC;Labware8
24,0;DiTi 200ul MCA96-Tecan QC;Labware7
24,1;Artel Trough 300ml MCA;Diluent
24,2;Artel Trough 300ml MCA;Dye C
31,1;Adapter 96 DiTi MCA384;Adaptor96
31,2;Adapter 96 DiTi 4to1 MCA384;Large96
37,2;DiTi 200ul MCA96;Tips
1;System
22;1D Reader
2;Multiflo
32;T5 Hotel 1 - 2Pos
36;T5 Hotel 2 - 4Pos
41;T5 Hotel 3 - 3Pos
33;T5 Hotel 1 - 1Pos
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--{ RPG }--
MCA384DockCGM(0);
MCA384GetAdapterPlate("Adapter 96 DiTi 4to1 MCA384",31,2,0,0.000000);
MCA384GetTips(24,0,0.000000,"Adapter 96 DiTi 4to1 MCA384",1,-1,0,0,0,0,"DiTi 200ul MCA96-Tecan QC",0);
UserPrompt("Check",0,-1);
BeginLoop("3","Diluent Dispense");
MCA384Aspirate(96,"Water free dispense","195",24,1,"1810…Z10€ZE00Z…20P…Z00„Z50pZ…00X…:00…Z10€ZE00Z…20P…Z00„Z500",0,0,0,0,0);
MCA384Dispense(96,"Water free dispense","195",18,0,"0C08¯¯¯¯¯¯¯¯¯¯¯¯¯O",1,"Diluent Dispense",3,1,0,0,0,0);
EndLoop();
MCA384DropTips(37,2,0,"Adapter 96 DiTi 4to1 MCA384",1,0,0, 0,0,"DiTi 200ul MCA96",0);
MCA384DockCGM(0);
BeginLoop("3","Dye Dispense");
UserPrompt("Change Tips & Plate",0,-1);
MCA384GetTips(24,0,0.000000,"Adapter 96 DiTi 4to1 MCA384",1,-1,0,0,0,0,"DiTi 200ul MCA96-Tecan QC",0);
UserPrompt("Change Tips & Plate",0,-1);
MCA384Aspirate(96,"Water wet contact","5",24,2,"1810…Z10€ZE00Z…20P…Z00„Z50pZ…00X…:00…Z10€ZE00Z…20P…Z00„Z500",0,0,0,0,0);
MCA384Dispense(96,"Water wet contact","5",18,0,"0C08¯¯¯¯¯¯¯¯¯¯¯¯¯O",0,0,0,0,0);
MCA384DropTips(37,2,0,"Adapter 96 DiTi 4to1 MCA384",1,0,0, 0,0,"DiTi 200ul MCA96",0);
EndLoop();
