20200623_202132 Admin
Import with ExportImport
EVOware ExportImport Tool
--{ RES }--
V;200
--{ CFG }--
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1,6;Washstation 2Grid DiTi Waste
4,1;DiTi 1000ul SBS LiHa;1000DiTi
4,2;96BeckmanDeepPlate;Mag Plate
10,1;96BeckmanDeepPlate;Consolidation plate
16,1;96BeckmanDeepPlate;Cleanup2 Plate
16,2;96BeckmanDeepPlate;Reagent Plate
1;System
44;1D Reader
11;T9 Hotel 3 - 1Pos
17;T9 Hotel 3 - 2Pos
35;T9 Hotel 6 - 1Pos
40;T9 Hotel 6 - 2Pos
29;T9 Hotel 3 - 4Pos
23;T9 Hotel 2 - 3Pos
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--{ RPG }--
Comment("Elution: 2 Channel");
DropDITI(3,1,6,10,70,0);
GetDITI2(3,"DiTi 1000ul SBS LiHa",0,0,0,70);
Aspirate(3,"NIPS_Cleanup2_Elution","90","90",0,0,0,0,0,0,0,0,0,0,16,2,1,"0C0800000000000H00",0,0);
Dispense(3,"NIPS_Cleanup2_Elution","90","90",0,0,0,0,0,0,0,0,0,0,16,1,1,"0C08000H0000000000",0,0);
Mix(3,"DiTi DNA Consolidation Elution Mix","50","50",0,0,0,0,0,0,0,0,0,0,16,1,1,"0C08000H0000000000",6,0,0);
MoveLiha(3,1,6,1,"010830",0,4,0,10,0,0);
