20200623_194738 Admin
Import with ExportImport
EVOware ExportImport Tool
--{ RES }--
V;200
--{ CFG }--
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1,6;Washstation 2Grid DiTi Waste
4,0;DiTi 50ul Filter LiHa;50DiTi Box2
4,1;DiTi 200ul Filter LiHa;200DiTi Box1
10,0;DiTi 50ul Filter LiHa;50DiTi Box1
16,1;Eppendorf 96 Well Microplate;Source Eppendorf
22,0;Balance Mettler SAG285;Labware1
1;System
44;1D Reader
11;T9 Hotel 3 - 1Pos
17;T9 Hotel 3 - 2Pos
23;T9 Hotel 3 - 3Pos
29;T9 Hotel 3 - 4Pos
35;T9 Hotel 6 - 1Pos
40;T9 Hotel 6 - 2Pos
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--{ RPG }--
Variable(fileName,"LC_Consol_Library_##MON##_1",1,"What name for output directory?",0,1.000000,10.000000,1,2,1,0);
PMP_FilterTest(255,0);
Subroutine("C:\ProgramData\Tecan\EVOware\database\Scripts\9_MT_SetScale.esc",0);
Subroutine("C:\ProgramData\Tecan\EVOware\database\Scripts\9_MT_CheckZero3x.esc",0);
Variable(t_vol_1,"2",0,"What name for output directory?",0,1.000000,10.000000,0,2,0,0);
Variable(t_vol_2,"5",0,"What name for output directory?",0,1.000000,10.000000,0,2,0,0);
Variable(t_vol_3,"10",0,"What name for output directory?",0,1.000000,10.000000,0,2,0,0);
BeginLoop("3","low_vol_loop");
Variable(t_vol,"t_vol_~LOOP_low_vol_loop~",0,"",0,1.000000,10.000000,0,2,0,0);
BeginLoop("3","50s_loop");
GetDITI2(255,"DiTi 50ul Filter LiHa",0,0,0,70);
Aspirate(255,"NIPS_Consol_LibraryTransfer_Asp","t_vol","t_vol","t_vol","t_vol","t_vol","t_vol","t_vol","t_vol",0,0,0,0,16,1,1,"0C08¯1000000000000",1,"low_vol_loop",0,1,0);
Dispense(1,"NIPS_Consol_LibraryTransfer_Dsp","t_vol",0,0,0,0,0,0,0,0,0,0,0,22,0,1,"2C011000000",0,0);
Subroutine("C:\ProgramData\Tecan\EVOware\database\Scripts\9_MT_GetWeight_and_Tare.esc",0);
Dispense(2,"NIPS_Consol_LibraryTransfer_Dsp",0,"t_vol",0,0,0,0,0,0,0,0,0,0,22,0,1,"2C011000000",0,0);
Subroutine("C:\ProgramData\Tecan\EVOware\database\Scripts\9_MT_GetWeight_and_Tare.esc",0);
Dispense(4,"NIPS_Consol_LibraryTransfer_Dsp",0,0,"t_vol",0,0,0,0,0,0,0,0,0,22,0,1,"2C011000000",0,0);
Subroutine("C:\ProgramData\Tecan\EVOware\database\Scripts\9_MT_GetWeight_and_Tare.esc",0);
Dispense(8,"NIPS_Consol_LibraryTransfer_Dsp",0,0,0,"t_vol",0,0,0,0,0,0,0,0,22,0,1,"2C011000000",0,0);
Subroutine("C:\ProgramData\Tecan\EVOware\database\Scripts\9_MT_GetWeight_and_Tare.esc",0);
Dispense(16,"NIPS_Consol_LibraryTransfer_Dsp",0,0,0,0,"t_vol",0,0,0,0,0,0,0,22,0,1,"2C011000000",0,0);
Subroutine("C:\ProgramData\Tecan\EVOware\database\Scripts\9_MT_GetWeight_and_Tare.esc",0);
Dispense(32,"NIPS_Consol_LibraryTransfer_Dsp",0,0,0,0,0,"t_vol",0,0,0,0,0,0,22,0,1,"2C011000000",0,0);
Subroutine("C:\ProgramData\Tecan\EVOware\database\Scripts\9_MT_GetWeight_and_Tare.esc",0);
Dispense(64,"NIPS_Consol_LibraryTransfer_Dsp",0,0,0,0,0,0,"t_vol",0,0,0,0,0,22,0,1,"2C011000000",0,0);
Subroutine("C:\ProgramData\Tecan\EVOware\database\Scripts\9_MT_GetWeight_and_Tare.esc",0);
Dispense(128,"NIPS_Consol_LibraryTransfer_Dsp",0,0,0,0,0,0,0,"t_vol",0,0,0,0,22,0,1,"2C011000000",0,0);
Subroutine("C:\ProgramData\Tecan\EVOware\database\Scripts\9_MT_GetWeight_and_Tare.esc",0);
DropDITI(255,1,6,10,70,0);
EndLoop();
EndLoop();
Variable(t_vol_1,"10.01",0,"What name for output directory?",0,1.000000,10.000000,0,2,0,0);
Variable(t_vol_2,"30",0,"What name for output directory?",0,1.000000,10.000000,0,2,0,0);
Variable(t_vol_3,"60",0,"What name for output directory?",0,1.000000,10.000000,0,2,0,0);
BeginLoop("3","high_vol_loop");
Variable(t_vol,"t_vol_~LOOP_high_vol_loop~",0,"",0,1.000000,10.000000,0,2,0,0);
BeginLoop("3","200s_loop");
IfThen("LOOP_high_vol_loop",0,"3");
GetDITI2(255,"DiTi 200ul Filter LiHa",0,0,0,70);
Else();
GetDITI2(255,"DiTi 50ul Filter LiHa",0,0,0,70);
EndIf();
Aspirate(255,"NIPS_Consol_LibraryTransfer_Asp","t_vol","t_vol","t_vol","t_vol","t_vol","t_vol","t_vol","t_vol",0,0,0,0,16,1,1,"0C080®300000000000",1,"high_vol_loop",0,1,0);
Dispense(1,"NIPS_Consol_LibraryTransfer_Dsp","t_vol",0,0,0,0,0,0,0,0,0,0,0,22,0,1,"2C011000000",0,0);
Subroutine("C:\ProgramData\Tecan\EVOware\database\Scripts\9_MT_GetWeight_and_Tare.esc",0);
Dispense(2,"NIPS_Consol_LibraryTransfer_Dsp",0,"t_vol",0,0,0,0,0,0,0,0,0,0,22,0,1,"2C011000000",0,0);
Subroutine("C:\ProgramData\Tecan\EVOware\database\Scripts\9_MT_GetWeight_and_Tare.esc",0);
Dispense(4,"NIPS_Consol_LibraryTransfer_Dsp",0,0,"t_vol",0,0,0,0,0,0,0,0,0,22,0,1,"2C011000000",0,0);
Subroutine("C:\ProgramData\Tecan\EVOware\database\Scripts\9_MT_GetWeight_and_Tare.esc",0);
Dispense(8,"NIPS_Consol_LibraryTransfer_Dsp",0,0,0,"t_vol",0,0,0,0,0,0,0,0,22,0,1,"2C011000000",0,0);
Subroutine("C:\ProgramData\Tecan\EVOware\database\Scripts\9_MT_GetWeight_and_Tare.esc",0);
Dispense(16,"NIPS_Consol_LibraryTransfer_Dsp",0,0,0,0,"t_vol",0,0,0,0,0,0,0,22,0,1,"2C011000000",0,0);
Subroutine("C:\ProgramData\Tecan\EVOware\database\Scripts\9_MT_GetWeight_and_Tare.esc",0);
Dispense(32,"NIPS_Consol_LibraryTransfer_Dsp",0,0,0,0,0,"t_vol",0,0,0,0,0,0,22,0,1,"2C011000000",0,0);
Subroutine("C:\ProgramData\Tecan\EVOware\database\Scripts\9_MT_GetWeight_and_Tare.esc",0);
Dispense(64,"NIPS_Consol_LibraryTransfer_Dsp",0,0,0,0,0,0,"t_vol",0,0,0,0,0,22,0,1,"2C011000000",0,0);
Subroutine("C:\ProgramData\Tecan\EVOware\database\Scripts\9_MT_GetWeight_and_Tare.esc",0);
Dispense(128,"NIPS_Consol_LibraryTransfer_Dsp",0,0,0,0,0,0,0,"t_vol",0,0,0,0,22,0,1,"2C011000000",0,0);
Subroutine("C:\ProgramData\Tecan\EVOware\database\Scripts\9_MT_GetWeight_and_Tare.esc",0);
DropDITI(255,1,6,10,70,0);
EndLoop();
EndLoop();
