20200609_192828 Admin
Import with ExportImport
EVOware ExportImport Tool
--{ RES }--
V;200
--{ CFG }--
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1,6;Washstation 2Grid DiTi Waste
4,2;DiTi 1000ul SBS LiHa;1000DiTi
10,2;96BeckmanDeepPlate;Consolidation plate
10,3;96BeckmanDeepPlate;Mag Plate
16,2;96BeckmanDeepPlate;Cleanup2 Plate
16,3;96BeckmanDeepPlate;Reagent Plate
1;System
44;1D Reader
11;T9 Hotel 3 - 1Pos
17;T9 Hotel 3 - 2Pos
23;T9 Hotel 3 - 3Pos
29;T9 Hotel 3 - 4Pos
35;T9 Hotel 6 - 1Pos
40;T9 Hotel 6 - 2Pos
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--{ RPG }--
Comment("Bead Wash #3");
MoveLiha(3,1,6,1,"010830",0,4,0,10,0,0);
Transfer_Rack("16","10",0,0,0,0,0,"","96BeckmanDeepPlate","Narrow","","","MP 4Pos flat","","MP 4Pos flat w/FLX Mag","3","(Not defined)","4");
Group("Pulldown Incubation");
StartTimer("2");
WaitTimer("2","200");
GetDITI2(3,"DiTi 1000ul SBS LiHa",0,0,0,70);
Mix(3,"DiTi Consol Cleanup PullDown Mix","600","600",0,0,0,0,0,0,0,0,0,0,10,3,1,"0C08000H0000000000",3,0,0);
StartTimer("3");
WaitTimer("3","200");
Mix(3,"DiTi Consol Cleanup PullDown Mix","600","600",0,0,0,0,0,0,0,0,0,0,10,3,1,"0C08000H0000000000",3,0,0);
StartTimer("4");
WaitTimer("4","600");
GroupEnd();
Group("Remove Supernate from Beads");
Aspirate(3,"DiTi Consol Cleanup Beads1","600","600",0,0,0,0,0,0,0,0,0,0,10,3,1,"0C08000H0000000000",0,0);
Aspirate(3,"DiTi Consol Cleanup Beads2","300","300",0,0,0,0,0,0,0,0,0,0,10,3,1,"0C08000H0000000000",0,0);
Dispense(3,"DiTi Consol Cleanup Beads1","900","900",0,0,0,0,0,0,0,0,0,0,10,3,1,"0C0800000000300000",0,0);
GroupEnd();
Group("EtOh Wash");
Aspirate(3,"DiTi Consol Cleanup EtOH1","750","750",0,0,0,0,0,0,0,0,0,0,16,3,1,"0C0800000000060000",0,0);
Dispense(3,"DiTi Consol Cleanup EtOH1","750","750",0,0,0,0,0,0,0,0,0,0,10,3,1,"0C08000H0000000000",0,0);
Mix(3,"DiTi Consol Cleanup EtOH Mix","500","500",0,0,0,0,0,0,0,0,0,0,10,3,1,"0C08000H0000000000",3,0,0);
StartTimer("5");
WaitTimer("4","60");
GroupEnd();
