20200609_192828 Admin
Import with ExportImport
EVOware ExportImport Tool
--{ RES }--
V;200
--{ CFG }--
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3,2;96 Well Microplate;96well Verification Plate
11,0;DiTi 1000ul LiHa;1000ul DiTis LiHa
11,2;DiTi Waste;Waste
19,1;Trough 100ml;Trough 100ml with Baseline
1;System
1;Infinite 200
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--{ RPG }--
Comment("Pipetting");
PMP_FilterTest(255,0);
BeginLoop("3","Baseline 1");
GetDITI2(255,"DiTi 1000ul LiHa",0,0,0,70);
Aspirate(255,"QC Kit 2","800","800","800","800","800","800","800","800",0,0,0,0,19,1,1,"0108¯1",0,0);
BeginLoop("4","Baseline 2");
Dispense(255,"QC Kit 2","200","200","200","200","200","200","200","200",0,0,0,0,3,2,1,"0C08¯1000000000000",2,"Baseline 2",0,1,"Baseline 1",0,4,0);
EndLoop();
DropDITI(255,11,2,10,70,0);
EndLoop();
Comment("End Of Script");
