20200609_192828 Admin
Import with ExportImport
EVOware ExportImport Tool
--{ RES }--
V;200
--{ CFG }--
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2,0;Wash Station Cleaner shallow;Wash Station Cleaner shallow 1
2,1;Wash Station Waste;Wash Station Waste 1
2,2;Wash Station Cleaner deep;Wash Station Cleaner deep 1
4,1;Trough 100ml;Trough 100ml with Diluent
4,2;Trough 25ml Max. Recovery;Trough 25ml with Range Solution
6,2;96 Well Microplate;96well Verification Plate
13,0;DiTi 1000ul LiHa;1000ul DiTis LiHa
13,1;DiTi 200ul LiHa;200ul DiTis LiHa
13,2;DiTi Waste;Waste
1;System
69;Infinite 200
1;Sunrise
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--{ RPG }--
Comment("Pipetting");
Wash(255,2,1,2,0,"10",500,"0.1",500,10,70,30,1,0,1000,0);
Wash(255,2,1,2,0,"5",500,"0.1",500,10,70,30,0,0,1000,0);
Comment("Diluent");
GetDITI2(255,"DiTi 1000ul LiHa",0,0,10,70);
BeginLoop("2","Fill Diluent 1");
Aspirate(255,"QC Kit 2","600","600","600","600","600","600","600","600",0,0,0,0,4,1,1,"0108¯1",0,0);
BeginLoop("6","Fill Diluent 2");
Dispense(255,"QC Kit 2","100","100","100","100","100","100","100","100",0,0,0,0,6,2,1,"0C08¯1000000000000",2,"Fill Diluent 2",0,1,"Fill Diluent 1",0,6,0);
EndLoop();
EndLoop();
DropDITI(255,13,2,10,70,0);
Comment("Range Solution");
BeginLoop("12","Fill Range Solution");
Wash(255,2,1,2,0,"1",500,"0.1",500,10,70,30,0,0,1000,0);
GetDITI2(255,"DiTi 200ul LiHa",0,0,10,70);
Aspirate(255,"QC Kit 2","100","100","100","100","100","100","100","100",0,0,0,0,4,2,1,"0108¯1",0,0);
Dispense(255,"QC Kit 2","100","100","100","100","100","100","100","100",0,0,0,0,6,2,1,"0C08¯1000000000000",1,"Fill Range Solution",0,1,0);
DropDITI(255,13,2,10,70,0);
EndLoop();
Wash(255,2,1,2,0,"3",500,"0.1",500,10,70,30,0,0,1000,0);
Comment("End Of Script");
