20190826_151221 Admin
Import with ExportImport
EVOware ExportImport Tool
--{ RES }--
V;200
--{ CFG }--
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1,6;Washstation 2Grid DiTi Waste
4,2;DiTi 1000ul SBS LiHa;1000DiTi
10,2;96BeckmanDeepPlate;Consolidation plate
10,3;96BeckmanDeepPlate;Mag Plate
16,2;96BeckmanDeepPlate;Cleanup2 Plate
16,3;96BeckmanDeepPlate;Reagent Plate
1;System
44;1D Reader
11;T9 Hotel 3 - 1Pos
17;T9 Hotel 3 - 2Pos
23;T9 Hotel 3 - 3Pos
29;T9 Hotel 3 - 4Pos
35;T9 Hotel 6 - 1Pos
40;T9 Hotel 6 - 2Pos
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--{ RPG }--
Comment("8to2 (Beginning of second cleanup)");
Aspirate(255,"DiTi DNA Consolidation Elution","68","68","68","68","68","68","68","68",0,0,0,0,10,3,1,"0C0800¬70000000000",0,0);
Comment("This is a deliberate overage to assure all eluted material is transferred.");
Dispense(3,"DiTi DNA Consolidation Elution","68","68",0,0,0,0,0,0,0,0,0,0,10,3,1,"0C08000H0000000000",0,0);
Dispense(12,"DiTi DNA Consolidation Elution",0,0,"68","68",0,0,0,0,0,0,0,0,10,3,1,"0C08000H0000000000",0,0);
Dispense(48,"DiTi DNA Consolidation Elution",0,0,0,0,"68","68",0,0,0,0,0,0,10,3,1,"0C08000H0000000000",0,0);
Dispense(192,"DiTi DNA Consolidation Elution",0,0,0,0,0,0,"68","68",0,0,0,0,10,3,1,"0C08000H0000000000",0,0);
DropDITI(255,1,6,10,70,0);
Transfer_Rack("10","16",0,0,0,0,0,"","96BeckmanDeepPlate","Narrow","","","MP 4Pos flat w/FLX Mag","","MP 4Pos flat","4","(Not defined)","3");
GetDITI2(3,"DiTi 1000ul SBS LiHa",0,0,0,70);
Group("Transfer Beads");
BeginLoop("8","bead_mix1");
Aspirate(3,"DiTi Consol Cleanup Bead Mix","450","450",0,0,0,0,0,0,0,0,0,0,16,3,1,"0C08000H0000000000",0,0);
Dispense(3,"DiTi Consol Cleanup Bead Mix","450","450",0,0,0,0,0,0,0,0,0,0,16,3,1,"0C08000H0000000000",0,0);
EndLoop();
Aspirate(3,"DiTi Consol Cleanup Bead Transfer","500","500",0,0,0,0,0,0,0,0,0,0,16,3,1,"0C08000H0000000000",0,0);
Dispense(3,"DiTi Consol Cleanup Bead Transfer","500","500",0,0,0,0,0,0,0,0,0,0,16,2,1,"0C08000H0000000000",0,0);
BeginLoop("20","bead_mix");
Aspirate(3,"DiTi Consol Cleanup Bead Mix","650","650",0,0,0,0,0,0,0,0,0,0,16,2,1,"0C08000H0000000000",0,0);
Dispense(3,"DiTi Consol Cleanup Bead Mix","650","650",0,0,0,0,0,0,0,0,0,0,16,2,1,"0C08000H0000000000",0,0);
EndLoop();
DropDITI(3,1,6,10,70,0);
GroupEnd();
StartTimer("6");
WaitTimer("6","300");
