20200212_162823 Admin
Import with ExportImport
EVOware ExportImport Tool
--{ RES }--
V;200
--{ CFG }--
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2,0;Wash Station Cleaner shallow;Wash Station Cleaner shallow 1
2,1;Wash Station Waste;Wash Station Waste 1
2,2;Wash Station Cleaner deep;Wash Station Cleaner deep 1
4,0;Trough 100ml;Trough 100ml with Baseline
6,2;96 Well Microplate;96well Verification Plate
13,0;DiTi 1000ul LiHa;1000ul DiTis LiHa
13,2;DiTi Waste;Waste
1;System
69;Infinite 200
1;Sunrise
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--{ RPG }--
Comment("Pipetting");
Wash(255,2,1,2,0,"10",500,"0.1",500,10,70,30,1,0,1000,0);
Wash(255,2,1,2,0,"2",500,"0.1",500,10,10,30,0,0,1000,0);
BeginLoop("2","Fill Baseline 1");
GetDITI2(255,"DiTi 1000ul LiHa",0,0,10,70);
BeginLoop("3","Fill Baseline 2");
Aspirate(255,"QC Kit 1","400","400","400","400","400","400","400","400",0,0,0,0,4,0,1,"0108¯1",0,0);
BeginLoop("2","Fill Baseline 3");
Dispense(255,"QC Kit 1","200","200","200","200","200","200","200","200",0,0,0,0,6,2,1,"0C08¯1000000000000",3,"Fill Baseline 1",0,6,"Fill Baseline 2",0,2,"Fill Baseline 3",0,1,0);
EndLoop();
EndLoop();
DropDITI(255,13,2,10,70,0);
Wash(255,2,1,2,0,"0.5",500,"0.1",500,10,10,30,0,0,1000,0);
EndLoop();
Wash(255,2,1,2,0,"10",500,"0.1",500,10,70,30,1,0,1000,0);
Comment("End Of Script");
