20200623_194738 Admin
Import with ExportImport
EVOware ExportImport Tool
--{ RES }--
V;200
--{ CFG }--
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1,6;Washstation 2Grid DiTi Waste
4,1;DiTi 1000ul SBS LiHa;1000DiTi
4,2;96BeckmanDeepPlate;Mag Plate
10,1;96BeckmanDeepPlate;Consolidation plate
16,1;96BeckmanDeepPlate;Cleanup2 Plate
16,2;96BeckmanDeepPlate;Reagent Plate
1;System
44;1D Reader
11;T9 Hotel 3 - 1Pos
17;T9 Hotel 3 - 2Pos
35;T9 Hotel 6 - 1Pos
40;T9 Hotel 6 - 2Pos
29;T9 Hotel 3 - 4Pos
23;T9 Hotel 2 - 3Pos
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--{ RPG }--
Set_DITI_Counter2("DiTi 1000ul SBS LiHa","4","3","1",0);
Subroutine("C:\ProgramData\Tecan\EVOware\database\Scripts\1_IPS_EnrichmentCleanup_v1_p1.esc",0);
Subroutine("C:\ProgramData\Tecan\EVOware\database\Scripts\1_IPS_EnrichmentCleanup_v1_p2.esc",0);
Comment("Bead Binding Incubation");
StartTimer("1");
WaitTimer("1","300");
Comment("Transfer from Deck to Magnet");
Transfer_Rack("16","4",0,0,0,0,0,"","96BeckmanDeepPlate","Narrow","","","T9 MP 3Pos Fixed","","T9 MP 3Pos Fixed w/FLX Mag","2","(Not defined)","3");
StartTimer("2");
WaitTimer("2","200");
Subroutine("C:\ProgramData\Tecan\EVOware\database\Scripts\1_IPS_EnrichmentCleanup_v1_p3.esc",0);
Subroutine("C:\ProgramData\Tecan\EVOware\database\Scripts\1_IPS_EnrichmentCleanup_v1_p4.esc",0);
Subroutine("C:\ProgramData\Tecan\EVOware\database\Scripts\1_IPS_EnrichmentCleanup_v1_p5.esc",0);
Comment("EtOh Wash Incubation");
StartTimer("3");
WaitTimer("3","60");
Subroutine("C:\ProgramData\Tecan\EVOware\database\Scripts\1_IPS_EnrichmentCleanup_v1_p6.esc",0);
MoveLiha(3,1,6,1,"010830",0,4,0,10,0,0);
IfThen("0",0,"1");
Subroutine("C:\ProgramData\Tecan\EVOware\database\Scripts\1_IPS_EnrichmentCleanup_v1_p7.esc",0);
Comment("EtOh Wash Incubation");
StartTimer("4");
WaitTimer("4","60");
Subroutine("C:\ProgramData\Tecan\EVOware\database\Scripts\1_IPS_EnrichmentCleanup_v1_p8.esc",0);
Else();
EndIf();
Comment("Bead Dry Incubation");
StartTimer("5");
WaitTimer("5","300");
Comment("Transfer from Magnet to Deck");
Transfer_Rack("4","16",0,0,0,0,0,"","96BeckmanDeepPlate","Narrow","","","T9 MP 3Pos Fixed w/FLX Mag","","T9 MP 3Pos Fixed","3","(Not defined)","2");
Subroutine("C:\ProgramData\Tecan\EVOware\database\Scripts\1_IPS_EnrichmentCleanup_v1_p9.esc",0);
Comment("Transfer from Deck to Magnet");
Transfer_Rack("16","4",0,0,0,0,0,"","96BeckmanDeepPlate","Narrow","","","T9 MP 3Pos Fixed","","T9 MP 3Pos Fixed w/FLX Mag","2","(Not defined)","3");
Comment("Elution #1 Pull Down Incubation");
StartTimer("6");
WaitTimer("6","300");
Subroutine("C:\ProgramData\Tecan\EVOware\database\Scripts\1_IPS_EnrichmentCleanup_v1_p10.esc",0);
Comment("Transfer from Magnet to Deck");
Transfer_Rack("4","16",0,0,0,0,0,"","96BeckmanDeepPlate","Narrow","","","T9 MP 3Pos Fixed w/FLX Mag","","T9 MP 3Pos Fixed","3","(Not defined)","2");
Subroutine("C:\ProgramData\Tecan\EVOware\database\Scripts\1_IPS_EnrichmentCleanup_v1_p11.esc",0);
Comment("Bead Binding Incubation");
StartTimer("7");
WaitTimer("7","300");
Comment("Transfer from Deck to Magnet");
Transfer_Rack("16","4",0,0,0,0,0,"","96BeckmanDeepPlate","Narrow","","","T9 MP 3Pos Fixed","","T9 MP 3Pos Fixed w/FLX Mag","2","(Not defined)","3");
StartTimer("8");
WaitTimer("8","200");
Subroutine("C:\ProgramData\Tecan\EVOware\database\Scripts\1_IPS_EnrichmentCleanup_v1_p12.esc",0);
Subroutine("C:\ProgramData\Tecan\EVOware\database\Scripts\1_IPS_EnrichmentCleanup_v1_p13.esc",0);
Subroutine("C:\ProgramData\Tecan\EVOware\database\Scripts\1_IPS_EnrichmentCleanup_v1_p14.esc",0);
Comment("EtOh Wash Incubation");
StartTimer("9");
WaitTimer("9","60");
Subroutine("C:\ProgramData\Tecan\EVOware\database\Scripts\1_IPS_EnrichmentCleanup_v1_p15.esc",0);
MoveLiha(3,1,6,1,"010830",0,4,0,10,0,0);
IfThen("0",0,"1");
Subroutine("C:\ProgramData\Tecan\EVOware\database\Scripts\1_IPS_EnrichmentCleanup_v1_p16.esc",0);
Comment("EtOh Wash Incubation");
StartTimer("10");
WaitTimer("10","60");
Subroutine("C:\ProgramData\Tecan\EVOware\database\Scripts\1_IPS_EnrichmentCleanup_v1_p17.esc",0);
Else();
EndIf();
Comment("Bead Dry Incubation");
StartTimer("11");
WaitTimer("11","300");
Comment("Transfer from Magnet to Deck");
Transfer_Rack("4","16",0,0,0,0,0,"","96BeckmanDeepPlate","Narrow","","","T9 MP 3Pos Fixed w/FLX Mag","","T9 MP 3Pos Fixed","3","(Not defined)","2");
Subroutine("C:\ProgramData\Tecan\EVOware\database\Scripts\1_IPS_EnrichmentCleanup_v1_p18.esc",0);
Comment("Transfer from Deck to Magnet");
Transfer_Rack("16","4",0,0,0,0,0,"","96BeckmanDeepPlate","Narrow","","","T9 MP 3Pos Fixed","","T9 MP 3Pos Fixed w/FLX Mag","2","(Not defined)","3");
Comment("Elution #2 Pull Down Incubation");
StartTimer("12");
WaitTimer("12","300");
Subroutine("C:\ProgramData\Tecan\EVOware\database\Scripts\1_IPS_EnrichmentCleanup_v1_p19.esc",0);
Transfer_Rack("4","29",0,0,0,0,0,"","DiTi 1000ul SBS LiHa","Narrow","","","T9 MP 3Pos Fixed w/FLX Mag","","T9 Hotel 3 - 4Pos","2","(Not defined)","1");
