20200623_194738 Admin
Import with ExportImport
EVOware ExportImport Tool
--{ RES }--
V;200
--{ CFG }--
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1,6;Washstation 2Grid DiTi Waste
4,2;DiTi 1000ul SBS LiHa;1000DiTi
10,2;96BeckmanDeepPlate;Consolidation plate
10,3;96BeckmanDeepPlate;Mag Plate
16,2;96BeckmanDeepPlate;Cleanup2 Plate
16,3;96BeckmanDeepPlate;Reagent Plate
1;System
44;1D Reader
11;T9 Hotel 3 - 1Pos
17;T9 Hotel 3 - 2Pos
23;T9 Hotel 3 - 3Pos
29;T9 Hotel 3 - 4Pos
35;T9 Hotel 6 - 1Pos
40;T9 Hotel 6 - 2Pos
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--{ RPG }--
Comment("8to8 Transfer and Bead Incubation");
GetDITI2(255,"DiTi 1000ul SBS LiHa",0,0,0,70);
Group("8to8 Transfer");
Worklist(0,C:\cygwin\home\counsyl\automation\gwl_files\Cleanup2\8to8_WL.gwl,255,"NIPS_Cleanup2_LibraryTransfer",0,1);GetDITI2(255,"DiTi 1000ul SBS LiHa",0,0,0,70);DropDITI(255,1,6,10,70,0);
Worklist(1,,0,"",0,1);GetDITI2(255,"DiTi 200ul LiHa",0,0,10,70);DropDITI(255,1,6,10,70,0);
GroupEnd();
Group("Transfer Beads");
GetDITI2(255,"DiTi 1000ul SBS LiHa",0,0,0,70);
BeginLoop("8","bead_mix1");
Aspirate(255,"DiTi Consol Cleanup Bead Mix","450","450","450","450","450","450","450","450",0,0,0,0,16,3,1,"0C0800¬70000000000",0,0);
Dispense(255,"DiTi Consol Cleanup Bead Mix","450","450","450","450","450","450","450","450",0,0,0,0,16,3,1,"0C0800¬70000000000",0,0);
EndLoop();
Aspirate(255,"DiTi Consol Cleanup Bead Transfer","500","500","500","500","500","500","500","500",0,0,0,0,16,3,1,"0C0800¬70000000000",0,0);
Dispense(255,"DiTi Consol Cleanup Bead Transfer","500","500","500","500","500","500","500","500",0,0,0,0,16,2,1,"0C0800¬70000000000",0,0);
BeginLoop("20","bead_mix");
Aspirate(255,"DiTi Consol Cleanup Bead Mix","650","650","650","650","650","650","650","650",0,0,0,0,16,2,1,"0C0800¬70000000000",0,0);
Dispense(255,"DiTi Consol Cleanup Bead Mix","650","650","650","650","650","650","650","650",0,0,0,0,16,2,1,"0C0800¬70000000000",0,0);
EndLoop();
DropDITI(255,1,6,10,70,0);
GroupEnd();
StartTimer("1");
WaitTimer("1","300");
