20200623_194738 Admin
Import with ExportImport
EVOware ExportImport Tool
--{ RES }--
V;200
--{ CFG }--
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3,0;DiTi 1000ul LiHa;1000ul DiTis LiHa
3,2;DiTi Waste;Waste
11,0;DiTi 350ul Nested LiHa;350ul DiTis LiHa
11,1;DiTi 350ul Nested LiHa
11,2;DiTi 350ul Nested LiHa
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11,19;DiTi 350ul Nested LiHa
18,0;Trough 100ml;Trough 100ml with Baseline
18,1;Trough 100ml;Trough 100ml with Diluent
18,2;Trough 25ml Max. Recovery;Trough 25ml with Range Solution
20,0;96 Well Microplate;96well Verification Plate
1;System
69;Infinite 200
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--{ RPG }--
Comment("Pipetting");
PMP_FilterTest(255,0);
Comment("Diluent");
BeginLoop("2","Fill Diluent 1");
GetDITI2(255,"DiTi 1000ul LiHa",0,0,10,70);
Aspirate(255,"QC Kit 2","600","600","600","600","600","600","600","600",0,0,0,0,18,1,1,"0108¯1",0,0);
BeginLoop("6","Fill Diluent 2");
Dispense(255,"QC Kit 2","100","100","100","100","100","100","100","100",0,0,0,0,20,0,1,"0C08¯1000000000000",2,"Fill Diluent 2",0,1,"Fill Diluent 1",0,6,0);
EndLoop();
DropDITI(255,3,2,10,70,0);
EndLoop();
Comment("Range Solution");
Set_DITI_Counter2("DiTi 350ul Nested LiHa","11","1","1",0);
BeginLoop("12","Fill Range Solution");
GetDITI2(255,"DiTi 350ul Nested LiHa",0,0,0,70);
Aspirate(255,"QC Kit 2","100","100","100","100","100","100","100","100",0,0,0,0,18,2,1,"0108¯1",0,0);
Dispense(255,"QC Kit 2","100","100","100","100","100","100","100","100",0,0,0,0,20,0,1,"0C08¯1000000000000",1,"Fill Range Solution",0,1,0);
DropDITI(255,3,2,10,70,0);
EndLoop();
Comment("End Of Script");
