20190604_175517 Admin
Administrator
--{ RES }--
V;200
--{ CFG }--
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1,0;Wash Station Cleaner shallow
1,1;Wash Station Waste
1,2;Wash Station Cleaner deep
13,0;Adapter 96 DiTi 4to1 MCA384;Adapter 4to1
13,2;T1 Trough MCA;Bleach
20,0;T1 Adapter 96 Fixed125ul MCA;Elution Head
20,1;T1 Adapter 96 Fixed125ul MCA;Stamp Head
20,2;T1 384 Wash Station;Water
27,1;ARTEL-384 Well Plate;Artel 384 
27,2;T1 DiTi 50ul MCA96;50ul DiTi
34,1;ARTEL Reagent Plate - T1 MCA;Diluent
34,2;ARTEL Reagent Plate - T1 MCA;Dye C
1;System
41;ms3
5;T1 Ziath 2D
40;T1 Hotel 4Pos
45;T1 SLN-2 5Pos
44;T1b Side Loading Hotel 3Pos1
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--{ RPG }--
MCA384DockCGM(0);
MCA384GetAdapterPlate("T1 Adapter 96 Fixed125ul MCA",20,1,0,0.000000);
MCA384Aspirate(96,"Artel_MCA_Fixed_Tip","54.0",34,1,"0C08¯¯¯¯¯¯¯¯¯¯¯¯¯O",0,0,0,0,0);
MCA384Dispense(96,"Artel_MCA_Fixed_Tip","54.0",27,1,"1810…Z10€ZE00Z…20P…Z00„Z50pZ…00X…:00…Z10€ZE00Z…20P…Z00„Z500",0,0,0,0,0);
MCA384Aspirate(96,"Artel_MCA_Fixed_Tip","54.0",34,1,"0C08¯¯¯¯¯¯¯¯¯¯¯¯¯O",0,0,0,0,0);
MCA384Dispense(96,"Artel_MCA_Fixed_Tip","54.0",27,1,"181000„Z50pZ…00X…:00…Z10€ZE00Z…20P…Z00„Z50pZ…00X…:00…Z10€ZE",0,0,0,1,0);
UserPrompt("Replace diluent plate ",0,-1);
MCA384Aspirate(96,"Artel_MCA_Fixed_Tip","54.0",34,1,"0C08¯¯¯¯¯¯¯¯¯¯¯¯¯O",0,0,0,0,0);
MCA384Dispense(96,"Artel_MCA_Fixed_Tip","54.0",27,1,"1810Z…20P…Z00„Z50pZ…00X…:00…Z10€ZE00Z…20P…Z00„Z50pZ…00X…:00",0,0,0,0,1);
MCA384Aspirate(96,"Artel_MCA_Fixed_Tip","54.0",34,1,"0C08¯¯¯¯¯¯¯¯¯¯¯¯¯O",0,0,0,0,0);
MCA384Dispense(96,"Artel_MCA_Fixed_Tip","54.0",27,1,"181000X…:00…Z10€ZE00Z…20P…Z00„Z50pZ…00X…:00…Z10€ZE00Z…20P…Z",0,0,0,1,1);
Subroutine("C:\ProgramData\Tecan\EVOware\database\Scripts\MCA_Wash_Water_Final_v1.esc",0);
MCA384DropAdapterPlate(0,"",20,0,0,-1,0,0.000000,"");
MCA384GetAdapterPlate("Adapter 96 DiTi 4to1 MCA384",13,0,0,0.000000);
MCA384GetTips(27,2,0.000000,"Adapter 96 DiTi 4to1 MCA384",1,-1,0,0,0,0,"T1 DiTi 50ul MCA96",0);
MCA384Aspirate(96,"ARTEL_1ul_DiTi","1.0",34,2,"0C08¯¯¯¯¯¯¯¯¯¯¯¯¯O",0,0,0,0,0);
MCA384Dispense(96,"ARTEL_1ul_DiTi","1.0",27,1,"1810…Z10€ZE00Z…20P…Z00„Z50pZ…00X…:00…Z10€ZE00Z…20P…Z00„Z500",0,0,0,0,0);
MCA384DropTips(27,2,1,"Adapter 96 DiTi 4to1 MCA384",1,0,0, 0,0,"T1 DiTi 50ul MCA96",0);
UserPrompt("Replace DiTis",0,-1);
MCA384GetTips(27,2,0.000000,"Adapter 96 DiTi 4to1 MCA384",1,-1,0,0,0,0,"T1 DiTi 50ul MCA96",0);
MCA384Aspirate(96,"ARTEL_1ul_DiTi","1.0",34,2,"0C08¯¯¯¯¯¯¯¯¯¯¯¯¯O",0,0,0,0,0);
MCA384Dispense(96,"ARTEL_1ul_DiTi","1.0",27,1,"181000„Z50pZ…00X…:00…Z10€ZE00Z…20P…Z00„Z50pZ…00X…:00…Z10€ZE",0,0,0,1,0);
MCA384DropTips(27,2,1,"Adapter 96 DiTi 4to1 MCA384",1,0,0, 0,0,"T1 DiTi 50ul MCA96",0);
UserPrompt("Replace DiTis",0,-1);
MCA384GetTips(27,2,0.000000,"Adapter 96 DiTi 4to1 MCA384",1,-1,0,0,0,0,"T1 DiTi 50ul MCA96",0);
MCA384Aspirate(96,"ARTEL_1ul_DiTi","1.0",34,2,"0C08¯¯¯¯¯¯¯¯¯¯¯¯¯O",0,0,0,0,0);
MCA384Dispense(96,"ARTEL_1ul_DiTi","1.0",27,1,"1810Z…20P…Z00„Z50pZ…00X…:00…Z10€ZE00Z…20P…Z00„Z50pZ…00X…:00",0,0,0,0,1);
MCA384DropTips(27,2,1,"Adapter 96 DiTi 4to1 MCA384",1,0,0, 0,0,"T1 DiTi 50ul MCA96",0);
UserPrompt("Replace DiTis",0,-1);
MCA384GetTips(27,2,0.000000,"Adapter 96 DiTi 4to1 MCA384",1,-1,0,0,0,0,"T1 DiTi 50ul MCA96",0);
MCA384Aspirate(96,"ARTEL_1ul_DiTi","1.0",34,2,"0C08¯¯¯¯¯¯¯¯¯¯¯¯¯O",0,0,0,0,0);
MCA384Dispense(96,"ARTEL_1ul_DiTi","1.0",27,1,"181000X…:00…Z10€ZE00Z…20P…Z00„Z50pZ…00X…:00…Z10€ZE00Z…20P…Z",0,0,0,1,1);
MCA384DropTips(27,2,0,"Adapter 96 DiTi 4to1 MCA384",1,0,0, 0,0,"T1 DiTi 50ul MCA96",0);
MCA384DropAdapterPlate(0,"",13,0,0,-1,0,0.000000,"");
MCA384UndockCGM(0,2700,"",,);
