20191016_153747 Admin
Administrator
--{ RES }--
V;200
--{ CFG }--
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1,0;Wash Station Cleaner shallow
1,1;Wash Station Waste
1,2;Wash Station Cleaner deep
13,0;Adapter 96 DiTi 4to1 MCA384;Adaptor 4 to 1
13,2;T1 Trough MCA;Bleach
20,1;T1 Adapter 96 Fixed125ul MCA;Stamp Head
20,2;T1 384 Wash Station;Water
27,1;ARTEL 96well  DITI;Labware2
27,2;T1 DiTi 50ul MCA96;Labware1
34,1;T1 384 Well gDNA DITI;gDNA
34,2;T1 Epdorf DTSPCR384 DiTihead;FX
1;System
41;ms3
40;T1 Hotel 4Pos
35;T1 Hotel 2Pos
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--{ RPG }--
MCA384Move(1,20,2,1,"1810¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯o",0,4,0,10,0,0,384,0);
MCA384DockCGM(0);
MCA384GetAdapterPlate("Adapter 96 DiTi 4to1 MCA384",13,0,0,19.000000);
MCA384GetTips(27,2,0.000000,"Adapter 96 DiTi 4to1 MCA384",1,-1,0,0,0,0,"T1 DiTi 50ul MCA96",0);
MCA384Aspirate(96,"SMA","2.0",34,1,"1810…Z10€ZE00Z…20P…Z00„Z50pZ…00X…:00…Z10€ZE00Z…20P…Z00„Z500",0,0,0,0,0);
MCA384Dispense(96,"SMA","2.0",34,2,"1810…Z10€ZE00Z…20P…Z00„Z50pZ…00X…:00…Z10€ZE00Z…20P…Z00„Z500",0,0,0,0,0);
MCA384DropTips(27,2,0,"Adapter 96 DiTi 4to1 MCA384",1,0,0, 0,0,"T1 DiTi 50ul MCA96",0);
MCA384DropAdapterPlate(0,"",38,1,0,-1,0,0.000000,"");
MCA384Move(1,20,2,1,"1810…Z10€ZE00Z…20P…Z00„Z50pZ…00X…:00…Z10€ZE00Z…20P…Z00„Z500",0,4,0,10,0,0,96,0);
MCA384UndockCGM(0,2700,"",,);
