20200708_104153 Admin
Administrator
--{ RES }--
V;200
--{ CFG }--
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1,0;Wash Station Cleaner shallow
1,1;Wash Station Waste
1,2;Wash Station Cleaner deep
7,0;Trough 25ml;Dye
7,2;Trough 100ml;Dil
13,0;Adapter 96 DiTi 4to1 MCA384;Adapter 4 to 1
13,2;T1 Trough MCA;Bleach
20,0;T1 Adapter 96 Fixed125ul MCA;Elution Head
20,2;T1 384 Wash Station;Water
27,0;96 Well Microplate;QC MP Plate
27,1;96 Well Microplate;Dye Trough
27,2;96 Well Microplate;Diluent
34,2;T1 DiTi 150ul Filter MCA96;DiTi Tips 150uL
1;System
41;ms3
40;T1 Hotel 4Pos
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--{ RPG }--
MCA384GetTips(34,2,0.000000,"Adapter 96 DiTi 4to1 MCA384",1,-1,0,0,0,0,"T1 DiTi 150ul Filter MCA96",0);
BeginLoop("2","Diluent");
MCA384Aspirate(96,"Water wet contact","95",27,2,"0C08¯¯¯¯¯¯¯¯¯¯¯¯¯O",0,0,0,0,0);
MCA384Dispense(96,"Water free dispense","95",27,0,"0C08¯¯¯¯¯¯¯¯¯¯¯¯¯O",0,0,0,0,0);
EndLoop();
MCA384DropTips(34,2,0,"Adapter 96 DiTi 4to1 MCA384",1,0,0, 0,0,"T1 DiTi 150ul Filter MCA96",0);
Wash(255,1,1,1,0,"3.0",500,"4.0",500,10,70,30,1,0,1000,0);
BeginLoop("12","Dye");
Aspirate(255,"Artel Calibration","5","5","5","5","5","5","5","5",0,0,0,0,7,2,1,"0108¯1",0,0);
Aspirate(255,"Artel Calibration","1","1","1","1","1","1","1","1",0,0,0,0,7,0,1,"0108¯1",0,0);
Aspirate(255,"Artel Calibration","10","10","10","10","10","10","10","10",0,0,0,0,7,2,1,"0108¯1",0,0);
Dispense(255,"Artel Calibration","11","11","11","11","11","11","11","11",0,0,0,0,27,0,1,"0C08¯1000000000000",1,"Dye",0,1,0);
Wash(255,1,1,1,0,"3.0",500,"4.0",500,10,70,30,1,0,1000,0);
EndLoop();
