20190523_144052 Admin
Administrator
--{ RES }--
V;200
--{ CFG }--
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1,0;Wash Station Cleaner shallow
1,1;Wash Station Waste
1,2;Wash Station Cleaner deep
7,2;T1 Trough MCA;Bleach
20,0;T1 Adapter 96 Fixed125ul MCA;Elution Head
20,2;T1 384 Wash Station;Water
34,0;T1 2mL Nunc DeepWell;Lysis
34,1;T1 Eppendorf ELU 96 Well PCR;Extraction ELU
1;System
41;ms3
4;T1 Ziath 2D
40;T1 Hotel 4Pos
45;T1 SLN-2 5Pos
44;T1b Side Loading Hotel 3Pos1
35;T1 Hotel 2Pos
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--{ RPG }--
Variable(sln_only,"0",1,"Jump to SLN? (1=yes,0=no)",1,0.000000,1.000000,0,2,1,0);
IfThen("sln_only",0,"0");
UserPrompt("Move Plates into Hotel:Pos 1 = 96 well eppendorf PCR platePos 2 = 2ml deepwell plate",0,-1);
MCA384TransferLabware("40","34",0,0,0,0,0,"","96 Eppendorf PCR","Narrow","","","T1 Hotel 4Pos","","T1 MP 3Pos 2","1","(Not defined)","2");
MCA384TransferLabware("40","34",0,0,0,0,0,"","T1 2mL Nunc DeepWell","Narrow","","","T1 Hotel 4Pos","","T1 MP 3Pos 2","2","(Not defined)","1");
MCA384TransferLabware("34","40",0,0,0,0,0,"","T1 2mL Nunc DeepWell","Narrow","","","T1 MP 3Pos 2","","T1 Hotel 4Pos","1","(Not defined)","2");
MCA384TransferLabware("34","40",0,0,0,0,0,"","T1 Eppendorf ELU 96 Well PCR","Narrow","","","T1 MP 3Pos 2","","T1 Hotel 4Pos","2","(Not defined)","1");
Else();
EndIf();
UserPrompt("Move Plates into Side Loading Nests:SLN 2 Pos 1 = 96 well eppendorf PCR plateSLN 1 Pos 5 = 2ml deepwell plate",0,-1);
Group("Extraction Plate Moves");
MCA384TransferLabware("45","34",0,0,0,0,0,"","96 Eppendorf PCR","Narrow","","","T1 SLN-2 5Pos","","T1 MP 3Pos 2","1","(Not defined)","2");
MCA384TransferLabware("34","45",0,0,0,0,0,"","T1 Eppendorf ELU 96 Well PCR","Narrow","","","T1 MP 3Pos 2","","T1 SLN-2 5Pos","2","(Not defined)","2");
MCA384TransferLabware("45","34",0,0,0,0,0,"","96 Eppendorf PCR","Narrow","","","T1 SLN-2 5Pos","","T1 MP 3Pos 2","2","(Not defined)","2");
MCA384TransferLabware("34","45",0,0,0,0,0,"","T1 Eppendorf ELU 96 Well PCR","Narrow","","","T1 MP 3Pos 2","","T1 SLN-2 5Pos","2","(Not defined)","3");
MCA384TransferLabware("45","45",0,0,0,0,0,"","96 Eppendorf PCR","Narrow","","","T1 SLN-2 5Pos","","T1 SLN-2 5Pos","3","(Not defined)","4");
MCA384TransferLabware("45","44",0,0,0,0,0,"","96 Eppendorf PCR","Narrow","","","T1 SLN-2 5Pos","","T1b Side Loading Hotel 3Pos1","4","(Not defined)","3");
GroupEnd();
Group("Lysis Plate Moves");
MCA384TransferLabware("44","34",0,0,0,0,0,"","T1 2mL Nunc DeepWell","Narrow","","","T1b Side Loading Hotel 3Pos1","","T1 MP 3Pos 2","5","(Not defined)","1");
MCA384TransferLabware("34","45",0,0,0,0,0,"","T1 2mL Nunc DeepWell","Narrow","","","T1 MP 3Pos 2","","T1 SLN-2 5Pos","1","(Not defined)","5");
MCA384TransferLabware("45","34",0,0,0,0,0,"","T1 2mL Nunc DeepWell","Narrow","","","T1 SLN-2 5Pos","","T1 MP 3Pos 2","5","(Not defined)","1");
MCA384TransferLabware("34","44",0,0,0,0,0,"","T1 2mL Nunc DeepWell","Narrow","","","T1 MP 3Pos 2","","T1b Side Loading Hotel 3Pos1","1","(Not defined)","5");
GroupEnd();
