20190520_180738 Admin
Administrator
--{ RES }--
V;200
--{ CFG }--
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1,0;Wash Station Cleaner shallow
1,1;Wash Station Waste
1,2;Wash Station Cleaner deep
13,0;Adapter 96 DiTi 4to1 MCA384;Adapter 4to1
13,2;T1 Trough MCA;Bleach
20,0;T1 Adapter 96 Fixed125ul MCA;Elution Head
20,1;T1 Adapter 96 Fixed125ul MCA;Stamp Head
20,2;T1 384 Wash Station;Water
27,0;ARTEL-96 Well Microplate;Artel 96 well
27,1;ARTEL Reagent Plate;Diluent
27,2;ARTEL Reagent Plate;Dye B
1;System
41;ms3
3;Symbol954
4;T1 Symbol954
5;T1 Ziath 2D
6;1D Reader
40;T1 Hotel 4Pos
45;T1 SLN-2 5Pos
44;T1b Side Loading Hotel 3Pos1
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--{ RPG }--
MCA384DockCGM(0);
Wash(255,1,1,1,0,"25",500,"25",500,10,70,30,1,0,1000,0);
BeginLoop("3","Diluent 190ul");
Aspirate(255,"Water wet contact","190","190","190","190","190","190","190","190",0,0,0,0,27,1,1,"0C08¯1000000000000",1,"Diluent 190ul",0,1,0);
Dispense(255,"Artel_LiHa_Dispense","190","190","190","190","190","190","190","190",0,0,0,0,27,0,1,"0C08¯1000000000000",1,"Diluent 190ul",0,1,0);
EndLoop();
Wash(255,1,1,1,0,"25",500,"25",500,10,70,30,1,0,1000,0);
BeginLoop("3","Dye B 10ul");
Aspirate(255,"Water wet contact","10","10","10","10","10","10","10","10",0,0,0,0,27,2,1,"0C08¯1000000000000",0,0);
Dispense(255,"Water wet contact","10","10","10","10","10","10","10","10",0,0,0,0,27,0,1,"0C08¯1000000000000",1,"Dye B 10ul",0,1,0);
EndLoop();
Wash(255,1,1,1,0,"25",500,"25",500,10,70,30,1,0,1000,0);
MCA384UndockCGM(0,2700,"",,);
