20201204_011946 Admin
Administrator
--{ RES }--
V;200
--{ CFG }--
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1,0;Wash Station Cleaner shallow
1,1;Wash Station Waste
1,2;Wash Station Cleaner deep
13,0;Adapter 96 DiTi 4to1 MCA384;Adapter 4to1
13,2;T1 Trough MCA;Bleach
20,0;T1 Adapter 96 Fixed125ul MCA;Elution Head
20,1;T1 Adapter 96 Fixed125ul MCA;Stamp Head
20,2;T1 384 Wash Station;Water
27,0;ARTEL-384 Well Plate;Artel 384 
27,2;T1 DiTi 50ul MCA96;50ul DiTi
34,1;ARTEL Reagent Plate - T1 MCA;Diluent
34,2;ARTEL Reagent Plate - T1 MCA;Sample Sol A
1;System
41;ms3
5;T1 Ziath 2D
40;T1 Hotel 4Pos
45;T1 SLN-2 5Pos
44;T1b Side Loading Hotel 3Pos1
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--{ RPG }--
MCA384DockCGM(0);
Variable(ElutionVol,"10",1,"Enter target low volume",1,2.000000,20.000000,0,2,1,0);
Variable(SampleDiluent,"55",0,"Enter target low volume",0,1.000000,10.000000,0,2,0,0);
MCA384GetAdapterPlate("Adapter 96 DiTi 4to1 MCA384",13,0,0,0.000000);
Comment("Sample Diluent Dispense");
Variable(ArtelSampleDiluent,"SampleDiluent-ElutionVol",0,"Enter target low volume",0,1.000000,10.000000,0,2,0,0);
MCA384GetTips(27,2,0.000000,"Adapter 96 DiTi 4to1 MCA384",1,-1,0,0,0,0,"T1 DiTi 50ul MCA96",0);
BeginLoop("2","Sample Diluent Dispense");
BeginLoop("2","Sample Diluent Q1");
MCA384Aspirate(96,"Water free dispense","ArtelSampleDiluent",34,1,"0C08¯¯¯¯¯¯¯¯¯¯¯¯¯O",0,0,0,0,0);
MCA384Dispense(96,"Water free dispense","ArtelSampleDiluent",27,0,"1810…Z10€ZE00Z…20P…Z00„Z50pZ…00X…:00…Z10€ZE00Z…20P…Z00„Z500",2,"Sample Diluent Q1",0,1,"Sample Diluent Dispense",1,1,0,0,0,0);
EndLoop();
EndLoop();
MCA384DropTips(27,2,1,"Adapter 96 DiTi 4to1 MCA384",1,0,0, 0,0,"T1 DiTi 50ul MCA96",0);
MCA384Move(1,27,0,1,"1810…Z10€ZE00Z…20P…Z00„Z50pZ…00X…:00…Z10€ZE00Z…20P…Z00„Z500",0,4,0,10,0,0,96,0);
Comment("Sample Diluent Dispense");
BeginLoop("2","Sample Solution");
BeginLoop("2","Sample Solution Q1");
UserPrompt("Replace 50ul tips ",0,-1);
MCA384GetTips(27,2,0.000000,"Adapter 96 DiTi 4to1 MCA384",1,-1,0,0,0,0,"T1 DiTi 50ul MCA96",0);
MCA384Aspirate(96,"ARTEL_1ul_DiTi","ElutionVol",34,2,"0C08¯¯¯¯¯¯¯¯¯¯¯¯¯O",0,0,0,0,0);
MCA384Dispense(96,"ARTEL_1ul_DiTi","ElutionVol",27,0,"1810…Z10€ZE00Z…20P…Z00„Z50pZ…00X…:00…Z10€ZE00Z…20P…Z00„Z500",2,"Sample Solution",1,1,"Sample Solution Q1",0,1,0,0,0,0);
MCA384DropTips(27,2,1,"Adapter 96 DiTi 4to1 MCA384",1,0,0, 0,0,"T1 DiTi 50ul MCA96",0);
EndLoop();
EndLoop();
MCA384DropAdapterPlate(0,"",13,0,0,-1,0,0.000000,"");
MCA384UndockCGM(0,2700,"",,);
