20160812_151147 Admin
Admin
--{ RES }--
V;200
--{ CFG }--
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1,0;Wash Station Cleaner shallow
1,1;Wash Station Waste
1,2;Wash Station Cleaner deep
13,2;T1 Trough MCA;Bleach
20,1;T1 Adapter 96 Fixed125ul MCA;Stamp Head
20,2;T1 384 Wash Station;Water
27,0;ARTEL-96 Well Microplate;Artel 96
34,1;Trough 125ml MCA96;Artel Trough
34,2;T1 Eppendorf 384 Well PCR;Labware1
1;System
2;ms3
5;Symbol954
3;T1 Symbol954
4;T1 Ziath 2D
43;1D Reader
40;T1 Hotel 4Pos
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--{ RPG }--
MCA384Move(1,20,2,1,"1810¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯o",0,4,0,10,0,0,384,0);
MCA384DockCGM(0);
MCA384GetAdapterPlate("T1 Adapter 96 Fixed125ul MCA",20,1,0,19.000000);
Subroutine("C:\ProgramData\Tecan\EVOware\database\Scripts\MCA_Wash_Water_v1.esc",0);
Subroutine("C:\ProgramData\Tecan\EVOware\database\Scripts\MCA_Wash_Tip_Dry_v1.esc",0);
MCA384Aspirate(96,"Artel Calibration",2,34,1,"0C08¯¯¯¯¯¯¯¯¯¯¯¯¯O",0,0,0,0,0);
MCA384Dispense(96,"Artel Calibration",2,27,0,"0C08¯¯¯¯¯¯¯¯¯¯¯¯¯O",0,0,0,0,0);
Subroutine("C:\ProgramData\Tecan\EVOware\database\Scripts\MCA_Wash_Water_Final_v1.esc",0);
Subroutine("C:\ProgramData\Tecan\EVOware\database\Scripts\MCA_Wash_Tip_Dry_v1.esc",0);
MCA384DropAdapterPlate(0,"",38,1,0,-1,0,0.000000,"");
