20191015_101321 Admin
Administrator
--{ RES }--
V;200
--{ CFG }--
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1,0;Wash Station Cleaner shallow
1,1;Wash Station Waste
1,2;Wash Station Cleaner deep
13,0;Adapter 96 DiTi 4to1 MCA384;DiTi Adaptor 4 to 1
13,2;T1 Trough MCA;Bleach
20,0;T1 Adapter 96 Fixed125ul MCA;Elution Head
20,2;T1 384 Wash Station;Water
27,2;T1 DiTi 150ul Filter MCA96;150uL DiTis
34,0;T1 2mL Nunc DeepWell DITI;Lysis
34,1;T1 Eppendorf ELU 96Well DITI;Extraction ELU
1;System
41;ms3
4;T1 Ziath 2D
40;T1 Hotel 4Pos
35;T1 Hotel 2Pos
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--{ RPG }--
MCA384Move(1,20,2,1,"1810¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯o",0,4,0,10,0,0,384,0);
MCA384DockCGM(0);
MCA384GetAdapterPlate("Adapter 96 DiTi 4to1 MCA384",13,0,0,0.000000);
MCA384GetTips(27,2,0.000000,"Adapter 96 DiTi 4to1 MCA384",1,-1,0,0,0,0,"T1 DiTi 150ul Filter MCA96",0);
MCA384Aspirate(96,"Elution_Transfer","90",34,0,"0C08¯¯¯¯¯¯¯¯¯¯¯¯¯O",0,0,0,0,0);
MCA384Dispense(96,"Elution_Transfer","90",34,1,"0C08¯¯¯¯¯¯¯¯¯¯¯¯¯O",0,0,0,0,0);
MCA384Mix(96,"Fast_Mix","40",34,1,"0C08¯¯¯¯¯¯¯¯¯¯¯¯¯O",5,0,0,0,0,0);
MCA384DropTips(27,2,0,"Adapter 96 DiTi 4to1 MCA384",1,0,0, 0,0,"T1 DiTi 150ul Filter MCA96",0);
MCA384DropAdapterPlate(0,"",20,0,0,-1,0,0.000000,"");
MCA384UndockCGM(0,2700,"",,);
