20190619_163045 Admin
Administrator
--{ RES }--
V;200
--{ CFG }--
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1,0;Wash Station Cleaner shallow
1,1;Wash Station Waste
1,2;Wash Station Cleaner deep
7,2;T1 Trough MCA;Bleach
20,0;T1 Adapter 96 Fixed125ul MCA;Elution Head
20,1;T1 Adapter 96 Fixed125ul MCA;Stamp Head
20,2;T1 384 Wash Station;Water
34,1;T1 384 Well gDNA;gDNA
34,2;T1 Eppendorf 384 Well PCR;FX
1;System
41;ms3
40;T1 Hotel 4Pos
44;T1b Side Loading Hotel 3Pos1
45;T1 SLN-2 5Pos
35;T1 Hotel 2Pos
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--{ RPG }--
Variable(numFxWash,"0",1,"Number of Fx Washes",1,0.000000,10.000000,0,2,1,1);
IfThen("numFxWash",0,"0");
Variable(numFxWash,"1",0,"Number of Fx Washes",0,0.000000,10.000000,0,2,0,0);
Variable(doFxWash,"0",0,"Number of Fx Washes",0,0.000000,10.000000,0,2,0,0);
Else();
Variable(doFxWash,"1",0,"Number of Fx Washes",0,0.000000,10.000000,0,2,0,0);
EndIf();
Variable(numElutionWash,"0",1,"Number of Elution Washes",1,0.000000,10.000000,0,2,1,1);
IfThen("numElutionWash",0,"0");
Variable(numElutionWash,"1",0,"Number of Fx Washes",0,0.000000,10.000000,0,2,0,0);
Variable(doElutionWash,"0",0,"Number of Fx Washes",0,0.000000,10.000000,0,2,0,0);
Else();
Variable(doElutionWash,"1",0,"Number of Fx Washes",0,0.000000,10.000000,0,2,0,0);
EndIf();
BeginLoop("numFxWash","Fx Wash");
IfThen("doFxWash",0,"1");
Group("Fx Wash");
MCA384Move(1,20,2,1,"1810¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯o",0,4,0,10,0,0,384,0);
MCA384DockCGM(0);
MCA384GetAdapterPlate("T1 Adapter 96 Fixed125ul MCA",20,1,0,19.000000);
MCA384Wash(2,20,2,"WRC step 1 Empty tips",0,1,0,2,50,0,5,0,1,20,2,"Counsyl WRC step 2 Dip in FAST",90,1,10,2,50,1,0,0,1,1,0,0);
MCA384Mix(96,"MCA384_Bleach_Wash","95",7,2,"1810…Z10€ZE00Z…20P…Z00„Z50pZ…00X…:00…Z10€ZE00Z…20P…Z00„Z500",5,0,0,0,0,0);
MCA384Wash(2,20,2,"WRC step 1 Empty tips",0,1,0,2,50,0,5,0,1,20,2,"Counsyl WRC step 2 Dip in FAST",90,1,10,2,50,1,0,0,1,1,0,0);
Subroutine("C:\ProgramData\Tecan\EVOware\database\Scripts\MCA_Wash_Tip_Dry_v1.esc",0);
BeginLoop("2","Clean");
MCA384Wash(3,20,2,"WRC step 1 Empty tips",0,1,0,2,50,0,5,0,1,20,2,"Counsyl WRC step 2 Dip in FAST",90,1,10,2,50,1,0,0,1,20,2,"Counsyl WRC step 2 Dip in SLOW",105,1,1,2,50,0,0,3,1,1,0,0);
MCA384Mix(96,"MCA384_Bleach_Wash","95",7,2,"1810…Z10€ZE00Z…20P…Z00„Z50pZ…00X…:00…Z10€ZE00Z…20P…Z00„Z500",5,0,0,0,0,0);
EndLoop();
MCA384Wash(3,20,2,"WRC step 1 Empty tips",0,1,0,2,50,0,5,0,1,20,2,"Counsyl WRC step 2 Dip in FAST",90,1,10,2,50,1,0,0,1,20,2,"Counsyl WRC step 2 Dip in SLOW",105,1,1,2,50,0,0,3,1,1,0,0);
Subroutine("C:\ProgramData\Tecan\EVOware\database\Scripts\MCA_Wash_Tip_Dry_v1.esc",0);
MCA384DropAdapterPlate(0,"",38,1,0,-1,0,0.000000,"");
MCA384Move(1,34,2,1,"1810…Z10€ZE00Z…20P…Z00„Z50pZ…00X…:00…Z10€ZE00Z…20P…Z00„Z500",0,4,0,10,0,0,96,0);
GroupEnd();
Else();
EndIf();
EndLoop();
BeginLoop("numElutionWash","Elution Wash");
IfThen("doElutionWash",0,"1");
Group("Elution Wash");
MCA384Move(1,20,2,1,"1810¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯o",0,4,0,10,0,0,384,0);
MCA384GetAdapterPlate("T1 Adapter 96 Fixed125ul MCA",20,1,0,19.000000);
Subroutine("C:\ProgramData\Tecan\EVOware\database\Scripts\MCA_Wash_Water_v1.esc",0);
Subroutine("C:\ProgramData\Tecan\EVOware\database\Scripts\MCA_Wash_Bleach_v1.esc",0);
Subroutine("C:\ProgramData\Tecan\EVOware\database\Scripts\MCA_Wash_Water_v1.esc",0);
Subroutine("C:\ProgramData\Tecan\EVOware\database\Scripts\MCA_Wash_Water_v1.esc",0);
Subroutine("C:\ProgramData\Tecan\EVOware\database\Scripts\MCA_Wash_Bleach_v1.esc",0);
Subroutine("C:\ProgramData\Tecan\EVOware\database\Scripts\MCA_Wash_Water_Final_v1.esc",0);
Subroutine("C:\ProgramData\Tecan\EVOware\database\Scripts\MCA_Wash_Tip_Dry_v1.esc",0);
MCA384DropAdapterPlate(0,"",20,0,0,-1,0,0.000000,"");
MCA384Move(1,34,2,1,"1810…Z10€ZE00Z…20P…Z00„Z50pZ…00X…:00…Z10€ZE00Z…20P…Z00„Z500",0,4,0,10,0,0,96,0);
GroupEnd();
Else();
EndIf();
EndLoop();
