20181214_103954 Admin
Administrator
--{ RES }--
V;200
--{ CFG }--
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1,0;Wash Station Cleaner shallow
1,1;Wash Station Waste
1,2;Wash Station Cleaner deep
7,2;T1 Trough MCA;Bleach
13,0;Adapter 96 DiTi 4to1 MCA384;Adaptor 4 to 1
20,0;T1 Adapter 96 Fixed125ul MCA;Elution head
20,1;T1 Adapter 96 Fixed125ul MCA;Stamp Head
20,2;T1 384 Wash Station;Water
27,0;ARTEL-96 Well Microplate-ES;Labware3
27,1;Trough 300ml LiHa;Artel LiHa Trough
34,0;Greiner384UV flat bottom-rk;Labware1
34,2;T1 DiTi 50ul MCA96;50uL MCA Tips
1;System
5;Symbol954
43;1D Reader
2;ms3
3;T1 Symbol954
4;T1 Ziath 2D
40;T1 Hotel 4Pos
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--{ RPG }--
Comment("LiHa");
Variable(dis_vol,"1",1,"Volume?",1,1.000000,10.000000,0,2,1,0);
MCA384DockCGM(0);
Wash(255,1,1,1,0,"30",500,"8",500,10,70,30,1,0,1000,0);
BeginLoop("12","Artel");
Aspirate(255,"PICO_V2_T1B","dis_vol","dis_vol","dis_vol","dis_vol","dis_vol","dis_vol","dis_vol","dis_vol",0,0,0,0,27,1,1,"0C08¯1000000000000",0,0);
Dispense(255,"PICO_V2_T1B","dis_vol","dis_vol","dis_vol","dis_vol","dis_vol","dis_vol","dis_vol","dis_vol",0,0,0,0,27,0,1,"0C08¯1000000000000",1,"Artel",0,1,0);
EndLoop();
Wash(255,1,1,1,0,"15",500,"8",500,10,70,30,1,0,1000,0);
MCA384UndockCGM(0,2700,"",,);
