20191215_153950 Admin
Worktable link
Administrator
--{ RES }--
V;200
--{ CFG }--
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1,0;Wash Station Cleaner shallow
1,1;Wash Station Waste
1,2;Wash Station Cleaner deep
7,2;T1 Trough MCA;Bleach
20,1;T1 Adapter 96 Fixed125ul MCA;Stamp Head
20,2;T1 384 Wash Station;Water
27,0;T1 Eppendorf PRI 96 Well PCR;Primers
27,1;T1 Eppendorf DTSPCR 384Well;DTS PCR
34,1;T1 Eppendorf AD 96Well PCRv2;ADLIG
34,2;T1 Eppendorf MM 96 Well PCR;MM
1;System
41;ms3
40;T1 Hotel 4Pos
44;T1b Side Loading Hotel 3Pos1
45;T1 SLN-2 5Pos
35;T1 Hotel 2Pos
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--{ RPG }--
MCA384Move(1,20,2,1,"1810¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯o",0,4,0,10,0,0,384,0);
MCA384DockCGM(0);
MCA384GetAdapterPlate("T1 Adapter 96 Fixed125ul MCA",20,1,0,19.000000);
Subroutine("C:\ProgramData\Tecan\EVOware\database\Scripts\MCA_Wash_Water_v1.esc",0);
Subroutine("C:\ProgramData\Tecan\EVOware\database\Scripts\MCA_Wash_Bleach_v1.esc",0);
Subroutine("C:\ProgramData\Tecan\EVOware\database\Scripts\MCA_Wash_Water_v1.esc",0);
Subroutine("C:\ProgramData\Tecan\EVOware\database\Scripts\MCA_Wash_Tip_Dry_v1.esc",0);
MCA384Aspirate(96,"ADLIGv3","21",34,1,"0C08¯¯¯¯¯¯¯¯¯¯¯¯¯O",0,0,0,0,0);
MCA384Dispense(96,"ADLIGv3","21",27,0,"0C08¯¯¯¯¯¯¯¯¯¯¯¯¯O",0,0,0,0,0);
Subroutine("C:\ProgramData\Tecan\EVOware\database\Scripts\MCA_Wash_Water_v1.esc",0);
Subroutine("C:\ProgramData\Tecan\EVOware\database\Scripts\MCA_Wash_Tip_Dry_v1.esc",0);
MCA384Aspirate(96,"MMv2","78",34,2,"0C08¯¯¯¯¯¯¯¯¯¯¯¯¯O",0,0,0,0,0);
MCA384Dispense(96,"MMv2","78",27,0,"0C08¯¯¯¯¯¯¯¯¯¯¯¯¯O",0,0,0,0,0);
MCA384Mix(96,"MM_Mix","70",27,0,"0C08¯¯¯¯¯¯¯¯¯¯¯¯¯O",25,0,0,0,0,0);
Subroutine("C:\ProgramData\Tecan\EVOware\database\Scripts\MCA_Wash_Water_v1.esc",0);
Subroutine("C:\ProgramData\Tecan\EVOware\database\Scripts\MCA_Wash_Tip_Dry_v1.esc",0);
MCA384Aspirate(96,"MM Aliquot","102",27,0,"0C08¯¯¯¯¯¯¯¯¯¯¯¯¯O",0,0,0,0,0);
MCA384Dispense(96,"MM Aliquot","25",27,1,"1810…Z10€ZE00Z…20P…Z00„Z50pZ…00X…:00…Z10€ZE00Z…20P…Z00„Z500",0,0,0,0,0);
MCA384Dispense(96,"MM Aliquot","25",27,1,"181000„Z50pZ…00X…:00…Z10€ZE00Z…20P…Z00„Z50pZ…00X…:00…Z10€ZE",0,0,0,1,0);
MCA384Dispense(96,"MM Aliquot","25",27,1,"1810Z…20P…Z00„Z50pZ…00X…:00…Z10€ZE00Z…20P…Z00„Z50pZ…00X…:00",0,0,0,0,1);
MCA384Dispense(96,"MM Aliquot","27",27,1,"181000X…:00…Z10€ZE00Z…20P…Z00„Z50pZ…00X…:00…Z10€ZE00Z…20P…Z",0,0,0,1,1);
Subroutine("C:\ProgramData\Tecan\EVOware\database\Scripts\MCA_Wash_Bleach_v1.esc",0);
Subroutine("C:\ProgramData\Tecan\EVOware\database\Scripts\MCA_Wash_Water_v1.esc",0);
Subroutine("C:\ProgramData\Tecan\EVOware\database\Scripts\MCA_Wash_Tip_Dry_v1.esc",0);
MCA384DropAdapterPlate(0,"",38,1,0,-1,0,0.000000,"");
MCA384Move(1,20,1,1,"0C08¯¯¯¯¯¯¯¯¯¯¯¯¯O",0,4,0,10,0,0,96,0);
MCA384UndockCGM(0,2700,"",,);
