20191215_124504 Admin
Administrator
--{ RES }--
V;200
--{ CFG }--
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1,0;Wash Station Cleaner shallow
1,1;Wash Station Waste
1,2;Wash Station Cleaner deep
7,2;T1 Trough MCA;Bleach
13,0;Adapter 96 DiTi 4to1 MCA384;Adapter 4 to 1
20,1;T1 Adapter 96 Fixed125ul MCA;Stamp Head
20,2;T1 384 Wash Station;Water
27,0;T1 Epdorf PRI 96WellPCR DiTi;Primers
27,1;T1 Epdorf DTSPCR384 DiTihead;PCR 50DiTi
27,2;T1 DiTi 50ul MCA96;50uL DiTi MCA Tips
34,1;T1 Epdorf AD 96WellPCR DITI;ADLIG
34,2;T1 Epdorf MM 96WellPCR DiTi;MM
1;System
41;ms3
40;T1 Hotel 4Pos
44;T1b Side Loading Hotel 3Pos1
45;T1 SLN-2 5Pos
35;T1 Hotel 2Pos
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--{ RPG }--
MCA384Move(1,20,2,1,"1810¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯o",0,4,0,10,0,0,384,0);
MCA384DockCGM(0);
MCA384GetAdapterPlate("Adapter 96 DiTi 4to1 MCA384",13,0,0,19.000000);
MCA384GetTips(27,2,0.000000,"Adapter 96 DiTi 4to1 MCA384",1,-1,0,0,0,0,"T1 DiTi 50ul MCA96",0);
MCA384Aspirate(96,"ADLIGv4 DiTi","21",34,1,"0C08¯¯¯¯¯¯¯¯¯¯¯¯¯O",0,0,0,0,0);
MCA384Dispense(96,"ADLIGv4 DiTi","21",27,0,"0C08¯¯¯¯¯¯¯¯¯¯¯¯¯O",0,0,0,0,0);
MCA384Aspirate(96,"MMv3 DiTi","39",34,2,"0C08¯¯¯¯¯¯¯¯¯¯¯¯¯O",0,0,0,0,0);
MCA384Dispense(96,"MMv3 DiTi","39",27,0,"0C08¯¯¯¯¯¯¯¯¯¯¯¯¯O",0,0,0,0,0);
MCA384Mix(96,"MM_Mix2 Diti","47",27,0,"0C08¯¯¯¯¯¯¯¯¯¯¯¯¯O",10,0,0,0,0,0);
MCA384Aspirate(96,"MMv3 DiTi","39",34,2,"0C08¯¯¯¯¯¯¯¯¯¯¯¯¯O",0,0,0,0,0);
MCA384Dispense(96,"MMv3 DiTi","39",27,0,"0C08¯¯¯¯¯¯¯¯¯¯¯¯¯O",0,0,0,0,0);
MCA384Mix(96,">> MM_Mix2 Diti <<	7","48",27,0,"0C08¯¯¯¯¯¯¯¯¯¯¯¯¯O",20,0,0,0,0,0);
MCA384Aspirate(96,"MM Aliquot2 DiTi","25",27,0,"0C08¯¯¯¯¯¯¯¯¯¯¯¯¯O",0,0,0,0,0);
MCA384Dispense(96,"MM Aliquot2 DiTi","25",27,1,"1810…Z10€ZE00Z…20P…Z00„Z50pZ…00X…:00…Z10€ZE00Z…20P…Z00„Z500",0,0,0,0,0);
MCA384Aspirate(96,"MM Aliquot2 DiTi","25",27,0,"0C08¯¯¯¯¯¯¯¯¯¯¯¯¯O",0,0,0,0,0);
MCA384Dispense(96,"MM Aliquot2 DiTi","25",27,1,"181000„Z50pZ…00X…:00…Z10€ZE00Z…20P…Z00„Z50pZ…00X…:00…Z10€ZE",0,0,0,1,0);
MCA384Aspirate(96,"MM Aliquot2 DiTi","25",27,0,"0C08¯¯¯¯¯¯¯¯¯¯¯¯¯O",0,0,0,0,0);
MCA384Dispense(96,"MM Aliquot2 DiTi","25",27,1,"1810Z…20P…Z00„Z50pZ…00X…:00…Z10€ZE00Z…20P…Z00„Z50pZ…00X…:00",0,0,0,0,1);
MCA384Aspirate(96,"MM Aliquot2 DiTi","25",27,0,"0C08¯¯¯¯¯¯¯¯¯¯¯¯¯O",0,0,0,0,0);
MCA384Dispense(96,"MM Aliquot2 DiTi","25",27,1,"181000X…:00…Z10€ZE00Z…20P…Z00„Z50pZ…00X…:00…Z10€ZE00Z…20P…Z",0,0,0,1,1);
MCA384DropTips(27,2,0,"Adapter 96 DiTi 4to1 MCA384",1,0,0, 0,0,"T1 DiTi 50ul MCA96",0);
MCA384DropAdapterPlate(0,"",38,1,0,-1,0,0.000000,"");
MCA384Move(1,20,1,1,"0C08¯¯¯¯¯¯¯¯¯¯¯¯¯O",0,4,0,10,0,0,96,0);
MCA384UndockCGM(0,2700,"",,);
