20191215_124515 Admin
Worktable link
Administrator
--{ RES }--
V;200
--{ CFG }--
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1,0;Wash Station Cleaner shallow
1,1;Wash Station Waste
1,2;Wash Station Cleaner deep
7,2;T1 Trough MCA;Bleach
20,0;T1 Adapter 96 Fixed125ul MCA;Elution Head
20,2;T1 384 Wash Station;Water
34,0;T1 2mL Nunc DeepWell;Lysis
34,1;T1 Eppendorf ELU 96 Well PCR;Extraction ELU
1;System
41;ms3
40;T1 Hotel 4Pos
45;T1 SLN-2 5Pos
44;T1b Side Loading Hotel 3Pos1
35;T1 Hotel 2Pos
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--{ RPG }--
MCA384Move(1,20,2,1,"1810¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯o",0,4,0,10,0,0,384,0);
MCA384DockCGM(0);
MCA384GetAdapterPlate("T1 Adapter 96 Fixed125ul MCA",20,0,0,0.000000);
Subroutine("C:\ProgramData\Tecan\EVOware\database\Scripts\MCA_Wash_Water_v1.esc",0);
Subroutine("C:\ProgramData\Tecan\EVOware\database\Scripts\MCA_Wash_Bleach_v1.esc",0);
Subroutine("C:\ProgramData\Tecan\EVOware\database\Scripts\MCA_Wash_Water_v1.esc",0);
MCA384Aspirate(96,"Elution_Transfer","90",34,0,"0C08¯¯¯¯¯¯¯¯¯¯¯¯¯O",0,0,0,0,0);
MCA384Dispense(96,"Elution_Transfer","90",34,1,"0C08¯¯¯¯¯¯¯¯¯¯¯¯¯O",0,0,0,0,0);
MCA384Mix(96,"Fast_Mix","40",34,1,"0C08¯¯¯¯¯¯¯¯¯¯¯¯¯O",5,0,0,0,0,0);
Subroutine("C:\ProgramData\Tecan\EVOware\database\Scripts\MCA_Wash_Water_HighVol_v1.esc",0);
Subroutine("C:\ProgramData\Tecan\EVOware\database\Scripts\MCA_Wash_Bleach_v1.esc",0);
Subroutine("C:\ProgramData\Tecan\EVOware\database\Scripts\MCA_Wash_Water_Final_v1.esc",0);
Subroutine("C:\ProgramData\Tecan\EVOware\database\Scripts\MCA_Wash_Tip_Dry_v1.esc",0);
Subroutine("C:\ProgramData\Tecan\EVOware\database\Scripts\MCA_Wash_Water_HighVol_v1.esc",0);
MCA384DropAdapterPlate(0,"",20,0,0,-1,0,0.000000,"");
MCA384UndockCGM(0,2700,"",,);
