20180730_113415 Admin
Administrator
--{ RES }--
V;200
--{ CFG }--
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1,0;Wash Station Cleaner shallow
1,1;Wash Station Waste
1,2;Wash Station Cleaner deep
7,2;T1 Trough MCA;Bleach
20,1;T1 Adapter 96 Fixed125ul MCA;Stamp Head
20,2;T1 384 Wash Station;Water
34,1;T1 Eppendorf FRAG 96 Well PC;FRAG
34,2;T1 Eppendorf FA 96 Well PCR;FA
1;System
5;Symbol954
43;1D Reader
41;ms3
42;T1 Symbol954
4;T1 Ziath 2D
40;T1 Hotel 4Pos
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--{ RPG }--
MCA384Move(1,20,2,1,"1810¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯¯o",0,4,0,10,0,0,384,0);
MCA384DockCGM(0);
MCA384GetAdapterPlate("T1 Adapter 96 Fixed125ul MCA",20,1,0,19.000000);
Subroutine("C:\ProgramData\Tecan\EVOware\database\Scripts\MCA_Wash_Water_v1.esc",0);
Subroutine("C:\ProgramData\Tecan\EVOware\database\Scripts\MCA_Wash_Bleach_v1.esc",0);
Subroutine("C:\ProgramData\Tecan\EVOware\database\Scripts\MCA_Wash_Water_v1.esc",0);
Subroutine("C:\ProgramData\Tecan\EVOware\database\Scripts\MCA_Wash_Water_v1.esc",0);
Subroutine("C:\ProgramData\Tecan\EVOware\database\Scripts\MCA_Wash_Tip_Dry_v1.esc",0);
MCA384Aspirate(96,"FA","2",34,1,"0C08¯¯¯¯¯¯¯¯¯¯¯¯¯O",0,0,0,0,0);
MCA384Dispense(96,"FA Dispense","2",34,2,"0C08¯¯¯¯¯¯¯¯¯¯¯¯¯O",0,0,0,0,0);
Subroutine("C:\ProgramData\Tecan\EVOware\database\Scripts\MCA_Wash_Water_Final_v1.esc",0);
Subroutine("C:\ProgramData\Tecan\EVOware\database\Scripts\MCA_Wash_Tip_Dry_v1.esc",0);
MCA384DropAdapterPlate(0,"",38,1,0,-1,0,0.000000,"");
MCA384Move(1,20,1,1,"0C08¯¯¯¯¯¯¯¯¯¯¯¯¯O",0,4,0,10,0,0,96,0);
MCA384UndockCGM(0,2700,"",,);
