20191215_124459 Admin
Worktable link
Administrator
--{ RES }--
V;200
--{ CFG }--
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1,0;Wash Station Cleaner shallow
1,1;Wash Station Waste
1,2;Wash Station Cleaner deep
7,2;T1 Trough MCA;Bleach
13,0;Adapter 96 DiTi 4to1 MCA384;Adapter 4 to 1
20,2;T1 384 Wash Station;Water
27,0;Greiner384UV flat bottom;384 Quant
27,2;T1 DiTi 50ul MCA96;50ul MCA Tips
34,1;T1 Eppendorf 96 Well PCR;Extraction
1;System
41;ms3
40;T1 Hotel 4Pos
45;T1 SLN-2 5Pos
44;T1b Side Loading Hotel 3Pos1
35;T1 Hotel 2Pos
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--{ RPG }--
MCA384GetAdapterPlate("Adapter 96 DiTi 4to1 MCA384",13,0,0,0.000000);
MCA384GetTips(27,2,0.000000,"Adapter 96 DiTi 4to1 MCA384",1,-1,0,0,0,0,"T1 DiTi 50ul MCA96",0);
MCA384Aspirate(96,"PICO_V2_T1B","25",34,1,"0C08¯¯¯¯¯¯¯¯¯¯¯¯¯O",0,0,0,0,0);
WaitTimer("1","3");
MCA384Dispense(96,"PICO_V2_T1B","25",34,1,"0C08¯¯¯¯¯¯¯¯¯¯¯¯¯O",0,0,0,0,0);
MCA384DropTips(27,2,0,"Adapter 96 DiTi 4to1 MCA384",1,0,0, 0,0,"T1 DiTi 50ul MCA96",0);
MCA384DropAdapterPlate(0,"",13,0,0,-1,0,0.000000,"");
