BCF96DBB
20161202_163050 Admin           
                                                                                                                                
Administrator                                                                                                                   
--{ RES }--
V;200
--{ CFG }--
999;219;32;
14;-1;30;313;-1;-1;-1;-1;-1;-1;258;-1;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-1;
998;0;
998;3;Wash Station Cleaner shallow;Wash Station Waste;Wash Station Cleaner deep;
998;;;;
998;4;Trough 100ml;;;Trough 100ml;
998;Liha1TE;;;Liha1Bleach;
998;0;
998;0;
998;0;
998;0;
998;0;
998;0;
998;3;96 .5ml Matrix Tubes;96 .5ml Matrix Tubes;96 .5ml Matrix Tubes;
998;GdnaSource4;GdnaSource5;GdnaSource6;
998;0;
998;0;
998;0;
998;0;
998;0;
998;3;96 .5ml Matrix Tubes;96 .5ml Matrix Tubes;96 .5ml Matrix Tubes;
998;GdnaSource1;GdnaSource2;GdnaSource3;
998;0;
998;0;
998;0;
998;0;
998;0;
998;3;;Trough 300ml MCA;96 Artel;
998;;Trough;Artel;
998;0;
998;0;
998;0;
998;0;
998;0;
998;0;
998;0;
998;0;
998;0;
998;0;
998;3;Wash Station Cleaner shallow;Wash Station Waste;Wash Station Cleaner deep;
998;;;;
998;4;Trough 100ml;;;Trough 100ml;
998;Liha2TE;;;Liha2Bleach;
998;0;
998;0;
998;0;
998;0;
998;0;
998;0;
998;0;
998;0;
998;0;
998;0;
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998;10;
998;4;0;System;
998;0;6;ms3;
998;0;5;Symbol954;
998;0;0;T2 Ziath 2D;
998;0;1;T2 Hotel 6Pos Matrix 01;
998;0;2;T2 Hotel 4Pos Matrix 01;
998;0;3;T2 Hotel 6Pos Matrix 02;
998;0;4;T2 Hotel 6Pos Matrix 03;
998;0;7;T2b Side Loading Hotel 4pos1;
998;0;8;T2b Side Loading Hotel 4pos2;
998;0;
998;1;
998;39;
998;43;
998;20;
998;26;
998;31;
998;36;
998;41;
998;44;
998;45;
996;0;0;
--{ RPG }--
Wash(255,1,1,1,0,"25",500,"4.0",500,10,70,30,1,0,1000,0);
Variable(dis_vol,"199",1,"Volume?",1,1.000000,200.000000,0,2,1,0);
BeginLoop("12","Artel");
Wash(255,1,1,1,0,"3.0",500,"4.0",500,10,70,30,1,0,1000,0);
Aspirate(255,"Artel Calibration LIHA 1","dis_vol","dis_vol","dis_vol","dis_vol","dis_vol","dis_vol","dis_vol","dis_vol",0,0,0,0,21,1,2,"1810000000000000000000000000000€ZE0000000000000000000000000",0,0);
Dispense(255,"Artel Calibration LIHA 1","dis_vol","dis_vol","dis_vol","dis_vol","dis_vol","dis_vol","dis_vol","dis_vol",0,0,0,0,21,2,1,"0C08¯1000000000000",1,"Artel",0,1,0);
EndLoop();
Wash(255,1,1,1,0,"25",500,"4.0",500,10,70,30,1,0,1000,0);
EndScript(0);
Variable(dis_vol,"199",1,"Volume?",1,1.000000,200.000000,0,2,1,0);
Wash(255,32,1,32,0,"25",500,"4.0",500,10,70,30,1,0,1000,1);
BeginLoop("12","Artel");
Wash(255,32,1,32,0,"3.0",500,"4.0",500,10,70,30,1,0,1000,1);
Aspirate(255,"Artel Calibration LIHA 2","dis_vol","dis_vol","dis_vol","dis_vol","dis_vol","dis_vol","dis_vol","dis_vol",0,0,0,0,21,1,1,"18100000000000000000000000000®30000000000000000000000000000",0,1);
Dispense(255,"Artel Calibration LIHA 2","dis_vol","dis_vol","dis_vol","dis_vol","dis_vol","dis_vol","dis_vol","dis_vol",0,0,0,0,21,2,1,"0C08¯1000000000000",1,"Artel",0,1,1);
EndLoop();
Wash(255,32,1,32,0,"25",500,"4.0",500,10,70,30,1,0,1000,1);
EndScript(0);
