20160705_101325 Admin
Worktable link
Admin
--{ RES }--
V;200
--{ CFG }--
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1,0;Wash Station Cleaner shallow
1,1;Wash Station Waste
1,2;Wash Station Cleaner deep
2,0;Trough 100ml;Liha1TE
2,3;Trough 100ml;Liha1Bleach
15,1;96 .5ml Matrix Tubes;NormDest
21,1;96 Eppendorf PCR;NormSource
32,0;Wash Station Cleaner shallow
32,1;Wash Station Waste
32,2;Wash Station Cleaner deep
33,0;Trough 100ml;Liha2TE
33,3;Trough 100ml;Liha2Bleach
1;System
7;ms3
4;Symbol954
20;T2 Ziath 2D
26;T2 Hotel 6Pos Matrix 01
31;T2 Hotel 4Pos Matrix 01
36;T2 Hotel 6Pos Matrix 02
41;T2 Hotel 6Pos Matrix 03
44;T2b Side Loading Hotel 4pos1
45;T2b Side Loading Hotel 4pos2
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--{ RPG }--
Variable(column,"1",0,"",0,1.000000,10.000000,0,2,0,0);
Variable(gwl_path,"blank_path",0,"",0,1.000000,10.000000,1,2,0,0);
Variable(worklist_checker_path,"blank_path",0,"",0,1.000000,10.000000,1,2,0,0);
Variable(run_worklist,"0",0,"",0,1.000000,10.000000,0,2,0,0);
Variable(num_columns,"12",0,"",0,1.000000,10.000000,0,2,0,0);
Variable(use_head,"1",0,"",0,1.000000,10.000000,0,2,0,0);
Comment("_START_PIPETTING");
Variable(current_path,"~gwl_path~~column~.gwl",0,"",0,1.000000,10.000000,1,2,0,0);
Execute("~worklist_checker_path~ ~current_path~",6,"run_worklist",2);
IfThen("run_worklist",1,"0");
IfThen("use_head",0,"1");
Subroutine("C:\ProgramData\Tecan\EVOware\database\Scripts\Norm_v4_LiHa_TransferAndWash_EPPENDORF_T2_Sub.esc",2);
Worklist(0,~current_path~,255,"Water_Wash",0,1);Wash(255,1,1,1,0,"2",0,"2",0,0,70,80,1,0,1000,0);GetDITI2(0,"DiTi 200 ul",0,0,10,70);DropDITI(0,-1,0,10,70,0);
Subroutine("C:\ProgramData\Tecan\EVOware\database\Scripts\Norm_v4_LiHa_TransferAndWash_EPPENDORF_T2_Sub.esc",1);
Variable(use_head,"2",0,"",0,1.000000,10.000000,0,2,0,0);
Else();
Subroutine("C:\ProgramData\Tecan\EVOware\database\Scripts\Norm_v4_LiHa2_TransferAndWash_EPPENDORF_T2_Sub.esc",2);
Worklist(0,~current_path~,255,"Water_Wash",1,1);Wash(255,32,1,32,0,"2",0,"2",0,0,70,80,1,0,1000,1);GetDITI2(0,"DiTi 200 ul",0,1,10,70);DropDITI(0,-1,0,10,70,1);
Subroutine("C:\ProgramData\Tecan\EVOware\database\Scripts\Norm_v4_LiHa2_TransferAndWash_EPPENDORF_T2_Sub.esc",1);
Variable(use_head,"1",0,"",0,1.000000,10.000000,0,2,0,0);
EndIf();
Else();
EndIf();
Variable(column,"~column~ + 1",0,"",0,1.000000,10.000000,0,2,0,0);
If("column",3,"num_columns + 1","_START_PIPETTING");
