20151008_181645 Admin
Import with ExportImport
EVOware ExportImport Tool
--{ RES }--
V;200
--{ CFG }--
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1,0;Wash Station Cleaner shallow
1,1;Wash Station Waste
1,2;Wash Station Cleaner deep
2,0;Trough 100ml;Liha1TE
2,3;Trough 100ml;Liha1Bleach
15,1;96 .5ml Matrix Tubes;NormDest
21,1;96 Eppendorf PCR;NormSource
32,0;Wash Station Cleaner shallow
32,1;Wash Station Waste
32,2;Wash Station Cleaner deep
33,0;Trough 100ml;Liha2TE
33,3;Trough 100ml;Liha2Bleach
1;System
45;Symbol954
39;ms3
1;cognex camera
20;T2 Ziath 2D
26;T2 Hotel 6Pos Matrix 01
31;T2 Hotel 4Pos Matrix 01
36;T2 Hotel 6Pos Matrix 02
41;T2 Hotel 6Pos Matrix 03
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--{ RPG }--
Worklist(1,,0,"",0,0);Wash(255,1,1,1,0,"2",0,"2",0,10,70,80,1,0,1000,0);GetDITI2(0,"DiTi 200 ul",0,0,10,70);DropDITI(0,-1,0,10,70,0);
Aspirate(255,"Bleach_Wash","225","225","225","225","225","225","225","225",0,0,0,0,2,3,1,"0108¯1",0,0);
Dispense(255,"Bleach_Wash","225","225","225","225","225","225","225","225",0,0,0,0,2,3,1,"0108¯1",0,0);
Wash(255,1,1,1,2,"8",0,"8",0,0,70,50,1,0,1000,0);
BeginLoop("50","Piercing");
MoveLiha(255,15,1,1,"0C08000¨?000000000",0,2,2,10,0,0);
EndLoop();
BeginLoop("50","Piercing");
MoveLiha(255,15,1,1,"0C080000 O00000000",0,2,2,10,0,0);
EndLoop();
BeginLoop("50","Piercing");
MoveLiha(255,15,1,1,"0C0800000o0000000",0,2,2,10,0,0);
EndLoop();
