20160127_175434 Admin
Worktable link
Admin
--{ RES }--
V;200
--{ CFG }--
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1,0;Wash Station Cleaner shallow
1,1;Wash Station Waste
1,2;Wash Station Cleaner deep
2,0;Trough 100ml;Liha1TE
2,3;Trough 100ml;Liha1Bleach
9,0;96 .5ml Matrix Tubes;GdnaSource4
9,1;96 .5ml Matrix Tubes;GdnaSource5
9,2;96 .5ml Matrix Tubes;GdnaSource6
15,0;96 .5ml Matrix Tubes;GdnaSource1
15,1;96 .5ml Matrix Tubes;GdnaSource2
15,2;96 .5ml Matrix Tubes;GdnaSource3
21,1;Greiner384;GdnaDest
32,0;Wash Station Cleaner shallow
32,1;Wash Station Waste
32,2;Wash Station Cleaner deep
33,0;Trough 100ml;Liha2TE
33,3;Trough 100ml;Liha2Bleach
1;System
29;cognex camera
39;ms3
43;Symbol954
20;T2 Ziath 2D
26;T2 Hotel 6Pos Matrix 01
31;T2 Hotel 4Pos Matrix 01
36;T2 Hotel 6Pos Matrix 02
41;T2 Hotel 6Pos Matrix 03
44;T2b Side Loading Hotel 4pos1
45;T2b Side Loading Hotel 4pos2
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--{ RPG }--
Comment("Variables passed in to determine subroutine information");
Variable(numScripts,"2",0,"",0,1.000000,10.000000,0,2,0,0);
Variable(scriptDataFile,"C:\Users\counsyl\Desktop\export_vars.csv",0,"",0,1.000000,10.000000,1,2,0,0);
Comment("Per subroutine variables");
Variable(script,"C:\ProgramData\Tecan\EVOware\database\Scripts\mchristen_sub_test_right.esc",0,"",0,1.000000,10.000000,1,2,0,0);
Variable(worklist,"C:\deleteme_automation\gwl\placeholder.gwl",0,"",0,1.000000,10.000000,1,2,0,0);
Variable(worklistType,"1",0,"",0,1.000000,10.000000,1,2,0,0);
Comment("Loop");
Variable(iteration,"1",0,"",0,1.000000,10.000000,0,2,0,0);
BeginLoop("numScripts","createSubRoutines");
ImportVariable(script#worklist#worklistType,"C:\Users\counsyl\Desktop\export_vars.csv",1#1#1,"C:\ProgramData\Tecan\EVOware\database\Scripts\mchristen_sub_test_right.esc#noWorklist#noWorklistType",1,iteration,0,1,0);
UserPrompt("About to start: ~script~w/ worklist: ~worklist~and type: ~worklistType~iteration = ~iteration~",0,-1);
Subroutine("~script~",1);
Variable(iteration,"iteration + 1",0,"",0,1.000000,10.000000,0,2,0,0);
EndLoop();
