20181214_093251 Admin
Administrator
--{ RES }--
V;200
--{ CFG }--
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1,0;Wash Station Cleaner shallow
1,1;Wash Station Waste
1,2;Wash Station Cleaner deep
2,0;Trough 100ml;Liha1TE
2,3;Trough 100ml;Liha1Bleach
9,0;96 .5ml Matrix Tubes;GdnaSource4
9,1;96 .5ml Matrix Tubes;GdnaSource5
9,2;96 .5ml Matrix Tubes;GdnaSource6
15,0;96 .5ml Matrix Tubes;GdnaSource1
15,1;96 .5ml Matrix Tubes;GdnaSource2
15,2;96 .5ml Matrix Tubes;GdnaSource3
21,0;Trough 300ml MCA;First
21,1;Trough 300ml MCA;Second
21,2;96 Artel;Labware1
32,0;Wash Station Cleaner shallow
32,1;Wash Station Waste
32,2;Wash Station Cleaner deep
33,0;Trough 100ml;Liha2TE
33,3;Trough 100ml;Liha2Bleach
1;System
39;ms3
43;Symbol954
20;T2 Ziath 2D
26;T2 Hotel 6Pos Matrix 01
31;T2 Hotel 4Pos Matrix 01
36;T2 Hotel 6Pos Matrix 02
41;T2 Hotel 6Pos Matrix 03
44;T2b Side Loading Hotel 4pos1
45;T2b Side Loading Hotel 4pos2
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--{ RPG }--
Group("Set Transfer Volumes");
Variable(liha_num,"1",1,"LiHa to Test?",1,1.000000,2.000000,0,2,1,0);
Variable(base_vol,"50",0,"Volume?",0,1.000000,10.000000,0,2,0,0);
Variable(t_1,"0",0,"Volume?",0,1.000000,10.000000,0,2,0,0);
Variable(t_2,"2",0,"Volume?",0,1.000000,10.000000,0,2,0,0);
Variable(t_3,"5",0,"Volume?",0,1.000000,10.000000,0,2,0,0);
Variable(t_4,"10",0,"Volume?",0,1.000000,10.000000,0,2,0,0);
Variable(t_5,"20",0,"Volume?",0,1.000000,10.000000,0,2,0,0);
Variable(t_6,"30",0,"Volume?",0,1.000000,10.000000,0,2,0,0);
Variable(t_7,"40",0,"Volume?",0,1.000000,10.000000,0,2,0,0);
Variable(t_8,"50",0,"Volume?",0,1.000000,10.000000,0,2,0,0);
Variable(t_9,"80",0,"Volume?",0,1.000000,10.000000,0,2,0,0);
Variable(t_10,"100",0,"Volume?",0,1.000000,10.000000,0,2,0,0);
Variable(t_11,"150",0,"Volume?",0,1.000000,10.000000,0,2,0,0);
Variable(t_12,"100",0,"Volume?",0,1.000000,10.000000,0,2,0,0);
GroupEnd();
IfThen("liha_num",0,"1");
Wash(255,1,1,1,0,"25",500,"4.0",500,10,70,30,1,0,1000,0);
BeginLoop("12","Artel");
Wash(255,1,1,1,0,"3.0",500,"4.0",500,10,70,30,1,0,1000,0);
IfThen("~LOOP_Artel~",0,"12");
Variable(base_vol,"0",0,"Volume?",0,1.000000,10.000000,0,2,0,0);
Else();
EndIf();
Variable(dVol,"base_vol + t_~LOOP_Artel~",0,"Volume?",0,1.000000,10.000000,0,2,0,0);
Variable(aVol,"t_~LOOP_Artel~",0,"Volume?",0,1.000000,10.000000,0,2,0,0);
Aspirate(255,">> DSB_Aspirate_LiHa1 <<	20","aVol","aVol","aVol","aVol","aVol","aVol","aVol","aVol",0,0,0,0,21,0,1,"0C0800000o0000000",0,0);
Aspirate(255,">> Norm_v3_Aspirate_LiHa1 <<	15","base_vol","base_vol","base_vol","base_vol","base_vol","base_vol","base_vol","base_vol",0,0,0,0,21,1,1,"0C0800000o0000000",0,0);
Dispense(255,">> Norm_v3_Dispense_LiHa1 <<	19","dVol","dVol","dVol","dVol","dVol","dVol","dVol","dVol",0,0,0,0,21,2,1,"0C08¯1000000000000",1,"Artel",0,1,0);
EndLoop();
Wash(255,1,1,1,0,"25",500,"4.0",500,10,70,30,1,0,1000,0);
Else();
Variable(base_vol,"50",0,"Volume?",0,1.000000,10.000000,0,2,0,0);
Wash(255,32,1,32,0,"25",500,"4.0",500,10,70,30,1,0,1000,1);
BeginLoop("12","Artel2");
Wash(255,32,1,32,0,"3",500,"4.0",500,10,70,30,1,0,1000,1);
IfThen("~LOOP_Artel2~",0,"12");
Variable(base_vol,"0",0,"Volume?",0,1.000000,10.000000,0,2,0,0);
Else();
EndIf();
Variable(dVol,"base_vol + t_~LOOP_Artel2~",0,"Volume?",0,1.000000,10.000000,0,2,0,0);
Variable(aVol,"t_~LOOP_Artel2~",0,"Volume?",0,1.000000,10.000000,0,2,0,0);
Aspirate(255,">> DSB_Aspirate_LiHa2 <<	21","base_vol","base_vol","base_vol","base_vol","base_vol","base_vol","base_vol","base_vol",0,0,0,0,21,0,1,"0C0800000o0000000",0,1);
Aspirate(255,">> Norm_v3_Aspirate_LiHa2 <<	17","aVol","aVol","aVol","aVol","aVol","aVol","aVol","aVol",0,0,0,0,21,1,1,"0C0800000o0000000",0,1);
Dispense(255,">> Norm_v3_Dispense_LiHa2 <<	18","dVol","dVol","dVol","dVol","dVol","dVol","dVol","dVol",0,0,0,0,21,2,1,"0C08¯1000000000000",1,"Artel2",0,1,1);
EndLoop();
Wash(255,32,1,32,0,"25",500,"4.0",500,10,70,30,1,0,1000,1);
EndIf();
EndScript(0);
