20181211_170858 Admin
Administrator
--{ RES }--
V;200
--{ CFG }--
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1,0;Wash Station Cleaner shallow
1,1;Wash Station Waste
1,2;Wash Station Cleaner deep
2,0;Trough 100ml;Liha1TE
2,3;Trough 100ml;Liha1Bleach
9,0;96 .5ml Matrix Tubes;GdnaSource4
9,1;96 .5ml Matrix Tubes;GdnaSource5
9,2;96 .5ml Matrix Tubes;GdnaSource6
15,0;96 .5ml Matrix Tubes;GdnaSource1
15,1;96 .5ml Matrix Tubes;GdnaSource2
15,2;96 .5ml Matrix Tubes;GdnaSource3
21,0;Trough 300ml MCA;Trough
21,1;96 Eppendorf PCR;Labware1
21,2;96 Artel;Artel
32,0;Wash Station Cleaner shallow
32,1;Wash Station Waste
32,2;Wash Station Cleaner deep
33,0;Trough 100ml;Liha2TE
33,3;Trough 100ml;Liha2Bleach
1;System
39;ms3
43;Symbol954
20;T2 Ziath 2D
26;T2 Hotel 6Pos Matrix 01
31;T2 Hotel 4Pos Matrix 01
36;T2 Hotel 6Pos Matrix 02
41;T2 Hotel 6Pos Matrix 03
44;T2b Side Loading Hotel 4pos1
45;T2b Side Loading Hotel 4pos2
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--{ RPG }--
Wash(255,1,1,1,0,"25",500,"4.0",500,10,70,30,1,0,1000,0);
Variable(dis_vol,"10",1,"Volume?",1,1.000000,10.000000,0,2,1,0);
Variable(dis_vol2,"dis_vol * 2",0,"Volume?",0,1.000000,10.000000,0,2,0,0);
BeginLoop("3","Artel");
Wash(255,1,1,1,0,"3.0",500,"4.0",500,10,70,30,1,0,1000,0);
Aspirate(255,">> DSB_Aspirate_LiHa1 <<	9","dis_vol","dis_vol","dis_vol","dis_vol","dis_vol","dis_vol","dis_vol","dis_vol",0,0,0,0,21,1,1,"0C08000000p¯000000",0,0);
Aspirate(255,"gDNA_v2_Aspirate_LiHa1","dis_vol","dis_vol","dis_vol","dis_vol","dis_vol","dis_vol","dis_vol","dis_vol",0,0,0,0,21,1,1,"0C08¯1000000000000",0,0);
Dispense(255,"gDNA_Dispense_LiHa1","dis_vol2","dis_vol2","dis_vol2","dis_vol2","dis_vol2","dis_vol2","dis_vol2","dis_vol2",0,0,0,0,21,2,1,"0C08¯1000000000000",1,"Artel",0,1,0);
EndLoop();
Wash(255,32,1,32,0,"25",500,"4.0",500,10,70,30,1,0,1000,1);
BeginLoop("3","Artel");
Wash(255,32,1,32,0,"3.0",500,"4.0",500,10,70,30,1,0,1000,1);
Aspirate(255,">> DSB_Aspirate_LiHa2 <<	12","dis_vol","dis_vol","dis_vol","dis_vol","dis_vol","dis_vol","dis_vol","dis_vol",0,0,0,0,21,1,1,"0C0800000000¯10000",0,1);
Aspirate(255,"gDNA_v2_Aspirate_LiHa2","dis_vol","dis_vol","dis_vol","dis_vol","dis_vol","dis_vol","dis_vol","dis_vol",0,0,0,0,21,1,1,"0C08¯1000000000000",0,1);
Dispense(255,"gDNA_Dispense_LiHa2","dis_vol2","dis_vol2","dis_vol2","dis_vol2","dis_vol2","dis_vol2","dis_vol2","dis_vol2",0,0,0,0,21,2,1,"0C08000000p¯000000",1,"Artel",0,1,1);
EndLoop();
BeginLoop("3","Artel");
Wash(255,1,1,1,0,"3.0",500,"4.0",500,10,70,30,1,0,1000,0);
Aspirate(255,">> DSB_Aspirate_LiHa1 <<	8","dis_vol","dis_vol","dis_vol","dis_vol","dis_vol","dis_vol","dis_vol","dis_vol",0,0,0,0,21,1,1,"0C08¯1000000000000",0,0);
Aspirate(255,"gDNA_v2_Aspirate_LiHa1","dis_vol","dis_vol","dis_vol","dis_vol","dis_vol","dis_vol","dis_vol","dis_vol",0,0,0,0,21,1,1,"0C08000000p¯000000",0,0);
Dispense(255,"gDNA_Dispense_LiHa1","dis_vol2","dis_vol2","dis_vol2","dis_vol2","dis_vol2","dis_vol2","dis_vol2","dis_vol2",0,0,0,0,21,2,1,"0C08000¨?000000000",1,"Artel",0,1,0);
EndLoop();
Wash(255,1,1,1,0,"25",500,"4.0",500,10,70,30,1,0,1000,0);
BeginLoop("3","Artel");
Wash(255,32,1,32,0,"3.0",500,"4.0",500,10,70,30,1,0,1000,1);
Aspirate(255,">> DSB_Aspirate_LiHa2 <<	11","dis_vol","dis_vol","dis_vol","dis_vol","dis_vol","dis_vol","dis_vol","dis_vol",0,0,0,0,21,1,1,"0C08¯1000000000000",0,1);
Aspirate(255,"gDNA_v2_Aspirate_LiHa2","dis_vol","dis_vol","dis_vol","dis_vol","dis_vol","dis_vol","dis_vol","dis_vol",0,0,0,0,21,1,1,"0C08000000p¯000000",0,1);
Dispense(255,"gDNA_Dispense_LiHa2","dis_vol2","dis_vol2","dis_vol2","dis_vol2","dis_vol2","dis_vol2","dis_vol2","dis_vol2",0,0,0,0,21,2,1,"0C080000000000¬700",1,"Artel",0,1,1);
EndLoop();
Wash(255,32,1,32,0,"25",500,"4.0",500,10,70,30,1,0,1000,1);
EndScript(0);
