20180426_161928 Service
Import with ExportImport
EVOware ExportImport Tool
--{ RES }--
V;200
--{ CFG }--
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1,0;Wash Station Cleaner shallow
1,1;Wash Station Waste
1,2;Wash Station Cleaner deep
2,0;Trough 100ml;Liha1TE
2,3;Trough 100ml;Liha1Bleach
9,0;96 .5ml Matrix Tubes;GdnaSource4
9,1;96 .5ml Matrix Tubes;GdnaSource5
9,2;96 .5ml Matrix Tubes;GdnaSource6
15,0;96 .5ml Matrix Tubes;GdnaSource1
15,1;96 .5ml Matrix Tubes;GdnaSource2
15,2;96 .5ml Matrix Tubes;GdnaSource3
21,1;Greiner384as96;GdnaDest
32,0;Wash Station Cleaner shallow
32,1;Wash Station Waste
32,2;Wash Station Cleaner deep
33,0;Trough 100ml;Liha2TE
33,3;Trough 100ml;Liha2Bleach
1;System
29;cognex camera
39;ms3
43;Symbol954
20;T2 Ziath 2D
26;T2 Hotel 6Pos Matrix 01
31;T2 Hotel 4Pos Matrix 01
36;T2 Hotel 6Pos Matrix 02
41;T2 Hotel 6Pos Matrix 03
44;T2b Side Loading Hotel 4pos1
45;T2b Side Loading Hotel 4pos2
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--{ RPG }--
Variable(skip_wash,"0",0,"",0,1.000000,10.000000,0,2,0,0);
Variable(worklist,"C:\deleteme_automation\gwl\placeholder.gwl",0,"",0,1.000000,10.000000,1,2,0,0);
ROMA(2,80,75,0,0,0,150,1,0);
IfThen("skip_wash",0,"0");
Subroutine("C:\ProgramData\TECAN\EVOware\database\Scripts\Gdna_v2_LiHa2wash_T2_Sub.esc",1);
Else();
EndIf();
Worklist(0,~worklist~,255,"Water wet contact",0,1);Wash(255,1,1,1,0,"2",0,"2",0,0,70,80,1,0,1000,0);GetDITI2(0,"DiTi 200 ul",0,0,10,70);DropDITI(0,-1,0,10,70,0);
Worklist(1,,0,"",0,0);Wash(255,1,1,1,0,"2",0,"2",0,10,70,80,1,0,1000,0);GetDITI2(0,"DiTi 200 ul",0,0,10,70);DropDITI(0,-1,0,10,70,0);
