20190129_094707 Admin
Administrator
--{ RES }--
V;200
--{ CFG }--
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1,0;Wash Station Cleaner shallow
1,1;Wash Station Waste
1,2;Wash Station Cleaner deep
2,0;Trough 100ml;Liha1TE
2,3;Trough 100ml;Liha1Bleach
15,1;96 .5ml Matrix Tubes;NormDest
21,1;GreinerUV;NormSource
32,0;Wash Station Cleaner shallow
32,1;Wash Station Waste
32,2;Wash Station Cleaner deep
33,0;Trough 100ml;Liha2TE
33,3;Trough 100ml;Liha2Bleach
1;System
39;ms3
20;T2 Ziath 2D
26;T2 Hotel 6Pos Matrix 01
31;T2 Hotel 4Pos Matrix 01
36;T2 Hotel 6Pos Matrix 02
41;T2 Hotel 6Pos Matrix 03
44;T2b Side Loading Hotel 4pos1
45;T2b Side Loading Hotel 4pos2
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--{ RPG }--
ROMA(2,80,75,0,0,0,150,1,0);
Variable(position,"1",0,"",0,1.000000,10.000000,0,2,0,0);
IfThen("position",0,"1");
Subroutine("C:\ProgramData\Tecan\EVOware\database\Scripts\BleachDetect_LiHa2_T2_Sub.esc",1);
Aspirate(1,"Bleach_Detect","5",0,0,0,0,0,0,0,0,0,0,0,2,3,1,"010810",0,0);
Dispense(1,"Bleach_Detect","5",0,0,0,0,0,0,0,0,0,0,0,2,3,1,"010810",0,0);
Subroutine("C:\ProgramData\Tecan\EVOware\database\Scripts\BleachDetect_LiHa2_T2_Sub.esc",2);
Subroutine("C:\ProgramData\Tecan\EVOware\database\Scripts\BleachWash_LiHa2_T2_Sub.esc",1);
Aspirate(255,"Bleach_Wash","200","200","200","200","200","200","200","200",0,0,0,0,2,3,1,"0108¯1",0,0);
Dispense(255,"Bleach_Wash","200","200","200","200","200","200","200","200",0,0,0,0,2,3,1,"0108¯1",0,0);
Wash(255,1,1,1,2,"4",0,"8",0,0,70,50,1,0,1000,0);
Subroutine("C:\ProgramData\Tecan\EVOware\database\Scripts\BleachWash_LiHa2_T2_Sub.esc",2);
MoveLiha(255,33,3,1,"0108¯1",0,4,0,10,0,1);
MoveLiha(255,2,3,1,"0108¯1",0,4,0,10,0,0);
Else();
EndIf();
