20180426_161928 Service
Import with ExportImport
EVOware ExportImport Tool
--{ RES }--
V;200
--{ CFG }--
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1,0;Wash Station Cleaner shallow
1,1;Wash Station Waste
1,2;Wash Station Cleaner deep
2,0;Trough 100ml;Liha1TE
2,3;Trough 100ml;Liha1Bleach
9,0;96 .5ml Matrix Tubes;GdnaSource4
9,1;96 .5ml Matrix Tubes;GdnaSource5
9,2;96 .5ml Matrix Tubes;GdnaSource6
15,0;96 .5ml Matrix Tubes;GdnaSource1
15,1;96 .5ml Matrix Tubes;GdnaSource2
15,2;96 .5ml Matrix Tubes;GdnaSource3
21,0;Greiner96;Labware1
21,1;Greiner384;GdnaDest
21,2;Greiner384;Labware2
32,0;Wash Station Cleaner shallow
32,1;Wash Station Waste
32,2;Wash Station Cleaner deep
33,0;Trough 100ml;Liha2TE
33,3;Trough 100ml;Liha2Bleach
1;System
39;ms3
43;Symbol954
20;T2 Ziath 2D
26;T2 Hotel 6Pos Matrix 01
31;T2 Hotel 4Pos Matrix 01
36;T2 Hotel 6Pos Matrix 02
41;T2 Hotel 6Pos Matrix 03
44;T2b Side Loading Hotel 4pos1
45;T2b Side Loading Hotel 4pos2
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--{ RPG }--
Variable(StressTest,"1",1,"Number of Loops for Stress testing",0,1.000000,50.000000,0,2,1,0);
UserPrompt("Place 384 Greiner plate on Hotel T2 Hotel 6Pos Matrix 03 Grid 41 site 1 ( Lowest slot)Place 96 0.5ml Matrix tubeNORM  plate on Hotel T2 Hotel 6Pos Matrix 02 Grid 36 site 1 ( Lowest slot)",0,-1);
BeginLoop("StressTest","StressTest");
BeginLoop("1","Inner Loops for timer");
Comment("gDNAPlate on Right Hotel, Site 1");
Group("gDNA 384 Grenier plate");
Transfer_Rack("41","21",0,0,0,0,0,"","Greiner96","Narrow","","","T2 Hotel 6Pos Matrix 03","","T2 MP 3Pos Flat with Shim 01","1","(Not defined)","3");
Transfer_Rack("21","44",0,0,0,0,0,"","Greiner384","Narrow","","","T2 MP 3Pos Flat with Shim 01","","T2b Side Loading Hotel 4pos1","3","(Not defined)","1");
Transfer_Rack("44","21",0,0,0,0,0,"","Greiner384","Narrow","","","T2b Side Loading Hotel 4pos1","","T2 MP 3Pos Flat with Shim 01","1","(Not defined)","3");
Transfer_Rack("21","44",0,0,0,0,0,"","Greiner384","Narrow","","","T2 MP 3Pos Flat with Shim 01","","T2b Side Loading Hotel 4pos1","3","(Not defined)","2");
Transfer_Rack("44","21",0,0,0,0,0,"","Greiner384","Narrow","","","T2b Side Loading Hotel 4pos1","","T2 MP 3Pos Flat with Shim 01","2","(Not defined)","3");
Transfer_Rack("21","44",0,0,0,0,0,"","Greiner384","Narrow","","","T2 MP 3Pos Flat with Shim 01","","T2b Side Loading Hotel 4pos1","3","(Not defined)","3");
Transfer_Rack("44","21",0,0,0,0,0,"","Greiner384","Narrow","","","T2b Side Loading Hotel 4pos1","","T2 MP 3Pos Flat with Shim 01","3","(Not defined)","3");
Transfer_Rack("21","44",0,0,0,0,0,"","Greiner384","Narrow","","","T2 MP 3Pos Flat with Shim 01","","T2b Side Loading Hotel 4pos1","3","(Not defined)","4");
Transfer_Rack("44","21",0,0,0,0,0,"","Greiner384","Narrow","","","T2b Side Loading Hotel 4pos1","","T2 MP 3Pos Flat with Shim 01","4","(Not defined)","3");
Transfer_Rack("21","41",0,0,0,0,0,"","Greiner384","Narrow","","","T2 MP 3Pos Flat with Shim 01","","T2 Hotel 6Pos Matrix 03","3","(Not defined)","1");
Transfer_Rack("41","21",0,0,1,0,0,"","Greiner384","Narrow","","","T2 Hotel 6Pos Matrix 03","","T2 MP 3Pos Flat with Shim 01","1","(Not defined)","3");
Transfer_Rack("21","41",0,0,1,0,0,"","Greiner384","Narrow","","","T2 MP 3Pos Flat with Shim 01","","T2 Hotel 6Pos Matrix 03","3","(Not defined)","2");
Transfer_Rack("41","21",0,0,1,0,0,"","Greiner384","Narrow","","","T2 Hotel 6Pos Matrix 03","","T2 MP 3Pos Flat with Shim 01","2","(Not defined)","2");
Transfer_Rack("21","41",0,0,1,0,0,"","Greiner384","Narrow","","","T2 MP 3Pos Flat with Shim 01","","T2 Hotel 6Pos Matrix 03","2","(Not defined)","3");
Transfer_Rack("41","21",0,0,1,0,0,"","Greiner96","Narrow","","","T2 Hotel 6Pos Matrix 03","","T2 MP 3Pos Flat with Shim 01","3","(Not defined)","1");
Transfer_Rack("21","41",0,0,1,0,0,"","Greiner96","Narrow","","","T2 MP 3Pos Flat with Shim 01","","T2 Hotel 6Pos Matrix 03","1","(Not defined)","4");
Transfer_Rack("41","41",0,0,0,0,0,"","Greiner96","Narrow","","","T2 Hotel 6Pos Matrix 03","","T2 Hotel 6Pos Matrix 03","4","(Not defined)","5");
Transfer_Rack("41","41",0,0,0,0,0,"","Greiner96","Narrow","","","T2 Hotel 6Pos Matrix 03","","T2 Hotel 6Pos Matrix 03","5","(Not defined)","6");
GroupEnd();
Comment("NORM Plate on 2nd to the Right Hotel, Site 1");
Group("96 0.5ml Matrix tube Norm plate");
Transfer_Rack("36","15",0,0,0,0,0,"","96 .5ml Matrix Tubes","Narrow","","","T2 Hotel 6Pos Matrix 02","","T2 MP 3Pos Matrix Short 01","1","(Not defined)","3");
Transfer_Rack("15","45",0,0,0,0,0,"","96 .5ml Matrix Tubes","Narrow","","","T2 MP 3Pos Matrix Short 01","","T2b Side Loading Hotel 4pos2","3","(Not defined)","1");
Transfer_Rack("45","15",0,0,0,0,0,"","96 .5ml Matrix Tubes","Narrow","","","T2b Side Loading Hotel 4pos2","","T2 MP 3Pos Matrix Short 01","1","(Not defined)","3");
Transfer_Rack("15","45",0,0,0,0,0,"","96 .5ml Matrix Tubes","Narrow","","","T2 MP 3Pos Matrix Short 01","","T2b Side Loading Hotel 4pos2","3","(Not defined)","2");
Transfer_Rack("45","15",0,0,0,0,0,"","96 .5ml Matrix Tubes","Narrow","","","T2b Side Loading Hotel 4pos2","","T2 MP 3Pos Matrix Short 01","2","(Not defined)","3");
Transfer_Rack("15","45",0,0,0,0,0,"","96 .5ml Matrix Tubes","Narrow","","","T2 MP 3Pos Matrix Short 01","","T2b Side Loading Hotel 4pos2","3","(Not defined)","3");
Transfer_Rack("45","15",0,0,0,0,0,"","96 .5ml Matrix Tubes","Narrow","","","T2b Side Loading Hotel 4pos2","","T2 MP 3Pos Matrix Short 01","3","(Not defined)","3");
Transfer_Rack("15","45",0,0,0,0,0,"","96 .5ml Matrix Tubes","Narrow","","","T2 MP 3Pos Matrix Short 01","","T2b Side Loading Hotel 4pos2","3","(Not defined)","4");
Transfer_Rack("45","15",0,0,0,0,0,"","96 .5ml Matrix Tubes","Narrow","","","T2b Side Loading Hotel 4pos2","","T2 MP 3Pos Matrix Short 01","4","(Not defined)","3");
Transfer_Rack("15","36",0,0,0,0,0,"","96 .5ml Matrix Tubes","Narrow","","","T2 MP 3Pos Matrix Short 01","","T2 Hotel 6Pos Matrix 02","3","(Not defined)","1");
Transfer_Rack("36","15",0,0,0,0,0,"","96 .5ml Matrix Tubes","Narrow","","","T2 Hotel 6Pos Matrix 02","","T2 MP 3Pos Matrix Short 01","1","(Not defined)","3");
Transfer_Rack("15","36",0,0,0,0,0,"","96 .5ml Matrix Tubes","Narrow","","","T2 MP 3Pos Matrix Short 01","","T2 Hotel 6Pos Matrix 02","3","(Not defined)","2");
Transfer_Rack("36","15",0,0,0,0,0,"","96 .5ml Matrix Tubes","Narrow","","","T2 Hotel 6Pos Matrix 02","","T2 MP 3Pos Matrix Short 01","2","(Not defined)","2");
Transfer_Rack("15","36",0,0,0,0,0,"","96 .5ml Matrix Tubes","Narrow","","","T2 MP 3Pos Matrix Short 01","","T2 Hotel 6Pos Matrix 02","2","(Not defined)","3");
Transfer_Rack("36","15",0,0,0,0,0,"","96 .5ml Matrix Tubes","Narrow","","","T2 Hotel 6Pos Matrix 02","","T2 MP 3Pos Matrix Short 01","3","(Not defined)","1");
Transfer_Rack("15","36",0,0,0,0,0,"","96 .5ml Matrix Tubes","Narrow","","","T2 MP 3Pos Matrix Short 01","","T2 Hotel 6Pos Matrix 02","1","(Not defined)","4");
Transfer_Rack("36","36",0,0,0,0,0,"","96 .5ml Matrix Tubes","Narrow","","","T2 Hotel 6Pos Matrix 02","","T2 Hotel 6Pos Matrix 02","4","(Not defined)","5");
Transfer_Rack("36","36",0,0,0,0,0,"","96 .5ml Matrix Tubes","Narrow","","","T2 Hotel 6Pos Matrix 02","","T2 Hotel 6Pos Matrix 02","5","(Not defined)","6");
Transfer_Rack("36","31",0,0,0,0,0,"","96 .5ml Matrix Tubes","Narrow","","","T2 Hotel 6Pos Matrix 02","","T2 Hotel 4Pos Matrix 01","6","(Not defined)","1");
Transfer_Rack("31","9",0,0,0,0,0,"","96 .5ml Matrix Tubes","Narrow","","","T2 Hotel 4Pos Matrix 01","","T2 MP 3Pos Matrix Tall 01","1","(Not defined)","3");
Transfer_Rack("9","31",0,0,0,0,0,"","96 .5ml Matrix Tubes","Narrow","","","T2 MP 3Pos Matrix Tall 01","","T2 Hotel 4Pos Matrix 01","3","(Not defined)","2");
Transfer_Rack("31","9",0,0,0,0,0,"","96 .5ml Matrix Tubes","Narrow","","","T2 Hotel 4Pos Matrix 01","","T2 MP 3Pos Matrix Tall 01","2","(Not defined)","2");
Transfer_Rack("9","31",0,0,0,0,0,"","96 .5ml Matrix Tubes","Narrow","","","T2 MP 3Pos Matrix Tall 01","","T2 Hotel 4Pos Matrix 01","2","(Not defined)","3");
Transfer_Rack("31","9",0,0,0,0,0,"","96 .5ml Matrix Tubes","Narrow","","","T2 Hotel 4Pos Matrix 01","","T2 MP 3Pos Matrix Tall 01","3","(Not defined)","1");
Transfer_Rack("9","31",0,0,0,0,0,"","96 .5ml Matrix Tubes","Narrow","","","T2 MP 3Pos Matrix Tall 01","","T2 Hotel 4Pos Matrix 01","1","(Not defined)","4");
Transfer_Rack("31","26",0,0,0,0,0,"","96 .5ml Matrix Tubes","Narrow","","","T2 Hotel 4Pos Matrix 01","","T2 Hotel 6Pos Matrix 01","4","(Not defined)","1");
Transfer_Rack("26","26",0,0,0,0,0,"","96 .5ml Matrix Tubes","Narrow","","","T2 Hotel 6Pos Matrix 01","","T2 Hotel 6Pos Matrix 01","1","(Not defined)","2");
Transfer_Rack("26","26",0,0,0,0,0,"","96 .5ml Matrix Tubes","Narrow","","","T2 Hotel 6Pos Matrix 01","","T2 Hotel 6Pos Matrix 01","2","(Not defined)","3");
Transfer_Rack("26","26",0,0,0,0,0,"","96 .5ml Matrix Tubes","Narrow","","","T2 Hotel 6Pos Matrix 01","","T2 Hotel 6Pos Matrix 01","3","(Not defined)","4");
Transfer_Rack("26","26",0,0,0,0,0,"","96 .5ml Matrix Tubes","Narrow","","","T2 Hotel 6Pos Matrix 01","","T2 Hotel 6Pos Matrix 01","4","(Not defined)","5");
Transfer_Rack("26","39",0,0,0,0,0,"","96 .5ml Matrix Tubes","Narrow","","","T2 Hotel 6Pos Matrix 01","","ms3","5","(Not defined)","1");
Transfer_Rack("39","41",0,0,0,0,0,"","96 .5ml Matrix Tubes","Narrow","","","ms3","","T2 Hotel 6Pos Matrix 03","1","(Not defined)","3");
Transfer_Rack("41","39",0,0,0,0,0,"","96 .5ml Matrix Tubes","Narrow","","","T2 Hotel 6Pos Matrix 03","","ms3","3","(Not defined)","1");
Transfer_Rack("39","31",0,0,0,0,0,"","96 .5ml Matrix Tubes","Narrow","","","ms3","","T2 Hotel 4Pos Matrix 01","1","(Not defined)","2");
Transfer_Rack("31","39",0,0,0,0,0,"","96 .5ml Matrix Tubes","Narrow","","","T2 Hotel 4Pos Matrix 01","","ms3","2","(Not defined)","1");
Transfer_Rack("39","26",0,0,0,0,0,"","96 .5ml Matrix Tubes","Narrow","","","ms3","","T2 Hotel 6Pos Matrix 01","1","(Not defined)","6");
Transfer_Rack("26","39",0,0,0,0,0,"","96 .5ml Matrix Tubes","Narrow","","","T2 Hotel 6Pos Matrix 01","","ms3","6","(Not defined)","1");
Transfer_Rack("39","36",0,0,0,0,0,"","96 .5ml Matrix Tubes","Narrow","","","ms3","","T2 Hotel 6Pos Matrix 02","1","(Not defined)","1");
GroupEnd();
Comment("Same gDNA Plate from earlier. Back to starting position.");
Group("Reset plate location");
Transfer_Rack("41","39",0,0,0,0,0,"","Greiner384","Narrow","","","T2 Hotel 6Pos Matrix 03","","ms3","6","(Not defined)","1");
Transfer_Rack("39","41",0,0,0,0,0,"","Greiner384","Narrow","","","ms3","","T2 Hotel 6Pos Matrix 03","1","(Not defined)","1");
GroupEnd();
EndLoop();
Comment("30 minute Timer to cool RoMA Motor");
StartTimer("1");
WaitTimer("1","900");
EndLoop();
EndScript(0);
