20180426_161928 Service
Import with ExportImport
EVOware ExportImport Tool
--{ RES }--
V;200
--{ CFG }--
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1,0;Wash Station Cleaner shallow
1,1;Wash Station Waste
1,2;Wash Station Cleaner deep
2,0;Trough 100ml;Liha1TE
2,3;Trough 100ml;Liha1Bleach
15,1;96 .5ml Matrix Tubes;NormDest
21,1;96 Eppendorf PCR;NormSource
21,2;GreinerUV;Labware1
32,0;Wash Station Cleaner shallow
32,1;Wash Station Waste
32,2;Wash Station Cleaner deep
33,0;Trough 100ml;Liha2TE
33,3;Trough 100ml;Liha2Bleach
1;System
7;ms3
4;Symbol954
20;T2 Ziath 2D
26;T2 Hotel 6Pos Matrix 01
31;T2 Hotel 4Pos Matrix 01
36;T2 Hotel 6Pos Matrix 02
41;T2 Hotel 6Pos Matrix 03
44;T2b Side Loading Hotel 4pos1
45;T2b Side Loading Hotel 4pos2
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--{ RPG }--
Variable(StressTest,"1",1,"Number of Loops for Stress testing",0,1.000000,50.000000,0,2,1,0);
UserPrompt("Place 96 eppendorf pcr plate on Hotel T2 Hotel 6Pos Matrix 03 Grid 41 site 1 ( Lowest slot)Place greiner uv plate on Hotel T2 Hotel 6Pos Matrix 02 Grid 36 site 1 ( Lowest slot)",0,-1);
BeginLoop("StressTest","StressTest");
BeginLoop("1","Inner Loops for timer");
Comment("extraction on Right Hotel, Site 1");
Group("extraction Eppendorf 96 PCR");
Transfer_Rack("41","21",0,0,0,0,0,"","96 Eppendorf PCR","Narrow","","","T2 Hotel 6Pos Matrix 03","","T2 MP 3Pos Flat with Shim 01","1","(Not defined)","2");
Transfer_Rack("21","44",0,0,0,0,0,"","96 Eppendorf PCR","Narrow","","","T2 MP 3Pos Flat with Shim 01","","T2b Side Loading Hotel 4pos1","2","(Not defined)","1");
Transfer_Rack("44","21",0,0,0,0,0,"","96 Eppendorf PCR","Narrow","","","T2b Side Loading Hotel 4pos1","","T2 MP 3Pos Flat with Shim 01","1","(Not defined)","2");
Transfer_Rack("21","44",0,0,0,0,0,"","96 Eppendorf PCR","Narrow","","","T2 MP 3Pos Flat with Shim 01","","T2b Side Loading Hotel 4pos1","2","(Not defined)","2");
Transfer_Rack("44","21",0,0,0,0,0,"","96 eppendorf pcr","Narrow","","","T2b Side Loading Hotel 4pos1","","T2 MP 3Pos Flat with Shim 01","2","(Not defined)","2");
Transfer_Rack("21","44",0,0,0,0,0,"","96 Eppendorf PCR","Narrow","","","T2 MP 3Pos Flat with Shim 01","","T2b Side Loading Hotel 4pos1","2","(Not defined)","3");
Transfer_Rack("44","21",0,0,0,0,0,"","96 eppendorf pcr","Narrow","","","T2b Side Loading Hotel 4pos1","","T2 MP 3Pos Flat with Shim 01","3","(Not defined)","2");
Transfer_Rack("21","44",0,0,0,0,0,"","96 Eppendorf PCR","Narrow","","","T2 MP 3Pos Flat with Shim 01","","T2b Side Loading Hotel 4pos1","2","(Not defined)","4");
Transfer_Rack("44","21",0,0,0,0,0,"","96 eppendorf pcr","Narrow","","","T2b Side Loading Hotel 4pos1","","T2 MP 3Pos Flat with Shim 01","4","(Not defined)","2");
Transfer_Rack("21","41",0,0,0,0,0,"","96 Eppendorf PCR","Narrow","","","T2 MP 3Pos Flat with Shim 01","","T2 Hotel 6Pos Matrix 03","2","(Not defined)","1");
Transfer_Rack("41","21",0,0,1,0,0,"","96 eppendorf pcr","Narrow","","","T2 Hotel 6Pos Matrix 03","","T2 MP 3Pos Flat with Shim 01","1","(Not defined)","2");
Transfer_Rack("21","41",0,0,1,0,0,"","96 Eppendorf PCR","Narrow","","","T2 MP 3Pos Flat with Shim 01","","T2 Hotel 6Pos Matrix 03","2","(Not defined)","2");
Transfer_Rack("41","21",0,0,1,0,0,"","96 eppendorf pcr","Narrow","","","T2 Hotel 6Pos Matrix 03","","T2 MP 3Pos Flat with Shim 01","2","(Not defined)","2");
Transfer_Rack("21","41",0,0,1,0,0,"","96 eppendorf pcr","Narrow","","","T2 MP 3Pos Flat with Shim 01","","T2 Hotel 6Pos Matrix 03","2","(Not defined)","3");
Transfer_Rack("41","21",0,0,1,0,0,"","Greiner96","Narrow","","","T2 Hotel 6Pos Matrix 03","","T2 MP 3Pos Flat with Shim 01","3","(Not defined)","2");
Transfer_Rack("21","41",0,0,1,0,0,"","96 Eppendorf PCR","Narrow","","","T2 MP 3Pos Flat with Shim 01","","T2 Hotel 6Pos Matrix 03","2","(Not defined)","4");
Transfer_Rack("41","41",0,0,0,0,0,"","96 Eppendorf PCR","Narrow","","","T2 Hotel 6Pos Matrix 03","","T2 Hotel 6Pos Matrix 03","4","(Not defined)","5");
Transfer_Rack("41","41",0,0,0,0,0,"","96 Eppendorf PCR","Narrow","","","T2 Hotel 6Pos Matrix 03","","T2 Hotel 6Pos Matrix 03","5","(Not defined)","6");
Transfer_Rack("41","41",0,0,0,0,0,"","96 eppendorf pcr","Narrow","","","T2 Hotel 6Pos Matrix 03","","T2 Hotel 6Pos Matrix 03","6","(Not defined)","1");
GroupEnd();
Comment("GreinerUV Plate on 2nd to the Right Hotel, Site 1");
Group("GreinerUV plate");
Transfer_Rack("36","21",0,0,0,0,0,"","GreinerUV","Narrow","","","T2 Hotel 6Pos Matrix 02","","T2 MP 3Pos Flat with Shim 01","1","(Not defined)","3");
Transfer_Rack("21","45",0,0,0,0,0,"","GreinerUV","Narrow","","","T2 MP 3Pos Flat with Shim 01","","T2b Side Loading Hotel 4pos2","3","(Not defined)","1");
Transfer_Rack("45","21",0,0,0,0,0,"","GreinerUV","Narrow","","","T2b Side Loading Hotel 4pos2","","T2 MP 3Pos Flat with Shim 01","1","(Not defined)","3");
Transfer_Rack("21","45",0,0,0,0,0,"","GreinerUV","Narrow","","","T2 MP 3Pos Flat with Shim 01","","T2b Side Loading Hotel 4pos2","3","(Not defined)","2");
Transfer_Rack("45","21",0,0,0,0,0,"","GreinerUV","Narrow","","","T2b Side Loading Hotel 4pos2","","T2 MP 3Pos Flat with Shim 01","2","(Not defined)","3");
Transfer_Rack("21","45",0,0,0,0,0,"","GreinerUV","Narrow","","","T2 MP 3Pos Flat with Shim 01","","T2b Side Loading Hotel 4pos2","3","(Not defined)","3");
Transfer_Rack("45","21",0,0,0,0,0,"","GreinerUV","Narrow","","","T2b Side Loading Hotel 4pos2","","T2 MP 3Pos Flat with Shim 01","3","(Not defined)","3");
Transfer_Rack("21","45",0,0,0,0,0,"","GreinerUV","Narrow","","","T2 MP 3Pos Flat with Shim 01","","T2b Side Loading Hotel 4pos2","3","(Not defined)","4");
Transfer_Rack("45","21",0,0,0,0,0,"","GreinerUV","Narrow","","","T2b Side Loading Hotel 4pos2","","T2 MP 3Pos Flat with Shim 01","4","(Not defined)","3");
Transfer_Rack("21","36",0,0,0,0,0,"","GreinerUV","Narrow","","","T2 MP 3Pos Flat with Shim 01","","T2 Hotel 6Pos Matrix 02","3","(Not defined)","1");
Transfer_Rack("36","21",0,0,0,0,0,"","GreinerUV","Narrow","","","T2 Hotel 6Pos Matrix 02","","T2 MP 3Pos Flat with Shim 01","1","(Not defined)","3");
Transfer_Rack("21","36",0,0,0,0,0,"","GreinerUV","Narrow","","","T2 MP 3Pos Flat with Shim 01","","T2 Hotel 6Pos Matrix 02","3","(Not defined)","2");
Transfer_Rack("36","21",0,0,0,0,0,"","GreinerUV","Narrow","","","T2 Hotel 6Pos Matrix 02","","T2 MP 3Pos Flat with Shim 01","2","(Not defined)","3");
Transfer_Rack("21","36",0,0,0,0,0,"","GreinerUV","Narrow","","","T2 MP 3Pos Flat with Shim 01","","T2 Hotel 6Pos Matrix 02","3","(Not defined)","3");
Transfer_Rack("36","21",0,0,0,0,0,"","GreinerUV","Narrow","","","T2 Hotel 6Pos Matrix 02","","T2 MP 3Pos Flat with Shim 01","3","(Not defined)","3");
Transfer_Rack("21","36",0,0,0,0,0,"","GreinerUV","Narrow","","","T2 MP 3Pos Flat with Shim 01","","T2 Hotel 6Pos Matrix 02","3","(Not defined)","4");
Transfer_Rack("36","36",0,0,0,0,0,"","GreinerUV","Narrow","","","T2 Hotel 6Pos Matrix 02","","T2 Hotel 6Pos Matrix 02","4","(Not defined)","5");
Transfer_Rack("36","36",0,0,0,0,0,"","GreinerUV","Narrow","","","T2 Hotel 6Pos Matrix 02","","T2 Hotel 6Pos Matrix 02","5","(Not defined)","6");
Transfer_Rack("36","31",0,0,0,0,0,"","GreinerUV","Narrow","","","T2 Hotel 6Pos Matrix 02","","T2 Hotel 4Pos Matrix 01","6","(Not defined)","1");
Transfer_Rack("31","21",0,0,0,0,0,"","GreinerUV","Narrow","","","T2 Hotel 4Pos Matrix 01","","T2 MP 3Pos Flat with Shim 01","1","(Not defined)","3");
Transfer_Rack("21","31",0,0,0,0,0,"","GreinerUV","Narrow","","","T2 MP 3Pos Flat with Shim 01","","T2 Hotel 4Pos Matrix 01","3","(Not defined)","2");
Transfer_Rack("31","21",0,0,0,0,0,"","GreinerUV","Narrow","","","T2 Hotel 4Pos Matrix 01","","T2 MP 3Pos Flat with Shim 01","2","(Not defined)","3");
Transfer_Rack("21","31",0,0,0,0,0,"","GreinerUV","Narrow","","","T2 MP 3Pos Flat with Shim 01","","T2 Hotel 4Pos Matrix 01","3","(Not defined)","3");
Transfer_Rack("31","21",0,0,0,0,0,"","GreinerUV","Narrow","","","T2 Hotel 4Pos Matrix 01","","T2 MP 3Pos Flat with Shim 01","3","(Not defined)","3");
Transfer_Rack("21","31",0,0,0,0,0,"","GreinerUV","Narrow","","","T2 MP 3Pos Flat with Shim 01","","T2 Hotel 4Pos Matrix 01","3","(Not defined)","4");
Transfer_Rack("31","36",0,0,0,0,0,"","GreinerUV","Narrow","","","T2 Hotel 4Pos Matrix 01","","T2 Hotel 6Pos Matrix 02","4","(Not defined)","1");
GroupEnd();
EndLoop();
Comment("30 minute Timer to cool RoMA Motor");
StartTimer("1");
WaitTimer("1","900");
EndLoop();
EndScript(0);
