20210924_103233 Admin
Import with ExportImport
EVOware ExportImport Tool
--{ RES }--
V;200
--{ CFG }--
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1,6;Washstation 2Grid DiTi Waste
4,1;DiTi 1000ul SBS LiHa;1000 Tips
10,1;96BeckmanDeepPlate;Cleanup2 Source
22,0;Balance Mettler SAG285;Labware1
1;System
44;1D Reader
11;T9 Hotel 3 - 1Pos
17;T9 Hotel 3 - 2Pos
23;T9 Hotel 3 - 3Pos
29;T9 Hotel 3 - 4Pos
35;T9 Hotel 6 - 1Pos
40;T9 Hotel 6 - 2Pos
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--{ RPG }--
Variable(fileName,"LC_CLN2_LibTrans_##MON##_1",1,"What name for output directory?",0,1.000000,10.000000,1,2,1,0);
PMP_FilterTest(255,0);
Subroutine("C:\ProgramData\Tecan\EVOware\database\Scripts\9_MT_SetScale.esc",0);
Subroutine("C:\ProgramData\Tecan\EVOware\database\Scripts\9_MT_CheckZero3x.esc",0);
Variable(t_vol_1,"25",0,"What name for output directory?",0,1.000000,10.000000,0,2,0,0);
Variable(t_vol_2,"32",0,"What name for output directory?",0,1.000000,10.000000,0,2,0,0);
Variable(t_vol_3,"38",0,"What name for output directory?",0,1.000000,10.000000,0,2,0,0);
Variable(t_vol_adjust,"0",0,"What name for output directory?",0,1.000000,10.000000,0,2,0,0);
BeginLoop("3","vols");
Variable(t_vol_base,"t_vol_~LOOP_vols~",0,"",0,1.000000,10.000000,0,2,0,0);
GetDITI2(255,"DiTi 1000ul SBS LiHa",0,0,0,70);
BeginLoop("3","reps");
IfThen("~LOOP_reps~",0,"1");
Variable(t_vol,"t_vol_base + t_vol_adjust",0,"",0,1.000000,10.000000,0,2,0,0);
Else();
Variable(t_vol,"t_vol_base",0,"",0,1.000000,10.000000,0,2,0,0);
EndIf();
Aspirate(3,"NIPS_Cleanup2_LibraryTransfer","t_vol","t_vol",0,0,0,0,0,0,0,0,0,0,10,1,1,"0C0806000000000000",0,0);
Group("Channel 1");
Dispense(1,"NIPS_Cleanup2_LibraryTransfer","t_vol",0,0,0,0,0,0,0,0,0,0,0,22,0,1,"01011",0,0);
Subroutine("C:\ProgramData\Tecan\EVOware\database\Scripts\9_MT_GetWeight_and_Tare.esc",0);
GroupEnd();
Group("Channel 2");
Dispense(2,"NIPS_Cleanup2_LibraryTransfer",0,"t_vol",0,0,0,0,0,0,0,0,0,0,22,0,1,"2C011000000",0,0);
Subroutine("C:\ProgramData\Tecan\EVOware\database\Scripts\9_MT_GetWeight_and_Tare.esc",0);
GroupEnd();
Aspirate(12,"NIPS_Cleanup2_LibraryTransfer",0,0,"t_vol","t_vol",0,0,0,0,0,0,0,0,10,1,1,"0C080H000000000000",0,0);
Group("Channel 3");
Dispense(4,"NIPS_Cleanup2_LibraryTransfer",0,0,"t_vol",0,0,0,0,0,0,0,0,0,22,0,1,"01011",0,0);
Subroutine("C:\ProgramData\Tecan\EVOware\database\Scripts\9_MT_GetWeight_and_Tare.esc",0);
GroupEnd();
Group("Channel 4");
Dispense(8,"NIPS_Cleanup2_LibraryTransfer",0,0,0,"t_vol",0,0,0,0,0,0,0,0,22,0,1,"01011",0,0);
Subroutine("C:\ProgramData\Tecan\EVOware\database\Scripts\9_MT_GetWeight_and_Tare.esc",0);
GroupEnd();
Aspirate(48,"NIPS_Cleanup2_LibraryTransfer",0,0,0,0,"t_vol","t_vol",0,0,0,0,0,0,10,1,1,"0C080000000000000",0,0);
Group("Channel 5");
Dispense(16,"NIPS_Cleanup2_LibraryTransfer",0,0,0,0,"t_vol",0,0,0,0,0,0,0,22,0,1,"01011",0,0);
Subroutine("C:\ProgramData\Tecan\EVOware\database\Scripts\9_MT_GetWeight_and_Tare.esc",0);
GroupEnd();
Group("Channel 6");
Dispense(32,"NIPS_Cleanup2_LibraryTransfer",0,0,0,0,0,"t_vol",0,0,0,0,0,0,22,0,1,"01011",0,0);
Subroutine("C:\ProgramData\Tecan\EVOware\database\Scripts\9_MT_GetWeight_and_Tare.esc",0);
GroupEnd();
Aspirate(192,"NIPS_Cleanup2_LibraryTransfer",0,0,0,0,0,0,"t_vol","t_vol",0,0,0,0,10,1,1,"0C0800300000000000",0,0);
Group("Channel 7");
Dispense(64,"NIPS_Cleanup2_LibraryTransfer",0,0,0,0,0,0,"t_vol",0,0,0,0,0,22,0,1,"01011",0,0);
Subroutine("C:\ProgramData\Tecan\EVOware\database\Scripts\9_MT_GetWeight_and_Tare.esc",0);
GroupEnd();
Group("Channel 8");
Dispense(128,"NIPS_Cleanup2_LibraryTransfer",0,0,0,0,0,0,0,"t_vol",0,0,0,0,22,0,1,"01011",0,0);
Subroutine("C:\ProgramData\Tecan\EVOware\database\Scripts\9_MT_GetWeight_and_Tare.esc",0);
GroupEnd();
EndLoop();
DropDITI(255,1,6,10,70,0);
EndLoop();
