20190930_151432 Admin
Administrator
--{ RES }--
V;200
--{ CFG }--
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5,0;Tube 13*75mm 16 Pos;Labware6
6,0;Tube 13*75mm 16 Pos;Labware5
13,6;Washstation 2Grid DiTi Waste
26,0;DiTi 1000ul SBS LiHa;Labware15
26,1;Eppendorf 96 Well Microplate;Labware10
26,2;96 Well DeepWell;Labware12
40,1;Eppendorf 96 Well Microplate;Labware9
40,2;96 Well DeepWell;Labware13
1;System
48;Hotel 4Pos DeepWell
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--{ RPG }--
PMP_FilterTest(255,0);
BeginLoop("2","Get Tips");
GetDITI2(255,"DiTi 1000ul SBS LiHa",0,0,0,70);
BeginLoop("2","Aspirate for checker");
Aspirate(255,">> Water free dispense <<	14","750","750","750","750","750","750","750","750",0,0,0,0,26,2,1,"0C08¯1000000000000",1,"Get Tips",3,1,0);
BeginLoop("3","Dispense half");
Dispense(85,"Water free dispense","250",0,"250",0,"250",0,"250",0,0,0,0,0,26,1,1,"0C08…0000000000000",3,"Dispense half",0,2,"Aspirate for checker",0,6,"Get Tips",1,1,0);
Dispense(170,"Water free dispense",0,"250",0,"250",0,"250",0,"250",0,0,0,0,26,1,1,"0C080„200000000000",3,"Dispense half",0,2,"Aspirate for checker",0,6,"Get Tips",1,-1,0);
EndLoop();
EndLoop();
DropDITI(255,13,6,10,70,0);
EndLoop();
