20180424_112730 Admin
Administrator
--{ RES }--
V;200
--{ CFG }--
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24,6;Washstation 2Grid DiTi Waste
26,0;DiTi 50ul Filter LiHa;p501
26,1;HL Nunc 278752;Fluoroscein
26,2;HL Greiner 784201;Quant Plate
33,0;DiTi 50ul Filter LiHa;p502
40,0;DiTi 50ul Filter LiHa;p503
1;System
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--{ RPG }--
Variable(v,"3",0,"",0,1.000000,10.000000,0,2,0,0);
BeginLoop("12","Transfer");
Set_DITI_Counter2("DiTi 50ul Filter LiHa","26","1","1",0);
GetDITI2(255,"DiTi 50ul Filter LiHa",1,0,0,70);
Aspirate(255,"HL Calibration","v","v","v","v","v","v","v","v",0,0,0,0,26,1,1,"0C08¯1000000000000",0,0);
Dispense(255,"HL Calibration","v","v","v","v","v","v","v","v",0,0,0,0,26,2,2,"1810…Z10000000000000000000000000000000000000000000000000000",1,"Transfer",0,2,0);
DropDITI(255,24,6,10,70,0);
GetDITI2(255,"DiTi 50ul Filter LiHa",1,0,0,70);
Aspirate(255,"HL Calibration","v","v","v","v","v","v","v","v",0,0,0,0,26,1,1,"0C08¯1000000000000",0,0);
Dispense(255,"HL Calibration","v","v","v","v","v","v","v","v",0,0,0,0,26,2,2,"181000„Z500000000000000000000000000000000000000000000000000",1,"Transfer",0,2,0);
DropDITI(255,24,6,10,70,0);
GetDITI2(255,"DiTi 50ul Filter LiHa",1,0,0,70);
Aspirate(255,"HL Calibration","v","v","v","v","v","v","v","v",0,0,0,0,26,1,1,"0C08¯1000000000000",0,0);
Dispense(255,"HL Calibration","v","v","v","v","v","v","v","v",0,0,0,0,26,2,2,"1810Z…20000000000000000000000000000000000000000000000000000",1,"Transfer",0,2,0);
DropDITI(255,24,6,10,70,0);
Variable(v,"v + 1",0,"",0,1.000000,10.000000,0,2,0,0);
EndLoop();
