20200226_135158 Admin
Administrator
--{ RES }--
V;200
--{ CFG }--
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13,6;Washstation 2Grid DiTi Waste
26,0;DiTi 50ul Filter LiHa;p50
26,1;JS sDTS Reagent Rack;reagent
33,0;DiTi 200ul Filter LiHa;p200
33,1;JS sDTS Assay Plate;assay
40,0;DiTi 1000ul Filter LiHa;p1000
1;System
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--{ RPG }--
Set_DITI_Counter2("DiTi 50ul Filter LiHa","26","1","1",0);
Set_DITI_Counter2("DiTi 200ul Filter LiHa","33","1","1",0);
Set_DITI_Counter2("DiTi 1000ul Filter LiHa","40","1","1",0);
Group("Asp 15 and 16");
GetDITI2(255,"DiTi 50ul Filter LiHa",0,0,0,70);
Aspirate(1,"JS_SDTS_SE","10",0,0,0,0,0,0,0,0,0,0,0,26,1,1,"06041000",0,0);
Aspirate(2,"JS_SDTS_SE",0,"10",0,0,0,0,0,0,0,0,0,0,26,1,1,"06041000",0,0);
Aspirate(4,"JS_SDTS_SE",0,0,"10",0,0,0,0,0,0,0,0,0,26,1,1,"06041000",0,0);
Aspirate(8,"JS_SDTS_SE",0,0,0,"10",0,0,0,0,0,0,0,0,26,1,1,"06041000",0,0);
Aspirate(16,"JS_SDTS_SE",0,0,0,0,"10",0,0,0,0,0,0,0,26,1,1,"06041000",0,0);
Aspirate(32,"JS_SDTS_SE",0,0,0,0,0,"10",0,0,0,0,0,0,26,1,1,"06041000",0,0);
Aspirate(64,"JS_SDTS_SE",0,0,0,0,0,0,"10",0,0,0,0,0,26,1,1,"06041000",0,0);
Aspirate(128,"JS_SDTS_SE",0,0,0,0,0,0,0,"10",0,0,0,0,26,1,1,"06041000",0,0);
GroupEnd();
Group("Disp 15 and 16");
Dispense(255,"JS_SDTS_SE","10","10","10","10","10","10","10","10",0,0,0,0,33,1,1,"0C0800000000¯10000",0,0);
Mix(255,"JS_SDTS_15","40","40","40","40","40","40","40","40",0,0,0,0,33,1,1,"0C0800000000¯10000",10,0,0);
DropDITI(255,13,6,10,70,0);
GroupEnd();
Group("Asp 17 and 18");
GetDITI2(255,"DiTi 50ul Filter LiHa",0,0,0,70);
Aspirate(1,"JS_SDTS_SE","10",0,0,0,0,0,0,0,0,0,0,0,26,1,1,"06041000",0,0);
Aspirate(2,"JS_SDTS_SE",0,"10",0,0,0,0,0,0,0,0,0,0,26,1,1,"06041000",0,0);
Aspirate(4,"JS_SDTS_SE",0,0,"10",0,0,0,0,0,0,0,0,0,26,1,1,"06041000",0,0);
Aspirate(8,"JS_SDTS_SE",0,0,0,"10",0,0,0,0,0,0,0,0,26,1,1,"06041000",0,0);
Aspirate(16,"JS_SDTS_SE",0,0,0,0,"10",0,0,0,0,0,0,0,26,1,1,"06041000",0,0);
Aspirate(32,"JS_SDTS_SE",0,0,0,0,0,"10",0,0,0,0,0,0,26,1,1,"06041000",0,0);
Aspirate(64,"JS_SDTS_SE",0,0,0,0,0,0,"10",0,0,0,0,0,26,1,1,"06041000",0,0);
Aspirate(128,"JS_SDTS_SE",0,0,0,0,0,0,0,"10",0,0,0,0,26,1,1,"06041000",0,0);
GroupEnd();
Group("Disp 17 and 18");
Dispense(255,"JS_SDTS_SE","10","10","10","10","10","10","10","10",0,0,0,0,33,1,1,"0C08000000000®3000",0,0);
Mix(255,"JS_SDTS_17","40","40","40","40","40","40","40","40",0,0,0,0,33,1,1,"0C08000000000®3000",10,0,0);
DropDITI(255,13,6,10,70,0);
GroupEnd();
Group("Asp 19 and 20");
GetDITI2(255,"DiTi 50ul Filter LiHa",0,0,0,70);
Aspirate(1,"JS_SDTS_SE","10",0,0,0,0,0,0,0,0,0,0,0,26,1,1,"06041000",0,0);
Aspirate(2,"JS_SDTS_SE",0,"10",0,0,0,0,0,0,0,0,0,0,26,1,1,"06041000",0,0);
Aspirate(4,"JS_SDTS_SE",0,0,"10",0,0,0,0,0,0,0,0,0,26,1,1,"06041000",0,0);
Aspirate(8,"JS_SDTS_SE",0,0,0,"10",0,0,0,0,0,0,0,0,26,1,1,"06041000",0,0);
Aspirate(16,"JS_SDTS_SE",0,0,0,0,"10",0,0,0,0,0,0,0,26,1,1,"06041000",0,0);
Aspirate(32,"JS_SDTS_SE",0,0,0,0,0,"10",0,0,0,0,0,0,26,1,1,"06041000",0,0);
Aspirate(64,"JS_SDTS_SE",0,0,0,0,0,0,"10",0,0,0,0,0,26,1,1,"06041000",0,0);
Aspirate(128,"JS_SDTS_SE",0,0,0,0,0,0,0,"10",0,0,0,0,26,1,1,"06041000",0,0);
GroupEnd();
Group("Disp 19 and 20");
Dispense(255,"JS_SDTS_SE","10","10","10","10","10","10","10","10",0,0,0,0,33,1,1,"0C080000000000¬700",0,0);
Mix(255,"JS_SDTS_19","40","40","40","40","40","40","40","40",0,0,0,0,33,1,1,"0C080000000000¬700",10,0,0);
DropDITI(255,13,6,10,70,0);
GroupEnd();
Group("Asp 21 and 22");
GetDITI2(255,"DiTi 50ul Filter LiHa",0,0,0,70);
Aspirate(1,"JS_SDTS_SE","10",0,0,0,0,0,0,0,0,0,0,0,26,1,1,"06041000",0,0);
Aspirate(2,"JS_SDTS_SE",0,"10",0,0,0,0,0,0,0,0,0,0,26,1,1,"06041000",0,0);
Aspirate(4,"JS_SDTS_SE",0,0,"10",0,0,0,0,0,0,0,0,0,26,1,1,"06041000",0,0);
Aspirate(8,"JS_SDTS_SE",0,0,0,"10",0,0,0,0,0,0,0,0,26,1,1,"06041000",0,0);
Aspirate(16,"JS_SDTS_SE",0,0,0,0,"10",0,0,0,0,0,0,0,26,1,1,"06041000",0,0);
Aspirate(32,"JS_SDTS_SE",0,0,0,0,0,"10",0,0,0,0,0,0,26,1,1,"06041000",0,0);
Aspirate(64,"JS_SDTS_SE",0,0,0,0,0,0,"10",0,0,0,0,0,26,1,1,"06041000",0,0);
Aspirate(128,"JS_SDTS_SE",0,0,0,0,0,0,0,"10",0,0,0,0,26,1,1,"06041000",0,0);
GroupEnd();
Group("Disp 21 and 22");
Dispense(255,"JS_SDTS_SE","10","10","10","10","10","10","10","10",0,0,0,0,33,1,1,"0C0800000000000¨?0",0,0);
Mix(255,"JS_SDTS_20","40","40","40","40","40","40","40","40",0,0,0,0,33,1,1,"0C0800000000000¨?0",10,0,0);
DropDITI(255,13,6,10,70,0);
GroupEnd();
Group("Asp 23 and 24");
GetDITI2(255,"DiTi 50ul Filter LiHa",0,0,0,70);
Aspirate(1,"JS_SDTS_SE","10",0,0,0,0,0,0,0,0,0,0,0,26,1,1,"06041000",0,0);
Aspirate(2,"JS_SDTS_SE",0,"10",0,0,0,0,0,0,0,0,0,0,26,1,1,"06041000",0,0);
Aspirate(4,"JS_SDTS_SE",0,0,"10",0,0,0,0,0,0,0,0,0,26,1,1,"06041000",0,0);
Aspirate(8,"JS_SDTS_SE",0,0,0,"10",0,0,0,0,0,0,0,0,26,1,1,"06041000",0,0);
Aspirate(16,"JS_SDTS_SE",0,0,0,0,"10",0,0,0,0,0,0,0,26,1,1,"06041000",0,0);
Aspirate(32,"JS_SDTS_SE",0,0,0,0,0,"10",0,0,0,0,0,0,26,1,1,"06041000",0,0);
Aspirate(64,"JS_SDTS_SE",0,0,0,0,0,0,"10",0,0,0,0,0,26,1,1,"06041000",0,0);
Aspirate(128,"JS_SDTS_SE",0,0,0,0,0,0,0,"10",0,0,0,0,26,1,1,"06041000",0,0);
GroupEnd();
Group("Disp 23 and 24");
Dispense(255,"JS_SDTS_SE","10","10","10","10","10","10","10","10",0,0,0,0,33,1,1,"0C08000000000000 O",0,0);
Mix(255,"JS_SDTS_23","40","40","40","40","40","40","40","40",0,0,0,0,33,1,1,"0C08000000000000 O",10,0,0);
DropDITI(255,13,6,10,70,0);
GroupEnd();
