20200226_134653 Admin
Administrator
--{ RES }--
V;200
--{ CFG }--
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13,6;Washstation 2Grid DiTi Waste
26,0;DiTi 50ul Filter LiHa;p50
26,1;JS sDTS Reagent Rack;reagent
33,0;DiTi 200ul Filter LiHa;p200
33,1;JS sDTS Assay Plate;assay
40,0;DiTi 1000ul Filter LiHa;p1000
1;System
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--{ RPG }--
Set_DITI_Counter2("DiTi 50ul Filter LiHa","26","1","1",0);
Set_DITI_Counter2("DiTi 200ul Filter LiHa","33","1","1",0);
Set_DITI_Counter2("DiTi 1000ul Filter LiHa","40","1","1",0);
Group("Asp 1 and 2");
GetDITI2(255,"DiTi 50ul Filter LiHa",0,0,0,70);
Aspirate(1,"JS_SDTS_MIX_TEST","10",0,0,0,0,0,0,0,0,0,0,0,26,1,1,"06041000",0,0);
Aspirate(2,"JS_SDTS_MIX_TEST",0,"10",0,0,0,0,0,0,0,0,0,0,26,1,1,"06041000",0,0);
Aspirate(4,"JS_SDTS_MIX_TEST",0,0,"10",0,0,0,0,0,0,0,0,0,26,1,1,"06041000",0,0);
Aspirate(8,"JS_SDTS_MIX_TEST",0,0,0,"10",0,0,0,0,0,0,0,0,26,1,1,"06041000",0,0);
Aspirate(16,"JS_SDTS_MIX_TEST",0,0,0,0,"10",0,0,0,0,0,0,0,26,1,1,"06041000",0,0);
Aspirate(32,"JS_SDTS_MIX_TEST",0,0,0,0,0,"10",0,0,0,0,0,0,26,1,1,"06041000",0,0);
Aspirate(64,"JS_SDTS_MIX_TEST",0,0,0,0,0,0,"10",0,0,0,0,0,26,1,1,"06041000",0,0);
Aspirate(128,"JS_SDTS_MIX_TEST",0,0,0,0,0,0,0,"10",0,0,0,0,26,1,1,"06041000",0,0);
GroupEnd();
Dispense(255,"JS_SDTS_MIX_TEST","10","10","10","10","10","10","10","10",0,0,0,0,33,1,1,"0C08¯1000000000000",0,0);
BeginLoop("10","Mix 1");
Aspirate(15,"JS_SDTS_1","40","40","40","40",0,0,0,0,0,0,0,0,33,1,1,"0C08?0000000000000",0,0);
Dispense(15,"JS_SDTS_1","40","40","40","40",0,0,0,0,0,0,0,0,33,1,1,"0C08?0000000000000",0,0);
EndLoop();
BeginLoop("10","Mix 2");
Aspirate(240,"JS_SDTS_2",0,0,0,0,"40","40","40","40",0,0,0,0,33,1,1,"0C08 1000000000000",0,0);
Dispense(240,"JS_SDTS_2",0,0,0,0,"40","40","40","40",0,0,0,0,33,1,1,"0C08 1000000000000",0,0);
EndLoop();
DropDITI(255,13,6,10,70,0);
Group("Asp 3 and 4");
GetDITI2(255,"DiTi 50ul Filter LiHa",0,0,0,70);
Aspirate(1,"JS_SDTS_MIX_TEST","10",0,0,0,0,0,0,0,0,0,0,0,26,1,1,"06041000",0,0);
Aspirate(2,"JS_SDTS_MIX_TEST",0,"10",0,0,0,0,0,0,0,0,0,0,26,1,1,"06041000",0,0);
Aspirate(4,"JS_SDTS_MIX_TEST",0,0,"10",0,0,0,0,0,0,0,0,0,26,1,1,"06041000",0,0);
Aspirate(8,"JS_SDTS_MIX_TEST",0,0,0,"10",0,0,0,0,0,0,0,0,26,1,1,"06041000",0,0);
Aspirate(16,"JS_SDTS_MIX_TEST",0,0,0,0,"10",0,0,0,0,0,0,0,26,1,1,"06041000",0,0);
Aspirate(32,"JS_SDTS_MIX_TEST",0,0,0,0,0,"10",0,0,0,0,0,0,26,1,1,"06041000",0,0);
Aspirate(64,"JS_SDTS_MIX_TEST",0,0,0,0,0,0,"10",0,0,0,0,0,26,1,1,"06041000",0,0);
Aspirate(128,"JS_SDTS_MIX_TEST",0,0,0,0,0,0,0,"10",0,0,0,0,26,1,1,"06041000",0,0);
GroupEnd();
Group("Disp 3 and 4");
Dispense(255,"JS_SDTS_MIX_TEST","10","10","10","10","10","10","10","10",0,0,0,0,33,1,1,"0C080®300000000000",0,0);
BeginLoop("10","Mix 3");
Aspirate(15,"JS_SDTS_3","40","40","40","40",0,0,0,0,0,0,0,0,33,1,1,"0C080N000000000000",0,0);
Dispense(15,"JS_SDTS_3","40","40","40","40",0,0,0,0,0,0,0,0,33,1,1,"0C080N000000000000",0,0);
EndLoop();
BeginLoop("10","Mix 4");
Aspirate(240,"JS_SDTS_4",0,0,0,0,"40","40","40","40",0,0,0,0,33,1,1,"0C080300000000000",0,0);
Dispense(240,"JS_SDTS_4",0,0,0,0,"40","40","40","40",0,0,0,0,33,1,1,"0C080300000000000",0,0);
EndLoop();
DropDITI(255,13,6,10,70,0);
GroupEnd();
Group("Asp 5 and 6");
GetDITI2(255,"DiTi 50ul Filter LiHa",0,0,0,70);
Aspirate(1,"JS_SDTS_MIX_TEST","10",0,0,0,0,0,0,0,0,0,0,0,26,1,1,"06041000",0,0);
Aspirate(2,"JS_SDTS_MIX_TEST",0,"10",0,0,0,0,0,0,0,0,0,0,26,1,1,"06041000",0,0);
Aspirate(4,"JS_SDTS_MIX_TEST",0,0,"10",0,0,0,0,0,0,0,0,0,26,1,1,"06041000",0,0);
Aspirate(8,"JS_SDTS_MIX_TEST",0,0,0,"10",0,0,0,0,0,0,0,0,26,1,1,"06041000",0,0);
Aspirate(16,"JS_SDTS_MIX_TEST",0,0,0,0,"10",0,0,0,0,0,0,0,26,1,1,"06041000",0,0);
Aspirate(32,"JS_SDTS_MIX_TEST",0,0,0,0,0,"10",0,0,0,0,0,0,26,1,1,"06041000",0,0);
Aspirate(64,"JS_SDTS_MIX_TEST",0,0,0,0,0,0,"10",0,0,0,0,0,26,1,1,"06041000",0,0);
Aspirate(128,"JS_SDTS_MIX_TEST",0,0,0,0,0,0,0,"10",0,0,0,0,26,1,1,"06041000",0,0);
GroupEnd();
Group("Disp 5 and 6");
Dispense(255,"JS_SDTS_MIX_TEST","10","10","10","10","10","10","10","10",0,0,0,0,33,1,1,"0C0800¬70000000000",0,0);
BeginLoop("3","Mix 5");
Aspirate(15,"JS_SDTS_5","40","40","40","40",0,0,0,0,0,0,0,0,33,1,1,"0C0800l00000000000",0,0);
Dispense(15,"JS_SDTS_5","40","40","40","40",0,0,0,0,0,0,0,0,33,1,1,"0C0800l00000000000",0,0);
EndLoop();
BeginLoop("3","Mix 6");
Aspirate(240,"JS_SDTS_5",0,0,0,0,"40","40","40","40",0,0,0,0,33,1,1,"0C0800p70000000000",0,0);
Dispense(240,"JS_SDTS_5",0,0,0,0,"40","40","40","40",0,0,0,0,33,1,1,"0C0800p70000000000",0,0);
EndLoop();
DropDITI(255,13,6,10,70,0);
GroupEnd();
Group("Asp 7 and 8");
GetDITI2(255,"DiTi 50ul Filter LiHa",0,0,0,70);
Aspirate(1,"JS_SDTS_MIX_TEST","10",0,0,0,0,0,0,0,0,0,0,0,26,1,1,"06041000",0,0);
Aspirate(2,"JS_SDTS_MIX_TEST",0,"10",0,0,0,0,0,0,0,0,0,0,26,1,1,"06041000",0,0);
Aspirate(4,"JS_SDTS_MIX_TEST",0,0,"10",0,0,0,0,0,0,0,0,0,26,1,1,"06041000",0,0);
Aspirate(8,"JS_SDTS_MIX_TEST",0,0,0,"10",0,0,0,0,0,0,0,0,26,1,1,"06041000",0,0);
Aspirate(16,"JS_SDTS_MIX_TEST",0,0,0,0,"10",0,0,0,0,0,0,0,26,1,1,"06041000",0,0);
Aspirate(32,"JS_SDTS_MIX_TEST",0,0,0,0,0,"10",0,0,0,0,0,0,26,1,1,"06041000",0,0);
Aspirate(64,"JS_SDTS_MIX_TEST",0,0,0,0,0,0,"10",0,0,0,0,0,26,1,1,"06041000",0,0);
Aspirate(128,"JS_SDTS_MIX_TEST",0,0,0,0,0,0,0,"10",0,0,0,0,26,1,1,"06041000",0,0);
GroupEnd();
Group("Disp 7 and 8");
Dispense(255,"JS_SDTS_MIX_TEST","10","10","10","10","10","10","10","10",0,0,0,0,33,1,1,"0C08000¨?000000000",0,0);
BeginLoop("10","Mix 7");
Aspirate(15,"JS_SDTS_7","40","40","40","40",0,0,0,0,0,0,0,0,33,1,1,"0C08000¨0000000000",0,0);
Dispense(15,"JS_SDTS_7","40","40","40","40",0,0,0,0,0,0,0,0,33,1,1,"0C08000¨0000000000",0,0);
EndLoop();
BeginLoop("10","Mix 8");
Aspirate(240,"JS_SDTS_8",0,0,0,0,"40","40","40","40",0,0,0,0,33,1,1,"0C080000?000000000",0,0);
Dispense(240,"JS_SDTS_8",0,0,0,0,"40","40","40","40",0,0,0,0,33,1,1,"0C080000?000000000",0,0);
EndLoop();
DropDITI(255,13,6,10,70,0);
GroupEnd();
Group("Asp 9 and 10");
GetDITI2(255,"DiTi 50ul Filter LiHa",0,0,0,70);
Aspirate(1,"JS_SDTS_MIX_TEST","10",0,0,0,0,0,0,0,0,0,0,0,26,1,1,"06041000",0,0);
Aspirate(2,"JS_SDTS_MIX_TEST",0,"10",0,0,0,0,0,0,0,0,0,0,26,1,1,"06041000",0,0);
Aspirate(4,"JS_SDTS_MIX_TEST",0,0,"10",0,0,0,0,0,0,0,0,0,26,1,1,"06041000",0,0);
Aspirate(8,"JS_SDTS_MIX_TEST",0,0,0,"10",0,0,0,0,0,0,0,0,26,1,1,"06041000",0,0);
Aspirate(16,"JS_SDTS_MIX_TEST",0,0,0,0,"10",0,0,0,0,0,0,0,26,1,1,"06041000",0,0);
Aspirate(32,"JS_SDTS_MIX_TEST",0,0,0,0,0,"10",0,0,0,0,0,0,26,1,1,"06041000",0,0);
Aspirate(64,"JS_SDTS_MIX_TEST",0,0,0,0,0,0,"10",0,0,0,0,0,26,1,1,"06041000",0,0);
Aspirate(128,"JS_SDTS_MIX_TEST",0,0,0,0,0,0,0,"10",0,0,0,0,26,1,1,"06041000",0,0);
GroupEnd();
Group("Disp 9 and 10");
Dispense(255,"JS_SDTS_MIX_TEST","10","10","10","10","10","10","10","10",0,0,0,0,33,1,1,"0C080000 O00000000",0,0);
BeginLoop("10","Mix 9");
Aspirate(15,"JS_SDTS_9","40","40","40","40",0,0,0,0,0,0,0,0,33,1,1,"0C080000 100000000",0,0);
Dispense(15,"JS_SDTS_9","40","40","40","40",0,0,0,0,0,0,0,0,33,1,1,"0C080000 100000000",0,0);
EndLoop();
BeginLoop("10","Mix 10");
Aspirate(240,"JS_SDTS_10",0,0,0,0,"40","40","40","40",0,0,0,0,33,1,1,"0C0800000N00000000",0,0);
Dispense(240,"JS_SDTS_10",0,0,0,0,"40","40","40","40",0,0,0,0,33,1,1,"0C0800000N00000000",0,0);
EndLoop();
DropDITI(255,13,6,10,70,0);
GroupEnd();
Group("Asp 11 and 12");
GetDITI2(255,"DiTi 50ul Filter LiHa",0,0,0,70);
Aspirate(1,"JS_SDTS_MIX_TEST","10",0,0,0,0,0,0,0,0,0,0,0,26,1,1,"06041000",0,0);
Aspirate(2,"JS_SDTS_MIX_TEST",0,"10",0,0,0,0,0,0,0,0,0,0,26,1,1,"06041000",0,0);
Aspirate(4,"JS_SDTS_MIX_TEST",0,0,"10",0,0,0,0,0,0,0,0,0,26,1,1,"06041000",0,0);
Aspirate(8,"JS_SDTS_MIX_TEST",0,0,0,"10",0,0,0,0,0,0,0,0,26,1,1,"06041000",0,0);
Aspirate(16,"JS_SDTS_MIX_TEST",0,0,0,0,"10",0,0,0,0,0,0,0,26,1,1,"06041000",0,0);
Aspirate(32,"JS_SDTS_MIX_TEST",0,0,0,0,0,"10",0,0,0,0,0,0,26,1,1,"06041000",0,0);
Aspirate(64,"JS_SDTS_MIX_TEST",0,0,0,0,0,0,"10",0,0,0,0,0,26,1,1,"06041000",0,0);
Aspirate(128,"JS_SDTS_MIX_TEST",0,0,0,0,0,0,0,"10",0,0,0,0,26,1,1,"06041000",0,0);
GroupEnd();
Group("Disp 11 and 12");
Dispense(255,"JS_SDTS_MIX_TEST","10","10","10","10","10","10","10","10",0,0,0,0,33,1,1,"0C0800000o0000000",0,0);
BeginLoop("10","Mix 11");
Aspirate(15,"JS_SDTS_11","40","40","40","40",0,0,0,0,0,0,0,0,33,1,1,"0C080000030000000",0,0);
Dispense(15,"JS_SDTS_11","40","40","40","40",0,0,0,0,0,0,0,0,33,1,1,"0C080000030000000",0,0);
EndLoop();
BeginLoop("10","Mix 12");
Aspirate(240,"JS_SDTS_12",0,0,0,0,"40","40","40","40",0,0,0,0,33,1,1,"0C08000000l0000000",0,0);
Dispense(240,"JS_SDTS_12",0,0,0,0,"40","40","40","40",0,0,0,0,33,1,1,"0C08000000l0000000",0,0);
EndLoop();
DropDITI(255,13,6,10,70,0);
GroupEnd();
Group("Asp 13 and 14");
GetDITI2(255,"DiTi 50ul Filter LiHa",0,0,0,70);
Aspirate(1,"JS_SDTS_MIX_TEST","10",0,0,0,0,0,0,0,0,0,0,0,26,1,1,"06041000",0,0);
Aspirate(2,"JS_SDTS_MIX_TEST",0,"10",0,0,0,0,0,0,0,0,0,0,26,1,1,"06041000",0,0);
Aspirate(4,"JS_SDTS_MIX_TEST",0,0,"10",0,0,0,0,0,0,0,0,0,26,1,1,"06041000",0,0);
Aspirate(8,"JS_SDTS_MIX_TEST",0,0,0,"10",0,0,0,0,0,0,0,0,26,1,1,"06041000",0,0);
Aspirate(16,"JS_SDTS_MIX_TEST",0,0,0,0,"10",0,0,0,0,0,0,0,26,1,1,"06041000",0,0);
Aspirate(32,"JS_SDTS_MIX_TEST",0,0,0,0,0,"10",0,0,0,0,0,0,26,1,1,"06041000",0,0);
Aspirate(64,"JS_SDTS_MIX_TEST",0,0,0,0,0,0,"10",0,0,0,0,0,26,1,1,"06041000",0,0);
Aspirate(128,"JS_SDTS_MIX_TEST",0,0,0,0,0,0,0,"10",0,0,0,0,26,1,1,"06041000",0,0);
GroupEnd();
Group("Disp 13 and 14");
Dispense(255,"JS_SDTS_MIX_TEST","10","10","10","10","10","10","10","10",0,0,0,0,33,1,1,"0C08000000p¯000000",0,0);
BeginLoop("10","Mix 13");
Aspirate(15,"JS_SDTS_13","40","40","40","40",0,0,0,0,0,0,0,0,33,1,1,"0C08000000p7000000",0,0);
Dispense(15,"JS_SDTS_13","40","40","40","40",0,0,0,0,0,0,0,0,33,1,1,"0C08000000p7000000",0,0);
EndLoop();
BeginLoop("10","Mix 14");
Aspirate(240,"JS_SDTS_14",0,0,0,0,"40","40","40","40",0,0,0,0,33,1,1,"0C080000000¨000000",0,0);
Dispense(240,"JS_SDTS_14",0,0,0,0,"40","40","40","40",0,0,0,0,33,1,1,"0C080000000¨000000",0,0);
EndLoop();
DropDITI(255,13,6,10,70,0);
GroupEnd();
Group("Asp 15 and 16");
GetDITI2(255,"DiTi 50ul Filter LiHa",0,0,0,70);
Aspirate(1,"JS_SDTS_MIX_TEST","10",0,0,0,0,0,0,0,0,0,0,0,26,1,1,"06041000",0,0);
Aspirate(2,"JS_SDTS_MIX_TEST",0,"10",0,0,0,0,0,0,0,0,0,0,26,1,1,"06041000",0,0);
Aspirate(4,"JS_SDTS_MIX_TEST",0,0,"10",0,0,0,0,0,0,0,0,0,26,1,1,"06041000",0,0);
Aspirate(8,"JS_SDTS_MIX_TEST",0,0,0,"10",0,0,0,0,0,0,0,0,26,1,1,"06041000",0,0);
Aspirate(16,"JS_SDTS_MIX_TEST",0,0,0,0,"10",0,0,0,0,0,0,0,26,1,1,"06041000",0,0);
Aspirate(32,"JS_SDTS_MIX_TEST",0,0,0,0,0,"10",0,0,0,0,0,0,26,1,1,"06041000",0,0);
Aspirate(64,"JS_SDTS_MIX_TEST",0,0,0,0,0,0,"10",0,0,0,0,0,26,1,1,"06041000",0,0);
Aspirate(128,"JS_SDTS_MIX_TEST",0,0,0,0,0,0,0,"10",0,0,0,0,26,1,1,"06041000",0,0);
GroupEnd();
Group("Disp 15 and 16");
Dispense(255,"JS_SDTS_MIX_TEST","10","10","10","10","10","10","10","10",0,0,0,0,33,1,1,"0C0800000000¯10000",0,0);
BeginLoop("10","Mix 15");
Aspirate(15,"JS_SDTS_15","40","40","40","40",0,0,0,0,0,0,0,0,33,1,1,"0C0800000000?00000",0,0);
Dispense(15,"JS_SDTS_15","40","40","40","40",0,0,0,0,0,0,0,0,33,1,1,"0C0800000000?00000",0,0);
EndLoop();
BeginLoop("10","Mix 16");
Aspirate(240,"JS_SDTS_16",0,0,0,0,"40","40","40","40",0,0,0,0,33,1,1,"0C0800000000 10000",0,0);
Dispense(240,"JS_SDTS_16",0,0,0,0,"40","40","40","40",0,0,0,0,33,1,1,"0C0800000000 10000",0,0);
EndLoop();
DropDITI(255,13,6,10,70,0);
GroupEnd();
Group("Asp 17 and 18");
GetDITI2(255,"DiTi 50ul Filter LiHa",0,0,0,70);
Aspirate(1,"JS_SDTS_MIX_TEST","10",0,0,0,0,0,0,0,0,0,0,0,26,1,1,"06041000",0,0);
Aspirate(2,"JS_SDTS_MIX_TEST",0,"10",0,0,0,0,0,0,0,0,0,0,26,1,1,"06041000",0,0);
Aspirate(4,"JS_SDTS_MIX_TEST",0,0,"10",0,0,0,0,0,0,0,0,0,26,1,1,"06041000",0,0);
Aspirate(8,"JS_SDTS_MIX_TEST",0,0,0,"10",0,0,0,0,0,0,0,0,26,1,1,"06041000",0,0);
Aspirate(16,"JS_SDTS_MIX_TEST",0,0,0,0,"10",0,0,0,0,0,0,0,26,1,1,"06041000",0,0);
Aspirate(32,"JS_SDTS_MIX_TEST",0,0,0,0,0,"10",0,0,0,0,0,0,26,1,1,"06041000",0,0);
Aspirate(64,"JS_SDTS_MIX_TEST",0,0,0,0,0,0,"10",0,0,0,0,0,26,1,1,"06041000",0,0);
Aspirate(128,"JS_SDTS_MIX_TEST",0,0,0,0,0,0,0,"10",0,0,0,0,26,1,1,"06041000",0,0);
GroupEnd();
Group("Disp 17 and 18");
Dispense(255,"JS_SDTS_MIX_TEST","10","10","10","10","10","10","10","10",0,0,0,0,33,1,1,"0C08000000000®3000",0,0);
BeginLoop("10","Mix 17");
Aspirate(15,"JS_SDTS_17","40","40","40","40",0,0,0,0,0,0,0,0,33,1,1,"0C08000000000N0000",0,0);
Dispense(15,"JS_SDTS_17","40","40","40","40",0,0,0,0,0,0,0,0,33,1,1,"0C08000000000N0000",0,0);
EndLoop();
BeginLoop("10","Mix 18");
Aspirate(240,"JS_SDTS_18",0,0,0,0,"40","40","40","40",0,0,0,0,33,1,1,"0C080000000003000",0,0);
Dispense(240,"JS_SDTS_18",0,0,0,0,"40","40","40","40",0,0,0,0,33,1,1,"0C080000000003000",0,0);
EndLoop();
DropDITI(255,13,6,10,70,0);
GroupEnd();
Group("Asp 19 and 20");
GetDITI2(255,"DiTi 50ul Filter LiHa",0,0,0,70);
Aspirate(1,"JS_SDTS_MIX_TEST","10",0,0,0,0,0,0,0,0,0,0,0,26,1,1,"06041000",0,0);
Aspirate(2,"JS_SDTS_MIX_TEST",0,"10",0,0,0,0,0,0,0,0,0,0,26,1,1,"06041000",0,0);
Aspirate(4,"JS_SDTS_MIX_TEST",0,0,"10",0,0,0,0,0,0,0,0,0,26,1,1,"06041000",0,0);
Aspirate(8,"JS_SDTS_MIX_TEST",0,0,0,"10",0,0,0,0,0,0,0,0,26,1,1,"06041000",0,0);
Aspirate(16,"JS_SDTS_MIX_TEST",0,0,0,0,"10",0,0,0,0,0,0,0,26,1,1,"06041000",0,0);
Aspirate(32,"JS_SDTS_MIX_TEST",0,0,0,0,0,"10",0,0,0,0,0,0,26,1,1,"06041000",0,0);
Aspirate(64,"JS_SDTS_MIX_TEST",0,0,0,0,0,0,"10",0,0,0,0,0,26,1,1,"06041000",0,0);
Aspirate(128,"JS_SDTS_MIX_TEST",0,0,0,0,0,0,0,"10",0,0,0,0,26,1,1,"06041000",0,0);
GroupEnd();
Group("Disp 19 and 20");
Dispense(255,"JS_SDTS_MIX_TEST","10","10","10","10","10","10","10","10",0,0,0,0,33,1,1,"0C080000000000¬700",0,0);
BeginLoop("10","Mix 19");
Aspirate(15,"JS_SDTS_19","40","40","40","40",0,0,0,0,0,0,0,0,33,1,1,"0C080000000000l000",0,0);
Dispense(15,"JS_SDTS_19","40","40","40","40",0,0,0,0,0,0,0,0,33,1,1,"0C080000000000l000",0,0);
EndLoop();
BeginLoop("10","Mix 20");
Aspirate(240,"JS_SDTS_20",0,0,0,0,"40","40","40","40",0,0,0,0,33,1,1,"0C080000000000p700",0,0);
Dispense(240,"JS_SDTS_20",0,0,0,0,"40","40","40","40",0,0,0,0,33,1,1,"0C080000000000p700",0,0);
EndLoop();
DropDITI(255,13,6,10,70,0);
GroupEnd();
Group("Asp 21 and 22");
GetDITI2(255,"DiTi 50ul Filter LiHa",0,0,0,70);
Aspirate(1,"JS_SDTS_MIX_TEST","10",0,0,0,0,0,0,0,0,0,0,0,26,1,1,"06041000",0,0);
Aspirate(2,"JS_SDTS_MIX_TEST",0,"10",0,0,0,0,0,0,0,0,0,0,26,1,1,"06041000",0,0);
Aspirate(4,"JS_SDTS_MIX_TEST",0,0,"10",0,0,0,0,0,0,0,0,0,26,1,1,"06041000",0,0);
Aspirate(8,"JS_SDTS_MIX_TEST",0,0,0,"10",0,0,0,0,0,0,0,0,26,1,1,"06041000",0,0);
Aspirate(16,"JS_SDTS_MIX_TEST",0,0,0,0,"10",0,0,0,0,0,0,0,26,1,1,"06041000",0,0);
Aspirate(32,"JS_SDTS_MIX_TEST",0,0,0,0,0,"10",0,0,0,0,0,0,26,1,1,"06041000",0,0);
Aspirate(64,"JS_SDTS_MIX_TEST",0,0,0,0,0,0,"10",0,0,0,0,0,26,1,1,"06041000",0,0);
Aspirate(128,"JS_SDTS_MIX_TEST",0,0,0,0,0,0,0,"10",0,0,0,0,26,1,1,"06041000",0,0);
GroupEnd();
Group("Disp 21 and 22");
Dispense(255,"JS_SDTS_MIX_TEST","10","10","10","10","10","10","10","10",0,0,0,0,33,1,1,"0C0800000000000¨?0",0,0);
BeginLoop("10","Mix 21");
Aspirate(15,"JS_SDTS_21","40","40","40","40",0,0,0,0,0,0,0,0,33,1,1,"0C0800000000000¨00",0,0);
Dispense(15,"JS_SDTS_21","40","40","40","40",0,0,0,0,0,0,0,0,33,1,1,"0C0800000000000¨00",0,0);
EndLoop();
BeginLoop("10","Mix 22");
Aspirate(240,"JS_SDTS_22",0,0,0,0,"40","40","40","40",0,0,0,0,33,1,1,"0C08000000000000?0",0,0);
Dispense(240,"JS_SDTS_22",0,0,0,0,"40","40","40","40",0,0,0,0,33,1,1,"0C08000000000000?0",0,0);
EndLoop();
DropDITI(255,13,6,10,70,0);
GroupEnd();
Group("Asp 23 and 24");
GetDITI2(255,"DiTi 50ul Filter LiHa",0,0,0,70);
Aspirate(1,"JS_SDTS_MIX_TEST","10",0,0,0,0,0,0,0,0,0,0,0,26,1,1,"06041000",0,0);
Aspirate(2,"JS_SDTS_MIX_TEST",0,"10",0,0,0,0,0,0,0,0,0,0,26,1,1,"06041000",0,0);
Aspirate(4,"JS_SDTS_MIX_TEST",0,0,"10",0,0,0,0,0,0,0,0,0,26,1,1,"06041000",0,0);
Aspirate(8,"JS_SDTS_MIX_TEST",0,0,0,"10",0,0,0,0,0,0,0,0,26,1,1,"06041000",0,0);
Aspirate(16,"JS_SDTS_MIX_TEST",0,0,0,0,"10",0,0,0,0,0,0,0,26,1,1,"06041000",0,0);
Aspirate(32,"JS_SDTS_HYB_SAMPLE_MIX",0,0,0,0,0,"10",0,0,0,0,0,0,26,1,1,"06041000",0,0);
Aspirate(64,"JS_SDTS_MIX_TEST",0,0,0,0,0,0,"10",0,0,0,0,0,26,1,1,"06041000",0,0);
Aspirate(128,"JS_SDTS_MIX_TEST",0,0,0,0,0,0,0,"10",0,0,0,0,26,1,1,"06041000",0,0);
GroupEnd();
Group("Disp 23 and 24");
Dispense(255,"JS_SDTS_MIX_TEST","10","10","10","10","10","10","10","10",0,0,0,0,33,1,1,"0C08000000000000 O",0,0);
BeginLoop("10","Mix 23");
Aspirate(15,"JS_SDTS_23","40","40","40","40",0,0,0,0,0,0,0,0,33,1,1,"0C08000000000000 1",0,0);
Dispense(15,"JS_SDTS_23","40","40","40","40",0,0,0,0,0,0,0,0,33,1,1,"0C08000000000000 1",0,0);
EndLoop();
BeginLoop("10","Mix 24");
Aspirate(240,"JS_SDTS_24",0,0,0,0,"40","40","40","40",0,0,0,0,33,1,1,"0C080000000000000N",0,0);
Dispense(240,"JS_SDTS_24",0,0,0,0,"40","40","40","40",0,0,0,0,33,1,1,"0C080000000000000N",0,0);
EndLoop();
DropDITI(255,13,6,10,70,0);
GroupEnd();
