20200527_104002 Admin
Administrator
--{ RES }--
V;200
--{ CFG }--
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13,6;Washstation 2Grid DiTi Waste
26,0;DiTi 50ul Filter LiHa;p50
26,1;JS sDTS Reagent Rack;reagent
33,0;DiTi 200ul Filter LiHa;p200
33,1;96 Well UV Clean Plate;clean
33,2;JS sDTS Assay Plate;assay
40,0;DiTi 1000ul Filter LiHa;p1000
40,1;96 Well UV Clean Plate;clean2
47,0;DiTi 50ul Filter LiHa;p50 2
47,1;JS AB 1127;cleanup
54,0;DiTi 50ul Filter LiHa;p50 3
54,1;JS AB 1127 + magnet;cleanup on magnet
1;System
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--{ RPG }--
Set_DITI_Counter2("DiTi 50ul Filter LiHa","26","1","1",0);
Set_DITI_Counter2("DiTi 200ul Filter LiHa","33","1","1",0);
Set_DITI_Counter2("DiTi 1000ul Filter LiHa","40","1","1",0);
UserPrompt("Place the UV clean plate and cleanup plate in the correct positions.Place 1 mL of beads in B5 of reagent plate.Place 1 mL of ethanol in C5 of reagent plate.Place 1 mL of EB in D5 of reagent plate.",0,-1);
Group("Stamp Beads");
GetDITI2(1,"DiTi 1000ul Filter LiHa",0,0,0,70);
Aspirate(1,"JS_SDTS_BEADS_ASP","500",0,0,0,0,0,0,0,0,0,0,0,26,1,1,"06040080",0,0);
Dispense(1,"JS_SDTS_BEADS_ASP","500",0,0,0,0,0,0,0,0,0,0,0,47,1,1,"0C0810000000000000",0,0);
DropDITI(1,13,6,10,70,0);
GroupEnd();
Worklist(0,C:\Users\counsyl\Desktop\John\SDTS\4416_v2.gwl,255,"JS_SDTS_CONSOL_v2",0,0);GetDITI2(255,"DiTi 50ul Filter LiHa",0,0,0,70);DropDITI(255,13,6,10,70,0);
Worklist(1,,0,"",0,0);GetDITI2(255,"DiTi 50ul Filter LiHa",0,0,0,70);DropDITI(255,13,6,10,70,0);
Worklist(0,C:\Users\counsyl\Desktop\John\SDTS\4425_v2.gwl,255,"JS_SDTS_CONSOL_v2",0,0);GetDITI2(255,"DiTi 50ul Filter LiHa",0,0,0,70);DropDITI(255,13,6,10,70,0);
Worklist(1,,0,"",0,0);GetDITI2(255,"DiTi 50ul Filter LiHa",0,0,0,70);DropDITI(255,13,6,10,70,0);
GetDITI2(1,"DiTi 1000ul Filter LiHa",0,0,0,70);
BeginLoop("20","Sample Bead Mix");
Aspirate(1,"JS_SDTS_SAMPLE_BEADS_MIX","700",0,0,0,0,0,0,0,0,0,0,0,47,1,1,"0C0810000000000000",0,0);
Dispense(1,"JS_SDTS_SAMPLE_BEADS_MIX","700",0,0,0,0,0,0,0,0,0,0,0,47,1,1,"0C0810000000000000",0,0);
EndLoop();
DropDITI(1,13,6,10,70,0);
UserPrompt("Bead bind for 5 min.Move cleanup plate to magnet.Bead separate for 8 min.",0,-1);
Group("Remove Supernatant");
GetDITI2(1,"DiTi 1000ul Filter LiHa",0,0,0,70);
Aspirate(1,"JS_SDTS_SUP_REMOVAL","900",0,0,0,0,0,0,0,0,0,0,0,54,1,1,"0C0810000000000000",0,0);
DropDITI(1,13,6,10,70,0);
GroupEnd();
Group("Stamp Ethanol");
GetDITI2(1,"DiTi 1000ul Filter LiHa",0,0,0,70);
Aspirate(1,"JS_SDTS_ETH_ASP","200",0,0,0,0,0,0,0,0,0,0,0,26,1,1,"060400@0",0,0);
Dispense(1,"JS_SDTS_ETH_ASP","200",0,0,0,0,0,0,0,0,0,0,0,54,1,1,"0C0810000000000000",0,0);
DropDITI(1,13,6,10,70,0);
GroupEnd();
UserPrompt("Move cleanup plate to bioshake.Shake at 1400 RPM for 10 sec.Move cleanup plate to magnet.Bead separate for 30 sec.",0,-1);
Group("Remove Ethanol");
GetDITI2(1,"DiTi 1000ul Filter LiHa",0,0,0,70);
Aspirate(1,"JS_SDTS_SUP_REMOVAL","300",0,0,0,0,0,0,0,0,0,0,0,54,1,1,"0C0810000000000000",0,0);
DropDITI(3,13,6,10,70,0);
GroupEnd();
UserPrompt("Bead dry for 5 min.",0,-1);
Group("Stamp EB");
GetDITI2(1,"DiTi 200ul Filter LiHa",0,0,0,70);
Aspirate(1,"JS_SDTS_EB_ASP","85",0,0,0,0,0,0,0,0,0,0,0,26,1,1,"060400P0",0,0);
Dispense(1,"JS_SDTS_EB_ASP","85",0,0,0,0,0,0,0,0,0,0,0,54,1,1,"0C0810000000000000",0,0);
DropDITI(1,13,6,10,70,0);
GroupEnd();
UserPrompt("Move cleanup plate to bioshake.Shake at 2000 RPM for 2 min.Move cleanup plate to magnet.Bead separate for 1 min.",0,-1);
Group("Final Elution");
GetDITI2(3,"DiTi 50ul Filter LiHa",0,0,0,70);
Aspirate(1,"JS_SDTS_ELUTION","40",0,0,0,0,0,0,0,0,0,0,0,54,1,1,"0C0810000000000000",0,0);
Aspirate(2,"JS_SDTS_ELUTION",0,"40",0,0,0,0,0,0,0,0,0,0,54,1,1,"0C0810000000000000",0,0);
Dispense(3,"JS_SDTS_ELUTION","40","40",0,0,0,0,0,0,0,0,0,0,33,2,1,"0C0830000000000000",0,0);
DropDITI(3,13,6,10,70,0);
GroupEnd();
UserPrompt("Proceed to Strand Elimination or store assay plate at 4C.",0,-1);
