20200305_182714 Admin
Worktable link
Administrator
--{ RES }--
V;200
--{ CFG }--
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13,6;Washstation 2Grid DiTi Waste
26,0;DiTi 50ul Filter LiHa;p50
26,1;JS sDTS Reagent Rack;reagent
33,0;DiTi 200ul Filter LiHa;p200
33,1;Eppendorf TwinTec 96;assay
40,0;DiTi 1000ul Filter LiHa;p1000
40,1;JS AB 1127;cleanup
54,1;JS AB 1127 + magnet;cleanup on magnet
1;System
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--{ RPG }--
Set_DITI_Counter2("DiTi 50ul Filter LiHa","26","1","1",0);
Set_DITI_Counter2("DiTi 200ul Filter LiHa","33","1","1",0);
Set_DITI_Counter2("DiTi 1000ul Filter LiHa","40","1","1",0);
UserPrompt("Place enrichment PCR mix in B4 of reagent plate.",0,-1);
Group("Stamp ePCR Mix Batch 1");
GetDITI2(255,"DiTi 50ul Filter LiHa",0,0,0,70);
Aspirate(1,"JS_SDTS_EPCR","15",0,0,0,0,0,0,0,0,0,0,0,26,1,1,"06040p00",0,0);
Aspirate(2,"JS_SDTS_EPCR",0,"15",0,0,0,0,0,0,0,0,0,0,26,1,1,"06040p00",0,0);
Aspirate(4,"JS_SDTS_EPCR",0,0,"15",0,0,0,0,0,0,0,0,0,26,1,1,"06040p00",0,0);
Aspirate(8,"JS_SDTS_EPCR",0,0,0,"15",0,0,0,0,0,0,0,0,26,1,1,"06040p00",0,0);
Aspirate(16,"JS_SDTS_EPCR",0,0,0,0,"15",0,0,0,0,0,0,0,26,1,1,"06040p00",0,0);
Aspirate(32,"JS_SDTS_EPCR",0,0,0,0,0,"15",0,0,0,0,0,0,26,1,1,"06040p00",0,0);
Aspirate(64,"JS_SDTS_EPCR",0,0,0,0,0,0,"15",0,0,0,0,0,26,1,1,"06040p00",0,0);
Aspirate(128,"JS_SDTS_EPCR",0,0,0,0,0,0,0,"15",0,0,0,0,26,1,1,"06040p00",0,0);
Dispense(255,"JS_SDTS_EPCR","15","15","15","15","15","15","15","15",0,0,0,0,33,1,1,"0C080000 O00000000",0,0);
BeginLoop("10","Batch 1 Mix");
Aspirate(255,"JS_SDTS_EPCR_MIX","40","40","40","40","40","40","40","40",0,0,0,0,33,1,1,"0C080000 O00000000",0,0);
Dispense(255,"JS_SDTS_EPCR_MIX","40","40","40","40","40","40","40","40",0,0,0,0,33,1,1,"0C080000 O00000000",0,0);
EndLoop();
DropDITI(255,13,6,10,70,0);
GroupEnd();
Group("Stamp ePCR Mix Batch 2");
GetDITI2(255,"DiTi 50ul Filter LiHa",0,0,0,70);
Aspirate(1,"JS_SDTS_EPCR","15",0,0,0,0,0,0,0,0,0,0,0,26,1,1,"06040p00",0,0);
Aspirate(2,"JS_SDTS_EPCR",0,"15",0,0,0,0,0,0,0,0,0,0,26,1,1,"06040p00",0,0);
Aspirate(4,"JS_SDTS_EPCR",0,0,"15",0,0,0,0,0,0,0,0,0,26,1,1,"06040p00",0,0);
Aspirate(8,"JS_SDTS_EPCR",0,0,0,"15",0,0,0,0,0,0,0,0,26,1,1,"06040p00",0,0);
Aspirate(16,"JS_SDTS_EPCR",0,0,0,0,"15",0,0,0,0,0,0,0,26,1,1,"06040p00",0,0);
Aspirate(32,"JS_SDTS_EPCR",0,0,0,0,0,"15",0,0,0,0,0,0,26,1,1,"06040p00",0,0);
Aspirate(64,"JS_SDTS_EPCR",0,0,0,0,0,0,"15",0,0,0,0,0,26,1,1,"06040p00",0,0);
Aspirate(128,"JS_SDTS_EPCR",0,0,0,0,0,0,0,"15",0,0,0,0,26,1,1,"06040p00",0,0);
Dispense(255,"JS_SDTS_EPCR","15","15","15","15","15","15","15","15",0,0,0,0,33,1,1,"0C0800000o0000000",0,0);
BeginLoop("10","Batch 2 Mix");
Aspirate(255,"JS_SDTS_EPCR_MIX","40","40","40","40","40","40","40","40",0,0,0,0,33,1,1,"0C0800000o0000000",0,0);
Dispense(255,"JS_SDTS_EPCR_MIX","40","40","40","40","40","40","40","40",0,0,0,0,33,1,1,"0C0800000o0000000",0,0);
EndLoop();
DropDITI(255,13,6,10,70,0);
GroupEnd();
UserPrompt("Run thermalcycling for enrichment PCR.",0,-1);
