20200305_182715 Admin
Worktable link
Administrator
--{ RES }--
V;200
--{ CFG }--
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13,6;Washstation 2Grid DiTi Waste
26,0;DiTi 50ul Filter LiHa;p50
26,1;JS sDTS Reagent Rack;reagent
33,0;DiTi 200ul Filter LiHa;p200
33,1;Eppendorf TwinTec 96;assay
40,0;DiTi 1000ul Filter LiHa;p1000
40,1;JS AB 1127;cleanup
54,1;JS AB 1127 + magnet;cleanup on magnet
1;System
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--{ RPG }--
Set_DITI_Counter2("DiTi 50ul Filter LiHa","26","1","1",0);
UserPrompt("Place 50 uL hyb clean beads in A2 of reagent plate.Place 1.2 mL ethanol in B2 of reagent plate.Place 1 mL EB in C2 of reagent plate.",0,-1);
Set_DITI_Counter2("DiTi 200ul Filter LiHa","33","1","1",0);
Group("Transfer Sample");
GetDITI2(15,"DiTi 200ul Filter LiHa",0,0,0,70);
Aspirate(3,"JS_SDTS_SAMPLE_ASP","110","110",0,0,0,0,0,0,0,0,0,0,33,1,1,"0C0830000000000000",0,0);
Aspirate(12,"JS_SDTS_SAMPLE_ASP",0,0,"110","110",0,0,0,0,0,0,0,0,33,1,1,"0C0806000000000000",0,0);
Dispense(15,"JS_SDTS_SAMPLE_ASP","110","110","110","110",0,0,0,0,0,0,0,0,40,1,1,"0C08?0000000000000",0,0);
DropDITI(15,13,6,10,70,0);
GroupEnd();
Group("Mix Beads");
GetDITI2(1,"DiTi 50ul Filter LiHa",0,0,0,70);
Mix(1,"JS_SDTS_HYB_CLEAN_BEADS_MIX","40",0,0,0,0,0,0,0,0,0,0,0,26,1,1,"0604@000",5,0,0);
DropDITI(1,13,6,10,70,0);
GroupEnd();
Group("Transfer Beads");
GetDITI2(15,"DiTi 50ul Filter LiHa",0,0,0,70);
Aspirate(1,"JS_SDTS_HYB_CLEAN_BEADS_ASP","10",0,0,0,0,0,0,0,0,0,0,0,26,1,1,"0604@000",0,0);
Aspirate(2,"JS_SDTS_HYB_CLEAN_BEADS_ASP",0,"10",0,0,0,0,0,0,0,0,0,0,26,1,1,"0604@000",0,0);
Aspirate(4,"JS_SDTS_HYB_CLEAN_BEADS_ASP",0,0,"10",0,0,0,0,0,0,0,0,0,26,1,1,"0604@000",0,0);
Aspirate(8,"JS_SDTS_HYB_CLEAN_BEADS_ASP",0,0,0,"10",0,0,0,0,0,0,0,0,26,1,1,"0604@000",0,0);
Dispense(15,"JS_SDTS_HYB_CLEAN_BEADS_ASP","10","10","10","10",0,0,0,0,0,0,0,0,40,1,1,"0C08?0000000000000",0,0);
DropDITI(15,13,6,10,70,0);
GetDITI2(15,"DiTi 200ul Filter LiHa",0,0,0,70);
BeginLoop("10","Hyb Sample Mix");
Aspirate(15,"JS_SDTS_HYB_SAMPLE_MIX","90","90","90","90",0,0,0,0,0,0,0,0,40,1,1,"0C08?0000000000000",0,0);
Dispense(15,"JS_SDTS_HYB_SAMPLE_MIX","90","90","90","90",0,0,0,0,0,0,0,0,40,1,1,"0C08?0000000000000",0,0);
EndLoop();
DropDITI(15,13,6,10,70,0);
GroupEnd();
UserPrompt("Move plate to bioshake.Shake at 2000 RPM for 30 sec.Incubate for 5 min.Move to magnet for 3 min.",0,-1);
UserPrompt("Confirm that cleanup plate is on magnet.",0,-1);
Group("Remove Supernatant");
GetDITI2(15,"DiTi 200ul Filter LiHa",0,0,0,70);
Aspirate(15,"JS_SDTS_SUP_REMOVAL","130","130","130","130",0,0,0,0,0,0,0,0,54,1,1,"0C08?0000000000000",0,0);
DropDITI(15,13,6,10,70,0);
GroupEnd();
Group("Stamp Ethanol");
GetDITI2(15,"DiTi 1000ul Filter LiHa",0,0,0,70);
Aspirate(1,"JS_SDTS_ETH_ASP","200",0,0,0,0,0,0,0,0,0,0,0,26,1,1,"0604P000",0,0);
Aspirate(2,"JS_SDTS_ETH_ASP",0,"200",0,0,0,0,0,0,0,0,0,0,26,1,1,"0604P000",0,0);
Aspirate(4,"JS_SDTS_ETH_ASP",0,0,"200",0,0,0,0,0,0,0,0,0,26,1,1,"0604P000",0,0);
Aspirate(8,"JS_SDTS_ETH_ASP",0,0,0,"200",0,0,0,0,0,0,0,0,26,1,1,"0604P000",0,0);
Dispense(15,"JS_SDTS_ETH_ASP","200","200","200","200",0,0,0,0,0,0,0,0,54,1,1,"0C08?0000000000000",0,0);
DropDITI(255,13,6,10,70,0);
GroupEnd();
UserPrompt("Move cleanup plate to bioshake.Shake at 1400RPM for 10 sec.Move cleanup plate to magnet.Incubate for 30 sec.",0,-1);
UserPrompt("Confirm that cleanup plate is on the magnet.",0,-1);
Group("Remove Ethanol");
GetDITI2(15,"DiTi 1000ul Filter LiHa",0,0,0,70);
Aspirate(15,"JS_SDTS_SUP_REMOVAL","240","240","240","240",0,0,0,0,0,0,0,0,54,1,1,"0C08?0000000000000",0,0);
DropDITI(255,13,6,10,70,0);
GroupEnd();
UserPrompt("Incubate/dry beads for 5 min.",0,-1);
Group("Stamp EB");
GetDITI2(15,"DiTi 200ul Filter LiHa",0,0,0,70);
Aspirate(1,"JS_SDTS_EB_ASP","125",0,0,0,0,0,0,0,0,0,0,0,26,1,1,"0604p000",0,0);
Aspirate(2,"JS_SDTS_EB_ASP",0,"125",0,0,0,0,0,0,0,0,0,0,26,1,1,"0604p000",0,0);
Aspirate(4,"JS_SDTS_EB_ASP",0,0,"125",0,0,0,0,0,0,0,0,0,26,1,1,"0604p000",0,0);
Aspirate(8,"JS_SDTS_EB_ASP",0,0,0,"125",0,0,0,0,0,0,0,0,26,1,1,"0604p000",0,0);
Dispense(15,"JS_SDTS_EB_ASP","125","125","125","125",0,0,0,0,0,0,0,0,54,1,1,"0C08?0000000000000",0,0);
DropDITI(15,13,6,10,70,0);
GroupEnd();
UserPrompt("Move the cleanup plate to bioshake.Shake at 1800RPM for 30 sec.Incubate for 90 sec.Move the plate back to the magnet. Incubate for 60 sec.",0,-1);
Group("Elution");
Group("Batch 1 Main");
GetDITI2(15,"DiTi 50ul Filter LiHa",0,0,0,70);
Aspirate(1,"JS_SDTS_ELUTION","30",0,0,0,0,0,0,0,0,0,0,0,54,1,1,"0C0810000000000000",0,0);
Aspirate(2,"JS_SDTS_ELUTION",0,"30",0,0,0,0,0,0,0,0,0,0,54,1,1,"0C0810000000000000",0,0);
Aspirate(4,"JS_SDTS_ELUTION",0,0,"30",0,0,0,0,0,0,0,0,0,54,1,1,"0C0810000000000000",0,0);
Aspirate(8,"JS_SDTS_ELUTION",0,0,0,"30",0,0,0,0,0,0,0,0,54,1,1,"0C0810000000000000",0,0);
Dispense(15,"JS_SDTS_ELUTION","30","30","30","30",0,0,0,0,0,0,0,0,33,1,1,"0C0800l00000000000",0,0);
DropDITI(15,13,6,10,70,0);
GroupEnd();
Group("Batch 1 Special");
GetDITI2(15,"DiTi 50ul Filter LiHa",0,0,0,70);
Aspirate(1,"JS_SDTS_ELUTION","30",0,0,0,0,0,0,0,0,0,0,0,54,1,1,"0C0820000000000000",0,0);
Aspirate(2,"JS_SDTS_ELUTION",0,"30",0,0,0,0,0,0,0,0,0,0,54,1,1,"0C0820000000000000",0,0);
Aspirate(4,"JS_SDTS_ELUTION",0,0,"30",0,0,0,0,0,0,0,0,0,54,1,1,"0C0820000000000000",0,0);
Aspirate(8,"JS_SDTS_ELUTION",0,0,0,"30",0,0,0,0,0,0,0,0,54,1,1,"0C0820000000000000",0,0);
Dispense(15,"JS_SDTS_ELUTION","30","30","30","30",0,0,0,0,0,0,0,0,33,1,1,"0C0800p70000000000",0,0);
DropDITI(15,13,6,10,70,0);
GroupEnd();
Group("Batch 2 Main");
GetDITI2(15,"DiTi 50ul Filter LiHa",0,0,0,70);
Aspirate(1,"JS_SDTS_ELUTION","30",0,0,0,0,0,0,0,0,0,0,0,54,1,1,"0C0840000000000000",0,0);
Aspirate(2,"JS_SDTS_ELUTION",0,"30",0,0,0,0,0,0,0,0,0,0,54,1,1,"0C0840000000000000",0,0);
Aspirate(4,"JS_SDTS_ELUTION",0,0,"30",0,0,0,0,0,0,0,0,0,54,1,1,"0C0840000000000000",0,0);
Aspirate(8,"JS_SDTS_ELUTION",0,0,0,"30",0,0,0,0,0,0,0,0,54,1,1,"0C0840000000000000",0,0);
Dispense(15,"JS_SDTS_ELUTION","30","30","30","30",0,0,0,0,0,0,0,0,33,1,1,"0C08000¨0000000000",0,0);
DropDITI(15,13,6,10,70,0);
GroupEnd();
Group("Batch 2 Special");
GetDITI2(15,"DiTi 50ul Filter LiHa",0,0,0,70);
Aspirate(1,"JS_SDTS_ELUTION","30",0,0,0,0,0,0,0,0,0,0,0,54,1,1,"0C0880000000000000",0,0);
Aspirate(2,"JS_SDTS_ELUTION",0,"30",0,0,0,0,0,0,0,0,0,0,54,1,1,"0C0880000000000000",0,0);
Aspirate(4,"JS_SDTS_ELUTION",0,0,"30",0,0,0,0,0,0,0,0,0,54,1,1,"0C0880000000000000",0,0);
Aspirate(8,"JS_SDTS_ELUTION",0,0,0,"30",0,0,0,0,0,0,0,0,54,1,1,"0C0880000000000000",0,0);
Dispense(15,"JS_SDTS_ELUTION","30","30","30","30",0,0,0,0,0,0,0,0,33,1,1,"0C080000?000000000",0,0);
DropDITI(15,13,6,10,70,0);
GroupEnd();
GroupEnd();
