20200303_161013 Admin
Administrator
--{ RES }--
V;200
--{ CFG }--
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13,6;Washstation 2Grid DiTi Waste
26,0;DiTi 50ul Filter LiHa;p50
26,1;JS sDTS Reagent Rack;reagent
33,0;DiTi 200ul Filter LiHa;p200
33,1;Eppendorf TwinTec 96;assay
40,0;DiTi 1000ul Filter LiHa;p1000
1;System
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--{ RPG }--
Set_DITI_Counter2("DiTi 50ul Filter LiHa","26","1","1",0);
UserPrompt("Place 200 uL hyb buffer mix in B2 of reagent plate.Place 25 uL main probe in C2 of reagent plate.Place 25 uL special probe in D2 of reagent plate.",0,-1);
GetDITI2(15,"DiTi 50ul Filter LiHa",0,0,0,70);
Group("Get Probe");
Aspirate(3,"JS_SDTS_HYB_PROBE","10","10",0,0,0,0,0,0,0,0,0,0,26,1,1,"0604<000",0,0);
Aspirate(12,"JS_SDTS_HYB_PROBE",0,0,"10","10",0,0,0,0,0,0,0,0,26,1,1,"0604<000",0,0);
GroupEnd();
Group("Dispense Probe to Batch");
Dispense(3,"JS_SDTS_HYB_PROBE","10","10",0,0,0,0,0,0,0,0,0,0,33,1,1,"0C0830000000000000",0,0);
Mix(3,"JS_SDTS_HYB_PROBE_MIX","30","30",0,0,0,0,0,0,0,0,0,0,33,1,1,"0C0830000000000000",2,0,0);
GroupEnd();
DropDITI(15,13,6,10,70,0);
Set_DITI_Counter2("DiTi 200ul Filter LiHa","33","1","1",0);
GetDITI2(3,"DiTi 200ul Filter LiHa",0,0,0,70);
Group("Get Hybridization Reagent");
Aspirate(1,"JS_SDTS_HYB_BUFFER","40",0,0,0,0,0,0,0,0,0,0,0,26,1,1,"06042000",0,0);
Aspirate(2,"JS_SDTS_HYB_BUFFER",0,"40",0,0,0,0,0,0,0,0,0,0,26,1,1,"06042000",0,0);
GroupEnd();
Group("Dispense Hyb to Batch");
Dispense(3,"JS_SDTS_HYB_BUFFER","40","40",0,0,0,0,0,0,0,0,0,0,33,1,1,"0C0830000000000000",0,0);
Mix(3,"JS_SDTS_HYB_BUFFER_MIX","80","80",0,0,0,0,0,0,0,0,0,0,33,1,1,"0C0830000000000000",20,0,0);
GroupEnd();
DropDITI(3,13,6,10,70,0);
UserPrompt("Incubate assay plate at 99C for 5 min, then 63C for 2 hours.HOLD at 4C.",0,-1);
