20200305_182715 Admin
Worktable link
Administrator
--{ RES }--
V;200
--{ CFG }--
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13,6;Washstation 2Grid DiTi Waste
26,0;DiTi 50ul Filter LiHa;p50
26,1;JS sDTS Reagent Rack;reagent
33,0;DiTi 200ul Filter LiHa;p200
33,1;Eppendorf TwinTec 96;assay
40,0;DiTi 1000ul Filter LiHa;p1000
40,1;JS AB 1127;cleanup
54,1;JS AB 1127 + magnet;cleanup on magnet
1;System
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--{ RPG }--
Set_DITI_Counter2("DiTi 50ul Filter LiHa","26","1","1",0);
Set_DITI_Counter2("DiTi 200ul Filter LiHa","33","1","1",0);
UserPrompt("Place 180 uL probe extension mix in D2 of reagent plate.Plate 180 uL UDG mix in A3 of reagent plate.",0,-1);
Group("Stamp PE Mix Batch 1");
GetDITI2(255,"DiTi 50ul Filter LiHa",0,0,0,70);
Aspirate(1,"JS_SDTS_PE","10",0,0,0,0,0,0,0,0,0,0,0,26,1,1,"06040100",0,0);
Aspirate(2,"JS_SDTS_PE",0,"10",0,0,0,0,0,0,0,0,0,0,26,1,1,"06040100",0,0);
Aspirate(4,"JS_SDTS_PE",0,0,"10",0,0,0,0,0,0,0,0,0,26,1,1,"06040100",0,0);
Aspirate(8,"JS_SDTS_PE",0,0,0,"10",0,0,0,0,0,0,0,0,26,1,1,"06040100",0,0);
Aspirate(16,"JS_SDTS_PE",0,0,0,0,"10",0,0,0,0,0,0,0,26,1,1,"06040100",0,0);
Aspirate(32,"JS_SDTS_PE",0,0,0,0,0,"10",0,0,0,0,0,0,26,1,1,"06040100",0,0);
Aspirate(64,"JS_SDTS_PE",0,0,0,0,0,0,"10",0,0,0,0,0,26,1,1,"06040100",0,0);
Aspirate(128,"JS_SDTS_PE",0,0,0,0,0,0,0,"10",0,0,0,0,26,1,1,"06040100",0,0);
Dispense(255,"JS_SDTS_PE","10","10","10","10","10","10","10","10",0,0,0,0,33,1,1,"0C0800¬70000000000",0,0);
Mix(255,"JS_SDTS_PE_MIX","25","25","25","25","25","25","25","25",0,0,0,0,33,1,1,"0C0800¬70000000000",20,0,0);
DropDITI(255,13,6,10,70,0);
GroupEnd();
Group("Stamp PE Mix Batch 2");
GetDITI2(255,"DiTi 50ul Filter LiHa",0,0,0,70);
Aspirate(1,"JS_SDTS_PE","10",0,0,0,0,0,0,0,0,0,0,0,26,1,1,"06040100",0,0);
Aspirate(2,"JS_SDTS_PE",0,"10",0,0,0,0,0,0,0,0,0,0,26,1,1,"06040100",0,0);
Aspirate(4,"JS_SDTS_PE",0,0,"10",0,0,0,0,0,0,0,0,0,26,1,1,"06040100",0,0);
Aspirate(8,"JS_SDTS_PE",0,0,0,"10",0,0,0,0,0,0,0,0,26,1,1,"06040100",0,0);
Aspirate(16,"JS_SDTS_PE",0,0,0,0,"10",0,0,0,0,0,0,0,26,1,1,"06040100",0,0);
Aspirate(32,"JS_SDTS_PE",0,0,0,0,0,"10",0,0,0,0,0,0,26,1,1,"06040100",0,0);
Aspirate(64,"JS_SDTS_PE",0,0,0,0,0,0,"10",0,0,0,0,0,26,1,1,"06040100",0,0);
Aspirate(128,"JS_SDTS_PE",0,0,0,0,0,0,0,"10",0,0,0,0,26,1,1,"06040100",0,0);
Dispense(255,"JS_SDTS_PE","10","10","10","10","10","10","10","10",0,0,0,0,33,1,1,"0C08000¨?000000000",0,0);
Mix(255,"JS_SDTS_PE_MIX","25","25","25","25","25","25","25","25",0,0,0,0,33,1,1,"0C08000¨?000000000",20,0,0);
DropDITI(255,13,6,10,70,0);
GroupEnd();
UserPrompt("Incubate assay plate at 68C for 10 min.HOLD at 4C.Place assay plate in original location.",0,-1);
Group("Stamp UDG Mix Batch 1");
GetDITI2(255,"DiTi 50ul Filter LiHa",0,0,0,70);
Aspirate(1,"JS_SDTS_UDG","10",0,0,0,0,0,0,0,0,0,0,0,26,1,1,"06040200",0,0);
Aspirate(2,"JS_SDTS_UDG",0,"10",0,0,0,0,0,0,0,0,0,0,26,1,1,"06040200",0,0);
Aspirate(4,"JS_SDTS_UDG",0,0,"10",0,0,0,0,0,0,0,0,0,26,1,1,"06040200",0,0);
Aspirate(8,"JS_SDTS_UDG",0,0,0,"10",0,0,0,0,0,0,0,0,26,1,1,"06040200",0,0);
Aspirate(16,"JS_SDTS_UDG",0,0,0,0,"10",0,0,0,0,0,0,0,26,1,1,"06040200",0,0);
Aspirate(32,"JS_SDTS_UDG",0,0,0,0,0,"10",0,0,0,0,0,0,26,1,1,"06040200",0,0);
Aspirate(64,"JS_SDTS_UDG",0,0,0,0,0,0,"10",0,0,0,0,0,26,1,1,"06040200",0,0);
Aspirate(128,"JS_SDTS_UDG",0,0,0,0,0,0,0,"10",0,0,0,0,26,1,1,"06040200",0,0);
Dispense(255,"JS_SDTS_UDG","10","10","10","10","10","10","10","10",0,0,0,0,33,1,1,"0C0800¬70000000000",0,0);
Mix(255,"JS_SDTS_UDG_MIX","35","35","35","35","35","35","35","35",0,0,0,0,33,1,1,"0C0800¬70000000000",20,0,0);
DropDITI(255,13,6,10,70,0);
GroupEnd();
Group("Stamp UDG Mix Batch 2");
GetDITI2(255,"DiTi 50ul Filter LiHa",0,0,0,70);
Aspirate(1,"JS_SDTS_UDG","10",0,0,0,0,0,0,0,0,0,0,0,26,1,1,"06040200",0,0);
Aspirate(2,"JS_SDTS_UDG",0,"10",0,0,0,0,0,0,0,0,0,0,26,1,1,"06040200",0,0);
Aspirate(4,"JS_SDTS_UDG",0,0,"10",0,0,0,0,0,0,0,0,0,26,1,1,"06040200",0,0);
Aspirate(8,"JS_SDTS_UDG",0,0,0,"10",0,0,0,0,0,0,0,0,26,1,1,"06040200",0,0);
Aspirate(16,"JS_SDTS_UDG",0,0,0,0,"10",0,0,0,0,0,0,0,26,1,1,"06040200",0,0);
Aspirate(32,"JS_SDTS_UDG",0,0,0,0,0,"10",0,0,0,0,0,0,26,1,1,"06040200",0,0);
Aspirate(64,"JS_SDTS_UDG",0,0,0,0,0,0,"10",0,0,0,0,0,26,1,1,"06040200",0,0);
Aspirate(128,"JS_SDTS_UDG",0,0,0,0,0,0,0,"10",0,0,0,0,26,1,1,"06040200",0,0);
Dispense(255,"JS_SDTS_UDG","10","10","10","10","10","10","10","10",0,0,0,0,33,1,1,"0C08000¨?000000000",0,0);
Mix(255,"JS_SDTS_UDG_MIX","35","35","35","35","35","35","35","35",0,0,0,0,33,1,1,"0C08000¨?000000000",20,0,0);
DropDITI(255,13,6,10,70,0);
GroupEnd();
UserPrompt("Incubate assay plate at 37C for 30 min.HOLD at 4C.",0,-1);
