20200226_181316 Admin
Administrator
--{ RES }--
V;200
--{ CFG }--
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13,6;Washstation 2Grid DiTi Waste
26,0;DiTi 50ul Filter LiHa;p50
26,1;JS sDTS Reagent Rack;reagent
33,0;DiTi 200ul Filter LiHa;p200
33,1;Eppendorf TwinTec 96;assay
40,0;DiTi 1000ul Filter LiHa;p1000
1;System
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--{ RPG }--
Set_DITI_Counter2("DiTi 50ul Filter LiHa","26","1","1",0);
Set_DITI_Counter2("DiTi 200ul Filter LiHa","33","1","1",0);
Set_DITI_Counter2("DiTi 1000ul Filter LiHa","40","1","1",0);
UserPrompt("Place 45 uL strand elimination reagent in A1 of reagent plate.",0,-1);
Group("Get Strand Elimination Reagent");
GetDITI2(15,"DiTi 50ul Filter LiHa",0,0,0,70);
Aspirate(1,"JS_SDTS_SE","10",0,0,0,0,0,0,0,0,0,0,0,26,1,1,"06041000",0,0);
Aspirate(2,"JS_SDTS_SE",0,"10",0,0,0,0,0,0,0,0,0,0,26,1,1,"06041000",0,0);
Aspirate(4,"JS_SDTS_SE",0,0,"10",0,0,0,0,0,0,0,0,0,26,1,1,"06041000",0,0);
Aspirate(8,"JS_SDTS_SE",0,0,0,"10",0,0,0,0,0,0,0,0,26,1,1,"06041000",0,0);
GroupEnd();
Group("Dispense to First Batch");
Dispense(3,"JS_SDTS_SE","10","10",0,0,0,0,0,0,0,0,0,0,33,1,1,"0C0830000000000000",0,0);
Mix(3,"JS_SDTS_SE_MIX","40","40",0,0,0,0,0,0,0,0,0,0,33,1,1,"0C0830000000000000",20,0,0);
GroupEnd();
Group("Dispense to Second Batch");
Dispense(12,"JS_SDTS_SE",0,0,"10","10",0,0,0,0,0,0,0,0,33,1,1,"0C0806000000000000",0,0);
Mix(12,"JS_SDTS_SE_MIX",0,0,"40","40",0,0,0,0,0,0,0,0,33,1,1,"0C0806000000000000",20,0,0);
GroupEnd();
DropDITI(15,13,6,10,70,0);
UserPrompt("Incubate assay plate at 37C for 30 min, then 95C for 5 min.HOLD at 4C.",0,-1);
