1FD76EA8
20200305_182715 Admin           
Worktable link                                                                                                                  
Administrator                                                                                                                   
--{ RES }--
V;200
--{ CFG }--
999;219;32;
14;-1;-1;-1;-1;-1;-1;-1;-1;-1;-1;-1;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-1;
998;0;
998;0;
998;0;
998;0;
998;0;
998;0;
998;0;
998;0;
998;0;
998;0;
998;0;
998;0;
998;0;
998;8;;;;;;;Washstation 2Grid DiTi Waste;;
998;;;;;;;;;
998;0;
998;0;
998;0;
998;0;
998;0;
998;0;
998;0;
998;0;
998;0;
998;0;
998;0;
998;0;
998;3;DiTi 50ul Filter LiHa;JS sDTS Reagent Rack;;
998;p50;reagent;;
998;0;
998;0;
998;0;
998;0;
998;0;
998;0;
998;3;DiTi 200ul Filter LiHa;Eppendorf TwinTec 96;;
998;p200;assay;;
998;0;
998;0;
998;0;
998;0;
998;0;
998;0;
998;3;DiTi 1000ul Filter LiHa;JS AB 1127;;
998;p1000;cleanup;;
998;0;
998;0;
998;0;
998;0;
998;0;
998;0;
998;3;;;;
998;;;;
998;0;
998;0;
998;0;
998;0;
998;0;
998;0;
998;3;;JS AB 1127 + magnet;;
998;;cleanup on magnet;;
998;0;
998;0;
998;0;
998;0;
998;0;
998;0;
998;3;;;;
998;;;;
998;0;
998;0;
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998;1;
998;4;0;System;
998;0;
998;1;
996;0;0;
--{ RPG }--
Set_DITI_Counter2("DiTi 50ul Filter LiHa","26","1","1",0);
Set_DITI_Counter2("DiTi 200ul Filter LiHa","33","1","1",0);
Set_DITI_Counter2("DiTi 1000ul Filter LiHa","40","1","1",0);
UserPrompt("Place assay plate in original position.Place 1mL beads in B3 and C3 of reagent plate.Place 1.2mL ethanol in D3 of reagent plate.Place 1mL EB in A4 of reagent plate.",0,-1);
Group("Stamp Beads");
GetDITI2(3,"DiTi 1000ul Filter LiHa",0,0,0,70);
Aspirate(3,"JS_SDTS_BEADS_ASP","800","800",0,0,0,0,0,0,0,0,0,0,26,1,1,"06040<00",0,0);
Dispense(1,"JS_SDTS_BEADS_ASP","360",0,0,0,0,0,0,0,0,0,0,0,40,1,1,"0C0810000000000000",0,0);
Dispense(1,"JS_SDTS_BEADS_ASP","360",0,0,0,0,0,0,0,0,0,0,0,40,1,1,"0C0802000000000000",0,0);
Dispense(2,"JS_SDTS_BEADS_ASP",0,"360",0,0,0,0,0,0,0,0,0,0,40,1,1,"0C0800400000000000",0,0);
Dispense(2,"JS_SDTS_BEADS_ASP",0,"360",0,0,0,0,0,0,0,0,0,0,40,1,1,"0C0800080000000000",0,0);
DropDITI(255,13,6,10,70,0);
GroupEnd();
Group("Stamp Samples - Batch 1");
GetDITI2(255,"DiTi 200ul Filter LiHa",0,0,0,70);
Aspirate(255,"JS_SDTS_SAMPLE_ASP","60","60","60","60","60","60","60","60",0,0,0,0,33,1,1,"0C0800¬70000000000",0,0);
Dispense(1,"JS_SDTS_SAMPLE_ASP","60",0,0,0,0,0,0,0,0,0,0,0,40,1,1,"0C0810000000000000",0,0);
Mix(1,"JS_SDTS_SAMPLE_BEADS_MIX","150",0,0,0,0,0,0,0,0,0,0,0,40,1,1,"0C0810000000000000",1,0,0);
Dispense(2,"JS_SDTS_SAMPLE_ASP",0,"60",0,0,0,0,0,0,0,0,0,0,40,1,1,"0C0810000000000000",0,0);
Mix(2,"JS_SDTS_SAMPLE_BEADS_MIX",0,"150",0,0,0,0,0,0,0,0,0,0,40,1,1,"0C0810000000000000",1,0,0);
Dispense(4,"JS_SDTS_SAMPLE_ASP",0,0,"60",0,0,0,0,0,0,0,0,0,40,1,1,"0C0810000000000000",0,0);
Mix(4,"JS_SDTS_SAMPLE_BEADS_MIX",0,0,"150",0,0,0,0,0,0,0,0,0,40,1,1,"0C0810000000000000",1,0,0);
Dispense(8,"JS_SDTS_SAMPLE_ASP",0,0,0,"60",0,0,0,0,0,0,0,0,40,1,1,"0C0810000000000000",0,0);
Mix(8,"JS_SDTS_SAMPLE_BEADS_MIX",0,0,0,"150",0,0,0,0,0,0,0,0,40,1,1,"0C0810000000000000",1,0,0);
Dispense(16,"JS_SDTS_SAMPLE_ASP",0,0,0,0,"60",0,0,0,0,0,0,0,40,1,1,"0C0802000000000000",0,0);
Mix(16,"JS_SDTS_SAMPLE_BEADS_MIX",0,0,0,0,"150",0,0,0,0,0,0,0,40,1,1,"0C0802000000000000",1,0,0);
Dispense(32,"JS_SDTS_SAMPLE_ASP",0,0,0,0,0,"60",0,0,0,0,0,0,40,1,1,"0C0802000000000000",0,0);
Mix(32,"JS_SDTS_SAMPLE_BEADS_MIX",0,0,0,0,0,"150",0,0,0,0,0,0,40,1,1,"0C0802000000000000",1,0,0);
Dispense(64,"JS_SDTS_SAMPLE_ASP",0,0,0,0,0,0,"60",0,0,0,0,0,40,1,1,"0C0802000000000000",0,0);
Mix(64,"JS_SDTS_SAMPLE_BEADS_MIX",0,0,0,0,0,0,"150",0,0,0,0,0,40,1,1,"0C0802000000000000",1,0,0);
Dispense(128,"JS_SDTS_SAMPLE_ASP",0,0,0,0,0,0,0,"60",0,0,0,0,40,1,1,"0C0802000000000000",0,0);
Mix(128,"JS_SDTS_SAMPLE_BEADS_MIX",0,0,0,0,0,0,0,"150",0,0,0,0,40,1,1,"0C0802000000000000",1,0,0);
DropDITI(255,13,6,10,70,0);
GroupEnd();
Group("Stamp Samples - Batch 2");
GetDITI2(255,"DiTi 200ul Filter LiHa",0,0,0,70);
Aspirate(255,"JS_SDTS_SAMPLE_ASP","60","60","60","60","60","60","60","60",0,0,0,0,33,1,1,"0C08000¨?000000000",0,0);
Dispense(1,"JS_SDTS_SAMPLE_ASP","60",0,0,0,0,0,0,0,0,0,0,0,40,1,1,"0C0800400000000000",0,0);
Mix(1,"JS_SDTS_SAMPLE_BEADS_MIX","150",0,0,0,0,0,0,0,0,0,0,0,40,1,1,"0C0800400000000000",1,0,0);
Dispense(2,"JS_SDTS_SAMPLE_ASP",0,"60",0,0,0,0,0,0,0,0,0,0,40,1,1,"0C0800400000000000",0,0);
Mix(2,"JS_SDTS_SAMPLE_BEADS_MIX",0,"150",0,0,0,0,0,0,0,0,0,0,40,1,1,"0C0800400000000000",1,0,0);
Dispense(4,"JS_SDTS_SAMPLE_ASP",0,0,"60",0,0,0,0,0,0,0,0,0,40,1,1,"0C0800400000000000",0,0);
Mix(4,"JS_SDTS_SAMPLE_BEADS_MIX",0,0,"150",0,0,0,0,0,0,0,0,0,40,1,1,"0C0800400000000000",1,0,0);
Dispense(8,"JS_SDTS_SAMPLE_ASP",0,0,0,"60",0,0,0,0,0,0,0,0,40,1,1,"0C0800400000000000",0,0);
Mix(8,"JS_SDTS_SAMPLE_BEADS_MIX",0,0,0,"150",0,0,0,0,0,0,0,0,40,1,1,"0C0800400000000000",1,0,0);
Dispense(16,"JS_SDTS_SAMPLE_ASP",0,0,0,0,"60",0,0,0,0,0,0,0,40,1,1,"0C0800080000000000",0,0);
Mix(16,"JS_SDTS_SAMPLE_BEADS_MIX",0,0,0,0,"150",0,0,0,0,0,0,0,40,1,1,"0C0800080000000000",1,0,0);
Dispense(32,"JS_SDTS_SAMPLE_ASP",0,0,0,0,0,"60",0,0,0,0,0,0,40,1,1,"0C0800080000000000",0,0);
Mix(32,"JS_SDTS_SAMPLE_BEADS_MIX",0,0,0,0,0,"150",0,0,0,0,0,0,40,1,1,"0C0800080000000000",1,0,0);
Dispense(64,"JS_SDTS_SAMPLE_ASP",0,0,0,0,0,0,"60",0,0,0,0,0,40,1,1,"0C0800080000000000",0,0);
Mix(64,"JS_SDTS_SAMPLE_BEADS_MIX",0,0,0,0,0,0,"150",0,0,0,0,0,40,1,1,"0C0800080000000000",1,0,0);
Dispense(128,"JS_SDTS_SAMPLE_ASP",0,0,0,0,0,0,0,"60",0,0,0,0,40,1,1,"0C0800080000000000",0,0);
Mix(128,"JS_SDTS_SAMPLE_BEADS_MIX",0,0,0,0,0,0,0,"150",0,0,0,0,40,1,1,"0C0800080000000000",1,0,0);
DropDITI(255,13,6,10,70,0);
GroupEnd();
GetDITI2(15,"DiTi 1000ul Filter LiHa",0,0,0,70);
BeginLoop("10","Batch 1 Main Mixing");
Aspirate(1,"JS_SDTS_UDG_SAMPLE_MIX_FINAL","500",0,0,0,0,0,0,0,0,0,0,0,40,1,1,"0C0810000000000000",0,0);
Dispense(1,"JS_SDTS_UDG_SAMPLE_MIX_FINAL","500",0,0,0,0,0,0,0,0,0,0,0,40,1,1,"0C0810000000000000",0,0);
EndLoop();
BeginLoop("10","Batch 1 Special Mixing");
Aspirate(2,"JS_SDTS_UDG_SAMPLE_MIX_FINAL",0,"500",0,0,0,0,0,0,0,0,0,0,40,1,1,"0C0802000000000000",0,0);
Dispense(2,"JS_SDTS_UDG_SAMPLE_MIX_FINAL",0,"500",0,0,0,0,0,0,0,0,0,0,40,1,1,"0C0802000000000000",0,0);
EndLoop();
BeginLoop("10","Batch 2 Main Mixing");
Aspirate(4,"JS_SDTS_UDG_SAMPLE_MIX_FINAL",0,0,"500",0,0,0,0,0,0,0,0,0,40,1,1,"0C0800400000000000",0,0);
Dispense(4,"JS_SDTS_UDG_SAMPLE_MIX_FINAL",0,0,"500",0,0,0,0,0,0,0,0,0,40,1,1,"0C0800400000000000",0,0);
EndLoop();
BeginLoop("10","Batch 2 Special Mixing");
Aspirate(8,"JS_SDTS_UDG_SAMPLE_MIX_FINAL",0,0,0,"500",0,0,0,0,0,0,0,0,40,1,1,"0C0800080000000000",0,0);
Dispense(8,"JS_SDTS_UDG_SAMPLE_MIX_FINAL",0,0,0,"500",0,0,0,0,0,0,0,0,40,1,1,"0C0800080000000000",0,0);
EndLoop();
DropDITI(15,13,6,10,70,0);
UserPrompt("Bead binding for 5 min.Move cleanup plate to magnet.Incubate for 8 min.",0,-1);
Group("Remove Supernatant");
GetDITI2(15,"DiTi 1000ul Filter LiHa",0,0,0,70);
Aspirate(1,"JS_SDTS_SUP_REMOVAL","620",0,0,0,0,0,0,0,0,0,0,0,54,1,1,"0C0810000000000000",0,0);
Aspirate(2,"JS_SDTS_SUP_REMOVAL",0,"620",0,0,0,0,0,0,0,0,0,0,54,1,1,"0C0802000000000000",0,0);
Aspirate(4,"JS_SDTS_SUP_REMOVAL",0,0,"620",0,0,0,0,0,0,0,0,0,54,1,1,"0C0800400000000000",0,0);
Aspirate(8,"JS_SDTS_SUP_REMOVAL",0,0,0,"620",0,0,0,0,0,0,0,0,54,1,1,"0C0800080000000000",0,0);
DropDITI(15,13,6,10,70,0);
GroupEnd();
Group("Stamp Ethanol");
GetDITI2(15,"DiTi 1000ul Filter LiHa",0,0,0,70);
Aspirate(1,"JS_SDTS_ETH_ASP","200",0,0,0,0,0,0,0,0,0,0,0,26,1,1,"06040@00",0,0);
Aspirate(2,"JS_SDTS_ETH_ASP",0,"200",0,0,0,0,0,0,0,0,0,0,26,1,1,"06040@00",0,0);
Aspirate(4,"JS_SDTS_ETH_ASP",0,0,"200",0,0,0,0,0,0,0,0,0,26,1,1,"06040@00",0,0);
Aspirate(8,"JS_SDTS_ETH_ASP",0,0,0,"200",0,0,0,0,0,0,0,0,26,1,1,"06040@00",0,0);
Dispense(1,"JS_SDTS_ETH_ASP","200",0,0,0,0,0,0,0,0,0,0,0,54,1,1,"0C0810000000000000",0,0);
Dispense(2,"JS_SDTS_ETH_ASP",0,"200",0,0,0,0,0,0,0,0,0,0,54,1,1,"0C0802000000000000",0,0);
Dispense(4,"JS_SDTS_ETH_ASP",0,0,"200",0,0,0,0,0,0,0,0,0,54,1,1,"0C0800400000000000",0,0);
Dispense(8,"JS_SDTS_ETH_ASP",0,0,0,"200",0,0,0,0,0,0,0,0,54,1,1,"0C0800080000000000",0,0);
DropDITI(15,13,6,10,70,0);
GroupEnd();
UserPrompt("Move cleanup plate to bioshake.Shake at 1400RPM for 30 sec.Move cleanup plate to magnet.Incubate for 30 sec.",0,-1);
Group("Remove Ethanol");
GetDITI2(15,"DiTi 1000ul Filter LiHa",0,0,0,70);
Aspirate(1,"JS_SDTS_SUP_REMOVAL","240",0,0,0,0,0,0,0,0,0,0,0,54,1,1,"0C0810000000000000",0,0);
Aspirate(2,"JS_SDTS_SUP_REMOVAL",0,"240",0,0,0,0,0,0,0,0,0,0,54,1,1,"0C0802000000000000",0,0);
Aspirate(4,"JS_SDTS_SUP_REMOVAL",0,0,"240",0,0,0,0,0,0,0,0,0,54,1,1,"0C0800400000000000",0,0);
Aspirate(8,"JS_SDTS_SUP_REMOVAL",0,0,0,"240",0,0,0,0,0,0,0,0,54,1,1,"0C0800080000000000",0,0);
DropDITI(15,13,6,10,70,0);
GroupEnd();
UserPrompt("Bead dry 5 min.",0,-1);
Group("Stamp EB");
GetDITI2(15,"DiTi 200ul Filter LiHa",0,0,0,70);
Aspirate(1,"JS_SDTS_EB_ASP","145",0,0,0,0,0,0,0,0,0,0,0,26,1,1,"06040P00",0,0);
Aspirate(2,"JS_SDTS_EB_ASP",0,"145",0,0,0,0,0,0,0,0,0,0,26,1,1,"06040P00",0,0);
Aspirate(4,"JS_SDTS_EB_ASP",0,0,"145",0,0,0,0,0,0,0,0,0,26,1,1,"06040P00",0,0);
Aspirate(8,"JS_SDTS_EB_ASP",0,0,0,"145",0,0,0,0,0,0,0,0,26,1,1,"06040P00",0,0);
Dispense(1,"JS_SDTS_EB_ASP","145",0,0,0,0,0,0,0,0,0,0,0,54,1,1,"0C0810000000000000",0,0);
Dispense(2,"JS_SDTS_EB_ASP",0,"145",0,0,0,0,0,0,0,0,0,0,54,1,1,"0C0802000000000000",0,0);
Dispense(4,"JS_SDTS_EB_ASP",0,0,"145",0,0,0,0,0,0,0,0,0,54,1,1,"0C0800400000000000",0,0);
Dispense(8,"JS_SDTS_EB_ASP",0,0,0,"145",0,0,0,0,0,0,0,0,54,1,1,"0C0800080000000000",0,0);
DropDITI(15,13,6,10,70,0);
GroupEnd();
UserPrompt("Move cleanup plate to bioshake.Shake at 1800RPM for 2 min.Move cleanup plate to magnet.Incubate for 1 min.",0,-1);
Group("Elution");
GetDITI2(255,"DiTi 50ul Filter LiHa",0,0,0,70);
Aspirate(1,"JS_SDTS_ELUTION","35",0,0,0,0,0,0,0,0,0,0,0,54,1,1,"0C0810000000000000",0,0);
Aspirate(2,"JS_SDTS_ELUTION",0,"35",0,0,0,0,0,0,0,0,0,0,54,1,1,"0C0810000000000000",0,0);
Aspirate(4,"JS_SDTS_ELUTION",0,0,"35",0,0,0,0,0,0,0,0,0,54,1,1,"0C0810000000000000",0,0);
Aspirate(8,"JS_SDTS_ELUTION",0,0,0,"35",0,0,0,0,0,0,0,0,54,1,1,"0C0810000000000000",0,0);
Aspirate(16,"JS_SDTS_ELUTION",0,0,0,0,"35",0,0,0,0,0,0,0,54,1,1,"0C0802000000000000",0,0);
Aspirate(32,"JS_SDTS_ELUTION",0,0,0,0,0,"35",0,0,0,0,0,0,54,1,1,"0C0802000000000000",0,0);
Aspirate(64,"JS_SDTS_ELUTION",0,0,0,0,0,0,"35",0,0,0,0,0,54,1,1,"0C0802000000000000",0,0);
Aspirate(128,"JS_SDTS_ELUTION",0,0,0,0,0,0,0,"35",0,0,0,0,54,1,1,"0C0802000000000000",0,0);
Dispense(255,"JS_SDTS_ELUTION","35","35","35","35","35","35","35","35",0,0,0,0,33,1,1,"0C080000 O00000000",0,0);
DropDITI(255,13,6,10,70,0);
GetDITI2(255,"DiTi 50ul Filter LiHa",0,0,0,70);
Aspirate(1,"JS_SDTS_ELUTION","35",0,0,0,0,0,0,0,0,0,0,0,54,1,1,"0C0800400000000000",0,0);
Aspirate(2,"JS_SDTS_ELUTION",0,"35",0,0,0,0,0,0,0,0,0,0,54,1,1,"0C0800400000000000",0,0);
Aspirate(4,"JS_SDTS_ELUTION",0,0,"35",0,0,0,0,0,0,0,0,0,54,1,1,"0C0800400000000000",0,0);
Aspirate(8,"JS_SDTS_ELUTION",0,0,0,"35",0,0,0,0,0,0,0,0,54,1,1,"0C0800400000000000",0,0);
Aspirate(16,"JS_SDTS_ELUTION",0,0,0,0,"35",0,0,0,0,0,0,0,54,1,1,"0C0800080000000000",0,0);
Aspirate(32,"JS_SDTS_ELUTION",0,0,0,0,0,"35",0,0,0,0,0,0,54,1,1,"0C0800080000000000",0,0);
Aspirate(64,"JS_SDTS_ELUTION",0,0,0,0,0,0,"35",0,0,0,0,0,54,1,1,"0C0800080000000000",0,0);
Aspirate(128,"JS_SDTS_ELUTION",0,0,0,0,0,0,0,"35",0,0,0,0,54,1,1,"0C0800080000000000",0,0);
Dispense(255,"JS_SDTS_ELUTION","35","35","35","35","35","35","35","35",0,0,0,0,33,1,1,"0C0800000o0000000",0,0);
DropDITI(255,13,6,10,70,0);
GroupEnd();
