20210923_143050 Admin
Administrator
--{ RES }--
V;200
--{ CFG }--
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1,0;Trough 100ml;Diluent
1,1;Trough 100ml;Dye
1,6;Washstation 2Grid DiTi Waste;Labware4
5,0;DiTi 1000ul SBS LiHa;1000ul
5,3;DiTi 200ul SBS LiHa;200ul
12,2;96 Well Microplate;Artel
1;System
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--{ RPG }--
PMP_FilterTest(255,0);
GetDITI2(255,"DiTi 1000ul SBS LiHa",0,0,0,70);
BeginLoop("12","Diluent");
Aspirate(255,"Water free dispense","190","190","190","190","190","190","190","190",0,0,0,0,1,0,1,"0108¯1",0,0);
Dispense(255,"Water free dispense","190","190","190","190","190","190","190","190",0,0,0,0,12,2,1,"0C08¯1000000000000",1,"Diluent",0,1,0);
EndLoop();
DropDITI(255,1,6,10,70,0);
Group("Dye Transfer");
BeginLoop("12","Dye");
GetDITI2(255,"DiTi 200ul SBS LiHa",0,0,0,70);
Aspirate(255,"Water free dispense","10","10","10","10","10","10","10","10",0,0,0,0,1,1,1,"0108¯1",0,0);
Dispense(255,"Water free dispense","10","10","10","10","10","10","10","10",0,0,0,0,12,2,1,"0C08¯1000000000000",1,"Dye",0,1,0);
DropDITI(255,1,6,10,70,0);
EndLoop();
GroupEnd();
