20210924_103233 Admin
Import with ExportImport
EVOware ExportImport Tool
--{ RES }--
V;200
--{ CFG }--
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1,0;DiTi 1000ul LiHa;1000ul DiTis LiHa
1,1;DiTi 50ul LiHa;50ul
1,2;DiTi Waste;Waste
8,1;Trough 100ml;Trough 100ml with Diluent
8,2;Trough 100ml;Trough 100ml with Dye
10,2;96 Well Microplate;96well Verification Plate
23,0;Wash Station Cleaner shallow;Wash Station Cleaner shallow 1
23,1;Wash Station Waste;Wash Station Waste 1
23,2;Wash Station Cleaner deep;Wash Station Cleaner deep 1
1;System
1;1D Reader
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--{ RPG }--
Comment("Pipetting");
Wash(255,23,1,23,0,"10",500,"0.1",500,10,70,30,1,0,1000,0);
Wash(255,23,1,23,0,"2",500,"0.1",500,10,70,30,0,0,1000,0);
Comment("Diluent Solution");
BeginLoop("2","Fill Diluent 1");
GetDITI2(255,"DiTi 1000ul LiHa",0,0,10,70);
BeginLoop("3","Fill Diluent 2");
Aspirate(255,"Water free dispense","380","380","380","380","380","380","380","380",0,0,0,0,8,1,1,"0108¯1",0,0);
BeginLoop("2","Fill Diluent 3");
Dispense(255,"Water free dispense","190","190","190","190","190","190","190","190",0,0,0,0,10,2,1,"0C08¯1000000000000",3,"Fill Diluent 1",0,6,"Fill Diluent 2",0,2,"Fill Diluent 3",0,1,0);
EndLoop();
EndLoop();
DropDITI(255,1,2,10,70,0);
Wash(255,23,1,23,0,"0.5",500,"0.1",500,10,10,30,0,0,1000,0);
EndLoop();
Comment("Range Solution");
BeginLoop("12","Fill Range Solution");
Wash(255,23,1,23,0,"0.5",500,"0.1",500,10,10,30,0,0,1000,0);
GetDITI2(255,"DiTi 50ul LiHa",0,0,0,70);
Aspirate(255,"Water free dispense","10","10","10","10","10","10","10","10",0,0,0,0,8,2,1,"0108¯1",0,0);
Dispense(255,"Water free dispense","10","10","10","10","10","10","10","10",0,0,0,0,10,2,1,"0C08¯1000000000000",1,"Fill Range Solution",0,1,0);
DropDITI(255,1,2,10,70,0);
EndLoop();
Wash(255,23,1,23,0,"10",500,"0.1",500,10,70,30,1,0,1000,0);
Comment("End Of Script");
