20191001_102323 Admin
Worktable link
Administrator
--{ RES }--
V;200
--{ CFG }--
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5,0;Tube 13*75mm 16 Pos;Labware6
6,0;Tube 13*75mm 16 Pos;Labware5
13,6;Washstation 2Grid DiTi Waste
26,0;DiTi 200ul SBS LiHa;Labware14
26,1;Eppendorf 96 Well Microplate;Labware10
26,2;96 Well DeepWell;Labware12
40,1;Eppendorf 96 Well Microplate;Labware9
40,2;96 Well DeepWell;Labware13
1;System
48;Hotel 4Pos DeepWell
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--{ RPG }--
PMP_FilterTest(255,0);
Comment("Daily Maintenance");
Variable(blue,"100",0,"",0,1.000000,10.000000,0,2,0,0);
GetDITI2(126,"DiTi 1000ul SBS LiHa",0,0,0,70);
Aspirate(126,">> Water free dispense <<	16",0,"900","900","900","900","900","900",0,0,0,0,0,26,2,1,"0C080¬100000000000",0,0);
BeginLoop("10","Dye spectrum");
Dispense(126,"Water free dispense",0,"blue","blue","blue","blue","blue","blue",0,0,0,0,0,26,1,1,"0C080¬100000000000",1,"Dye spectrum",0,1,0);
Variable(blue,"blue-10",0,"",0,1.000000,10.000000,0,2,0,0);
EndLoop();
DropDITI(126,13,6,10,70,0);
GetDITI2(126,"DiTi 1000ul SBS LiHa",0,0,0,70);
Variable(green,"10",0,"",0,1.000000,10.000000,0,2,0,0);
Aspirate(126,"Water free dispense",0,"600","600","600","600","600","600",0,0,0,0,0,40,2,1,"0C08®0000000000000",0,0);
BeginLoop("10","Dye spectrum");
Dispense(126,"Water free dispense",0,"green","green","green","green","green","green",0,0,0,0,0,26,1,1,"0C0800¨30000000000",1,"Dye spectrum",0,1,0);
Variable(green,"green+10",0,"",0,1.000000,10.000000,0,2,0,0);
EndLoop();
DropDITI(126,13,6,10,70,0);
Comment("Filter test should have passed 10x, if not, repeate Daily Maintenance.");
