20210604_141032 Admin
Administrator
--{ RES }--
V;200
--{ CFG }--
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1,0;DiTi 1000ul LiHa;Labware1
1,1;DiTi 200ul LiHa;Labware2
1,2;DiTi Waste;Waste
8,1;Trough 100ml;Diluent
8,2;Trough 100ml;Dye B
12,0;DiTi 200ul SBS LiHa;Labware3
12,2;96 Well Microplate;QC Plate
1;System
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--{ RPG }--
PMP_FilterTest(255,0);
GetDITI2(255,"DiTi 1000ul LiHa",0,0,0,70);
BeginLoop("12","Diluent");
Aspirate(255,"Water free dispense","190","190","190","190","190","190","190","190",0,0,0,0,8,1,1,"0108¯1",0,0);
Dispense(255,"Water free dispense","190","190","190","190","190","190","190","190",0,0,0,0,12,2,1,"0C08¯1000000000000",1,"Diluent",0,1,0);
EndLoop();
DropDITI(255,1,2,10,70,0);
PMP_FilterTest(255,0);
BeginLoop("12","Dye B");
GetDITI2(255,"DiTi 200ul SBS LiHa",0,0,0,70);
Aspirate(255,"Water free dispense","10","10","10","10","10","10","10","10",0,0,0,0,8,2,1,"0108¯1",0,0);
Dispense(255,"Water free dispense","10","10","10","10","10","10","10","10",0,0,0,0,12,2,1,"0C08¯1000000000000",1,"Dye B",0,1,0);
DropDITI(255,1,2,10,70,0);
PMP_FilterTest(255,0);
EndLoop();
