20190117_155049 Admin
Administrator
--{ RES }--
V;200
--{ CFG }--
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5,0;Tube 13*75mm 16 Pos;Labware6
6,0;Tube 13*75mm 16 Pos;Labware5
13,6;Washstation 2Grid DiTi Waste
26,1;DiTi 1000ul SBS LiHa;Labware3
26,2;DiTi 200ul SBS LiHa;Labware4
33,1;300mL LiHa Trough;Labware7
33,2;300mL LiHa Trough;Labware2
40,2;96 Well Eppendorf PCR;Labware1
1;System
48;Hotel 4Pos DeepWell
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--{ RPG }--
Variable(X,"100",0,"",0,1.000000,10.000000,0,2,0,0);
GetDITI2(255,"DiTi 200ul SBS LiHa",0,0,0,70);
BeginLoop("10","X");
Aspirate(255,"Water free dispense","X","X","X","X","X","X","X","X",0,0,0,0,33,2,1,"0C08¯1000000000000",0,0);
Dispense(255,"Water free dispense","x","x","x","x","x","x","x","x",0,0,0,0,40,2,1,"0C08¯1000000000000",1,"X",0,1,0);
Variable(X,"x-10",0,"",0,1.000000,10.000000,0,2,0,0);
EndLoop();
DropDITI(255,13,6,10,70,0);
GetDITI2(255,"DiTi 200ul SBS LiHa",0,0,0,70);
Variable(Y,"100",0,"",0,1.000000,10.000000,0,2,0,0);
BeginLoop("10","Y");
Aspirate(255,"Water free dispense","Y","Y","Y","Y","Y","Y","Y","Y",0,0,0,0,33,1,1,"0C08¯1000000000000",0,0);
Dispense(255,"Water free dispense","Y","Y","Y","Y","Y","Y","Y","Y",0,0,0,0,40,2,1,"0C08000000000000 O",1,"Y",0,-1,0);
Variable(Y,"y-10",0,"",0,1.000000,10.000000,0,2,0,0);
EndLoop();
DropDITI(255,13,6,10,70,0);
